PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'dominant_hand': "'right','left'"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = ClickOnly
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine prepareExp
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    CodeComponent codePrepareExp
      Code Type = Py
      Before Experiment:
        import random
        import numpy as np
        import itertools
        import math

        """ For sampling """
        class SimplePerturbationLoader:
            def __init__(self):
                # create stimulus samples
                self.stim_ranges = [
                    [12, 36],
                    [54, 78],
                    [102, 126],
                    [144, 168],
                ]
                self.n_sample_per_range = 5
                self.stim_samples = [
                    np.linspace(s[0], s[1], self.n_sample_per_range)
                    for s in self.stim_ranges]

                # create perturbation sampling range
                self.perturbations = [
                    (1, 1), # quadrant 1
                    (-1, 1), # quadrant 2
                    (-1, -1), # quadrant 3
                    (1, -1), # quadrant 4
                ]

                # set other configurations
                self.jittering = 2

            def stim_add_noise(self, xs):
                noise = np.random.uniform(low=-1, high=1, size=xs.shape) * self.jittering
                return xs + noise

            def generate_one_batch_stims(self):
                stim_list = np.concatenate(self.stim_samples)
                # add some noise
                sampled_stims = self.stim_add_noise(stim_list)
                # combination
                combinations = list(itertools.product(sampled_stims, self.perturbations))
                random.shuffle(combinations)
                return combinations

        """ For calibration """
        class DefaultFixation:
            def __init__(self, window):
                self.fixation = visual.ShapeStim(
                    win=window, vertices='cross',
                    size=(0.06, 0.06), lineWidth=1,
                    lineColor='white', fillColor='white')

            def draw(self):
                self.fixation.draw()
      Begin Experiment:
        # set configrations
        N_REPEATS = 4
        N_REPEAT_BLOCK = 40 # FOR DEBUGGING, 4 will be decent?
        FIXATION_LENGTH = 1
        STIM_LENGTH = 0.75
        MASK_LENGTH = 0.5
        DELAY_LENGTH = 5
        enforce_response_time_limit = True
        MAX_RESP_TIME = 20

        # read exp settings
        dominant_hand = expInfo['dominant_hand']
        is_right_handed = dominant_hand == 'right'

        # add managers
        stim_perturb_loader = SimplePerturbationLoader()

        # some configuration for display
        PATCH_RADIUS = 0.16
      Begin Routine:
        # now generate the stimuli and perturbations
        all_repeats_stims = []
        BLOCK_SIZE = 0
        for _ in range(N_REPEATS):
            # generate stims and perturbations
            stim_perturb_list = stim_perturb_loader.generate_one_batch_stims()
            # cut into blocks
            assert len(stim_perturb_list) % N_REPEAT_BLOCK == 0
            BLOCK_SIZE = len(stim_perturb_list) // N_REPEAT_BLOCK
            for i in range(N_REPEAT_BLOCK):
                all_repeats_stims.append(stim_perturb_list[i*BLOCK_SIZE:(i+1)*BLOCK_SIZE])

        N_BLOCKS = len(all_repeats_stims)

        # also determine the type of perturbation (overt vs covert)
        PERTURB_TYPE_CANDIDATES = ['overt', 'covert']
        N_PERTURB_TYPES = len(PERTURB_TYPE_CANDIDATES)
        all_perturb_types = (PERTURB_TYPE_CANDIDATES *
            ((N_BLOCKS + N_PERTURB_TYPES - 1) // N_PERTURB_TYPES))[:N_BLOCKS]

        logging.info(N_BLOCKS)
  Routine Display
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    CodeComponent codeDisplay
      Code Type = Py
      Before Experiment:
        # define the function to display the stimuli
        class StimObj:
            def __init__(self, window, loc, radius):
                self.grating = visual.GratingStim(
                    win=window, tex='sin', mask='gauss',
                    sf=5.0, size=radius*2,
                    ori=0, pos=loc)

            def setOri(self, ori):
                self.grating.setOri(ori)

            def draw(self):
                self.grating.draw()
      Begin Experiment:
        stim_obj = StimObj(win, [0, 0], PATCH_RADIUS)
      Begin Routine:
        stim_deg = cur_block_stim_perturbs[cur_trial_i][0]
        stim_obj.setOri(stim_deg)
        thisExp.addData('stim', stim_deg)
      Each Frame:
        stim_obj.draw()
    TextboxComponent textDisplayPlaceholder
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = STIM_LENGTH
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  Routine Delay
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    KeyboardComponent keyDelay
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = DELAY_LENGTH
      store = nothing
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    CodeComponent codeDelay
      Code Type = Py
      Before Experiment:
        """ For generating perturbations """
        NRINGS_ALLOWED = [3, 4]
        PERTURB_SIZE = 0.05

        class MultiRings:
            """ cocentric rings """
            def __init__(self, win, nrings, radius):
                self.radius = radius
                self.rings = []
                self.nrings = nrings

                # create circles
                for i in range(nrings):
                    ring = visual.Circle(
                        win,
                        radius=0.5,
                        pos=(0, 0),
                        lineColor='white',
                        fillColor=None,
                        lineWidth=1.5
                    )
                    self.rings.append(ring)

                # set radius
                self.setRadius(radius)
                self.setPos([0, 0])

            def setRadius(self, radius):
                self.radius = radius
                ring_spacing = self.radius / (self.nrings)
                for i, ring in enumerate(self.rings):
                    radius = ring_spacing * (i + 1)
                    ring.setRadius(radius)

            def setPos(self, pos):
                self.pos = pos
                for ring in self.rings:
                    ring.setPos(pos)

            def draw(self):
                for ring in self.rings:
                    ring.draw()

        class MultiRingManager:
            """ a bunch of cocentric rings for perturbation"""
            def __init__(self, win, radius):
                self.fixed_radius = radius
                self.ratio_min, self.ratio_max = 0.9, 1.1
                self.ring_patterns = {}
                self.nrings = NRINGS_ALLOWED[:]
                for nring in self.nrings:
                    self.ring_patterns[nring] = MultiRings(
                        win, nring, radius)

                # set an initial default rings
                self.resample()

            def resample(self):
                sample_n = np.random.choice(self.nrings)
                sampled = self.ring_patterns[sample_n]
                self.target_n = sample_n
                self.target_rings = sampled
                self.radius = self.target_rings.radius
                self.pos = self.target_rings.pos
                return sample_n

            def setRadius(self, new_radius):
                self.target_rings.setRadius(new_radius)
                self.radius = new_radius

            def setPos(self, new_pos):
                self.target_rings.setPos(new_pos)
                self.pos = new_pos

            def draw(self):
                self.target_rings.draw()

        class SinglePerturbItemManager:
            def __init__(self, win, item_type):
                self.perturb_scale_range = [0.1, 0.25]
                self.scale_ratio_range = [0.9, 1.1]
                self.item_size = PERTURB_SIZE

                # other properties
                self.has_ori = False
                self.scalable = False
                self.multi_sample = False

                # load resources
                if item_type == 'landolt':
                    self.has_ori = True
                    self.img = visual.ImageStim(
                        win, image='resources/landolt_white.png',
                        pos=(0, 0),
                        ori=0,
                        size=(self.item_size, self.item_size))
                elif item_type == 'circle':
                    self.img = visual.Circle(
                        win, radius=self.item_size/2,
                        pos=(0, 0),
                        lineColor='white',
                        fillColor='white'
                    )
                elif item_type == 'rings':
                    self.multi_sample = True
                    self.scalable = True
                    self.img = MultiRingManager(win, self.item_size/2)
                else:
                    raise NotImplementedError

            def generate_scaled_radius(self):
                scale_ratio = np.random.uniform(
                    self.scale_ratio_range[0],
                    self.scale_ratio_range[1])
                new_radius = self.item_size / 2 * scale_ratio
                return new_radius

            def generate_perturb_position(self, perturb_code):
                perturb_center = np.random.uniform(
                    self.perturb_scale_range[0],
                    self.perturb_scale_range[1],
                    size=2
                ) * np.array(perturb_code) # center of perturbation
                return perturb_center

            def move(self, perturb_code):
                perturb_info = {}

                ## change appearance
                if self.multi_sample:
                    sample_id = self.img.resample()
                    perturb_info['sample_id'] = sample_id

                ## position
                center = self.generate_perturb_position(perturb_code)
                perturb_info['pos'] = center
                perturb_info['radius'] = self.item_size/2
                self.img.setPos(center)

                ## scale it (if allowed)
                if self.scalable:
                    new_radius = self.generate_scaled_radius()
                    self.img.setRadius(new_radius)
                    perturb_info['radius'] = new_radius

                ## rotation
                if self.has_ori:
                    rotation = np.random.randint(10, 170) * (np.random.randint(2)+1) # avoid ambiguous
                    self.img.ori = rotation
                    perturb_info['ori'] = rotation

                return self.img, perturb_info

        class PerturbItemManager:
            def __init__(self, win):
                # a few things needed
                self.rings = SinglePerturbItemManager(win, 'rings')
                # self.landolt = SinglePerturbItemManager(win, 'landolt')
                self.circle = SinglePerturbItemManager(win, 'circle')
                self.center = SinglePerturbItemManager(win, 'circle')
                self.reset()

            def reset(self):
                self.center.move([0, 0])
                self.active_items = [self.center,]

            def update(self, is_task, perturb_code):
                draw_item, move_info = None, None
                self.reset()
                if perturb_code is not None:
                    if is_task: # overt movement
                        # draw_item, move_info = self.landolt.move(perturb_code)
                        draw_item, move_info = self.rings.move(perturb_code)
                    else: # covert movement
                        draw_item, move_info = self.circle.move(perturb_code)
                else:
                    if is_task: # judgement at center
                        # draw_item, move_info = self.landolt.move([0, 0])
                        draw_item, move_info = self.rings.move([0, 0])
                    else:
                        draw_item, move_info = self.center.move([0, 0])
                self.active_items = [draw_item,]
                return move_info

            def draw(self):
                for item in self.active_items:
                    item.draw()


        class PerturbSchedueler:
            def __init__(self, win, timing_settings, delay_length):
                self.perturb_item_manager = PerturbItemManager(win)
                self.n_perturb = timing_settings['n_perturb']
                self.n_judge = timing_settings['n_judge']
                self.per_t_min, self.per_t_max = timing_settings['duration']
                self.earliest, self.latest = timing_settings['timing']
                self.min_gap = timing_settings['min_gap']
                self.delay_length = delay_length

                self.clear_schedule()

            def clear_schedule(self):
                # reset schedule
                self.schedule = None
                self.records = None
                self.current_id = -1
                self.last_record_id = -1
                self.on = False
                self.require_input = False
                self.perturb_type = None

            def reset_schedule(self, perturb_type):
                self.clear_schedule()
                self.perturb_item_manager.reset()
                self.schedule = []
                self.records = {'judge': [], 'perturb': []}

                # determine duration of each epochs
                assert self.delay_length >= self.latest
                self.perturb_type = perturb_type
                if self.perturb_type == 'covert':
                    self.n_events = self.n_perturb + self.n_judge
                elif self.perturb_type == 'overt':
                    assert self.n_perturb == self.n_judge
                    self.n_events = self.n_perturb
                assert (
                    self.n_events * self.per_t_max +
                    (self.n_events-1) * self.min_gap +
                    self.earliest) <= self.latest
                durations = np.random.uniform(
                    self.per_t_min, self.per_t_max,
                    size=self.n_events
                )

                # sample the start points
                reduced_duration = self.latest - self.earliest - np.sum(
                    durations) - (self.n_events-1) * self.min_gap
                starts = np.random.uniform(0, reduced_duration, size=self.n_events)
                starts = np.sort(starts)

                # get time start end for each
                t_overhead = self.earliest
                for i in range(self.n_events):
                    start_t = t_overhead + starts[i]
                    end_t = start_t + durations[i]
                    self.schedule.append([start_t, end_t])
                    t_overhead += self.min_gap
                    t_overhead += end_t - start_t

                # finally, decided which is task and which is perturb
                self.perturb_type_codes = [] # each pair: is_task + is_perturb
                if self.perturb_type == 'overt':
                    self.perturb_type_codes += [
                        {'is_task': True, 'is_perturb': True} for _ in range(self.n_events)]
                elif self.perturb_type == 'covert':
                    self.perturb_type_codes += [
                        {'is_task': False, 'is_perturb': True} for _ in range(self.n_perturb)]
                    self.perturb_type_codes += [
                        {'is_task': True, 'is_perturb': False} for _ in range(self.n_judge)]
                    random.shuffle(self.perturb_type_codes)

                # other stuffs
                self.current_id = 0

            def check_schedule(self, t, perturb_code):
                # return the event the current t is in
                # check whether it's on or off
                n_total = len(self.schedule)
                if self.current_id < n_total:
                    epoch = self.schedule[self.current_id]
                    if t < epoch[0]:
                        self.on = False
                    elif t > epoch[1]:
                        self.on = False
                        while self.current_id < n_total-1 and t > epoch[1]:
                            # find the next match
                            self.current_id += 1
                            epoch = self.schedule[self.current_id]
                    else:
                        self.on = True
                else:
                    self.on = False

                if self.on:
                    # currently something is happening
                    current_perturb_type_codes = self.perturb_type_codes[
                            self.current_id]
                    if self.current_id > self.last_record_id:
                        # there is something not plotted or recorded yet --> update it
                        is_task = current_perturb_type_codes['is_task']
                        is_perturb = current_perturb_type_codes['is_perturb']
                        perturb_code = perturb_code if is_perturb else None
                        update_info = self.perturb_item_manager.update(
                            is_task = is_task,
                            perturb_code = perturb_code,
                        )
                        # append time info
                        update_info['tstart'] = t # use actual start time
                        update_info['tend'] = self.schedule[self.current_id][1]
                        # send to records
                        if is_task:
                            self.records['judge'].append(update_info.copy())
                        if is_perturb:
                            self.records['perturb'].append(update_info.copy())
                        # update all states
                        self.last_record_id = self.current_id
                        self.require_input = is_task

                else: # just give the center fixation
                    self.perturb_item_manager.update(
                        is_task = False,
                        perturb_code = None,
                    )
                    self.require_input = False

                self.perturb_item_manager.draw()

            def check_judge_left_right_correct(self, key_input, key_map):
                ans_is_left = self.records['judge'][-1]['ori'] > 180
                ## check the key
                last_key = key_input[-1].name
                key_is_left = last_key.lower() == key_map[0]
                key_is_correct = key_is_left == ans_is_left
                return key_is_correct

            def check_judge_key_match(self, key_input):
                ans = str(self.records['judge'][-1]['sample_id'])
                ## check the key
                last_key = key_input[-1].name
                key_is_correct = last_key.lower() == ans
                return key_is_correct

            def check_input(self, t, key_input, key_map):
                feedback = None
                if self.require_input:
                    if key_input: # there is some input...
                        # only care if input is required
                        key_is_correct = self.check_judge_key_match(key_input)
                        ## update the result
                        self.records['judge'][-1]['ans_correct'] = key_is_correct
                        self.records['judge'][-1]['rt'] = t - self.records['judge'][-1]['tstart']
                        ## end it
                        self.on = False
                        self.require_input = False
                        self.current_id += 1
                        ## prepare feedback
                        feedback = key_is_correct
                    else:
                        # TODO: ignore it?
                        pass
                return feedback
      Begin Experiment:
        # a few configurations
        ## number of perturbations during the delay
        PERTURB_TIMING_SETTINGS = {
            'n_perturb': 1,
            'n_judge': 1,
            'duration': (1.0, 1.5),
            'timing': (0.5, 4.5),
            'min_gap': 0.1,
        }
        perturb_scheduler = PerturbSchedueler(
            win=win,
            timing_settings=PERTURB_TIMING_SETTINGS,
            delay_length=DELAY_LENGTH)

        ## left / right hand mapping
        # left_hand_keys = ['j', 'k'] # for left-handed
        # right_hand_keys = ['a', 's'] # for right-handed
        # assert len(left_hand_keys) == len(right_hand_keys)
        # resp_key_map = right_hand_keys if is_right_handed else left_hand_keys
        resp_key_map = [str(i) for i in NRINGS_ALLOWED]

        ## load sound feedback
        correct_sound = sound.Sound('bleep.wav')
        wrong_sound   = sound.Sound('buzz.wav')
      Begin Routine:
        # set up the timing of displaying perturbations
        perturb_scheduler.reset_schedule(cur_block_perturb_type)

        # get stim perturb codes
        perturb_code = cur_block_stim_perturbs[cur_trial_i][1]

        # save info
        thisExp.addData("perturb_code_x", perturb_code[0])
        thisExp.addData("perturb_code_y", perturb_code[1])
        thisExp.addData("perturb_type", cur_block_perturb_type)
      Each Frame:
        # check schedule
        perturb_scheduler.check_schedule(t, perturb_code)

        if perturb_scheduler.require_input:
            # read the keyboard input
            keys = keyDelay.getKeys(resp_key_map)
            perturb_feedback = perturb_scheduler.check_input(t, keys, resp_key_map)
            if perturb_feedback is not None:
                # there are some correct/incorrect feedback
                correct_sound.stop()
                wrong_sound.stop()
                if perturb_feedback:
                    correct_sound.play()
                else:
                    wrong_sound.play()
      End Routine:
        # save all records
        for record_type in ['judge', 'perturb']:
            records = perturb_scheduler.records[record_type]
            for i, record in enumerate(records):
                for k,v in record.items():
                    thisExp.addData(f"{record_type}_{i}_{k}", v)

        # also compute the accuracy
        perturb_acc = np.mean(
            [s.get('ans_correct', False) for s in perturb_scheduler.records['judge']])
        block_perturb_acc_records.append(perturb_acc)
    TextboxComponent textDelayPlaceholder
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = DELAY_LENGTH 
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  Routine OriTest
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    CodeComponent codeOriTest
      Code Type = Py
      Before Experiment:
        # define the function to make report
        # define the function to process mouse response
        CLICK_RADIUS = 0.01
        CLICK_REGION_FACTOR = 3
        button_width = 0.1
        button_height = 0.05

        def funcComputeOriDiff(s1, s2):
            diff = np.abs(s1 - s2)
            diff = np.min([diff, 180-diff])
            return diff

        class WheelClickRegister:
            def __init__(self, wheel, pos_point, opp_point, wheel_pos):
                self.wheel = wheel
                self.wheel_c = wheel_pos[0]
                self.wheel_r = wheel_pos[1]
                self.click_radius = wheel_pos[2]
                self.point_click_selected = pos_point
                self.opposite_point = opp_point
                self.clicks_x = []
                self.clicks_y = []
                self.clicks_time = []

                # flag for whether there are any response
                self.is_valid = True
                self.ever_have_response = False

                # initialize only the wheel
                self.wheel.setAutoDraw(True)
                self.point_click_selected.setAutoDraw(False)
                self.opposite_point.setAutoDraw(False)

            def register_click(self, mouse_position, mouse_time):
                mouse_x = mouse_position[0]
                mouse_y = mouse_position[1]
                mouse_r = math.sqrt(
                    (mouse_x-self.wheel_c[0]) ** 2 +
                    (mouse_y-self.wheel_c[1]) ** 2)

                click_min_r = self.wheel_r - self.click_radius * CLICK_REGION_FACTOR
                click_max_r = self.wheel_r + self.click_radius * CLICK_REGION_FACTOR
                if mouse_r >= click_min_r and mouse_r <= click_max_r:
                    # the click is treated as a valid response
                    self.ever_have_response = True

                    pos_x_scaled = (mouse_x-self.wheel_c[0]) / mouse_r
                    pos_y_scaled = (mouse_y-self.wheel_c[1]) / mouse_r
                    pos_select_x = self.wheel_c[0] + pos_x_scaled * self.wheel_r
                    pos_select_y = self.wheel_c[1] + pos_y_scaled * self.wheel_r
                    opp_select_x = self.wheel_c[0] - pos_x_scaled * self.wheel_r
                    opp_select_y = self.wheel_c[1] - pos_y_scaled * self.wheel_r

                    if len(self.clicks_x) == 0:
                        # initialize the two points
                        self.point_click_selected.autoDraw = True
                        self.opposite_point.autoDraw = True
                    # update the position of two_points
                    self.point_click_selected.setPos(
                        (pos_select_x, pos_select_y))
                    self.opposite_point.setPos(
                        (opp_select_x, opp_select_y))
                    # add the selected
                    self.clicks_x.append(pos_x_scaled)
                    self.clicks_y.append(pos_y_scaled)
                    self.clicks_time.append(mouse_time)

            def setAutoDraw(self, autoDraw):
                self.wheel.setAutoDraw(autoDraw)
                self.point_click_selected.setAutoDraw(autoDraw)
                self.opposite_point.setAutoDraw(autoDraw)

            def compute_response(self):
                # convert response to orientation
                if self.ever_have_response:
                    x_resp = self.clicks_x[-1]
                    y_resp = self.clicks_y[-1]
                    rad = np.arctan2(y_resp, x_resp)
                    deg = np.rad2deg(rad)
                    deg = deg % 180
                    deg = 90 - deg
                    deg = deg % 180
                    return deg
                else:
                    return None

        def createPatch(window, pos, radius, fill_color='white', line_color='black'):
            scaled_border = radius * 10 / 0.2
            patch = visual.Circle(
                window, pos=pos, radius=radius,
                fillColor=fill_color, lineColor=line_color, colorSpace='rgb',
                lineWidth=scaled_border)
            return patch

        def funcDrawAdjustResponse(window, loc, draw_radius, click_radius):
            # set the drawing region
            ## for the wheel
            draw_area_x = loc[0]
            draw_area_y = loc[1]
            draw_area_bottom_y = draw_area_y - draw_radius
            wheel_pos = [
                (loc[0], loc[1]),
                draw_radius, click_radius]
            wheel_color = 'white'
            wheel = createPatch(
                window, pos=(draw_area_x, draw_area_y), radius=draw_radius,
                fill_color='gray', line_color=wheel_color)

            # initialize the two points
            point_click_selected = createPatch(
                window, pos=(draw_area_x, draw_area_y), radius=click_radius,
                fill_color='black', line_color='black')
            opposite_point = createPatch(
                window, pos=(draw_area_x, draw_area_y), radius=click_radius,
                fill_color='black', line_color='black')

            # register mouse click function
            response_wheel_obj = WheelClickRegister(
                wheel, pos_point=point_click_selected,
                opp_point=opposite_point, wheel_pos=wheel_pos)

            return response_wheel_obj

        """ create the self-defined buttons """
        # functions to create buttons
        class SelfDefinedButton:
            def __init__(self, window, text, pos, size):
                # load background
                img_path = "resources/button.png"
                self.img = visual.ImageStim(
                    win=window, image=img_path,
                    size=size, pos=pos)

                # load text
                text_height = size[1] / 2
                self.text = visual.TextStim(
                    win=window, text=text, pos=pos, color='black',
                    height=text_height, anchorHoriz='center', anchorVert='center')

                # get stats
                self.left = pos[0] - size[0] / 2
                self.right = pos[0] + size[0] / 2
                self.top = pos[1] + size[1] / 2
                self.bottom = pos[1] - size[1] / 2

                # set auto draw
                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                self.img.setAutoDraw(autoDraw)
                self.text.setAutoDraw(autoDraw)

            def contains(self, pos):
                px = pos[0]
                py = pos[1]
                on_button = (
                    (px > self.left) & (px < self.right) & (
                    py > self.bottom) & (py < self.top))
                return on_button

        def funcCreateButton(window, text, pos, size):
            button = SelfDefinedButton(window, text, pos, size)
            return button
      Begin Routine:
        # show the cursor
        win.mouseVisible = True

        objs_display = []

        # response field
        loc = [0, 0]
        response_obj = funcDrawAdjustResponse(
            win, loc, PATCH_RADIUS, CLICK_RADIUS)
        objs_display.append(response_obj)

        # to add the confirm button
        continue_button = funcCreateButton(
            win, 'continue', pos=(0, -0.35),
            size=(button_width*1.3, button_height*1.3))
        objs_display.append(continue_button)

        # to detect whether a pressed has released
        has_released = True
      Each Frame:
        # read mouse click
        left_button = responseMouse.getPressed()[0]
        mouse_position = responseMouse.getPos()
        mouse_time = t
        if left_button:
            if continue_button.contains(mouse_position):
                # first check if it's over the continue button
                no_pending = response_obj.ever_have_response
                if no_pending:
                    continueRoutine = False
            else:
                if has_released:
                    # this is a new press, register it
                    has_released = False
                    # otherwise, ignore it
                    response_obj.register_click(mouse_position, mouse_time)
        else:
            has_released = True

        if enforce_response_time_limit and (t > MAX_RESP_TIME):
            continueRoutine = False
      End Routine:
        # reset click recording
        has_released = True

        # resp_obj = response_objects[resp_obj_id]
        resp_x_to_record = response_obj.clicks_x
        resp_y_to_record = response_obj.clicks_y
        resp_time_to_record = response_obj.clicks_time

        # approximate the response
        # if it's not none, compute the error and add to records
        resp_approximated = response_obj.compute_response()
        if resp_approximated is not None:
            error_approximated = funcComputeOriDiff(resp_approximated, stim_deg)
            block_error_records.append(error_approximated)
        else:
            # record those no response
            block_error_records.append(None)

        thisExp.addData(f'resp_x', resp_x_to_record)
        thisExp.addData(f'resp_y', resp_y_to_record)
        thisExp.addData(f'resp_time', resp_time_to_record)

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
        response_obj = None

        # hide the cursor
        win.mouseVisible = False
    MouseComponent responseMouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine PreTrial
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    CodeComponent codePretrial
      Code Type = Py
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      Begin Experiment:
        fixation = DefaultFixation(win)
      Begin Routine:
        cur_trial_i = trialLoop.thisN
        cur_trial_stim_perturbs = cur_block_stim_perturbs[cur_trial_i]
      Each Frame:
        fixation.draw()
    TextComponent textPreTrialPlaceholder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = FIXATION_LENGTH
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  Routine postTrial
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  Routine PreBlock
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    CodeComponent codePreBlock
      Code Type = Py
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      Begin Routine:
        block_id = blockLoop.thisN
        cur_block_stim_perturbs = all_repeats_stims[blockLoop.thisN]
        cur_block_perturb_type = all_perturb_types[blockLoop.thisN]

        # prepare data recording
        block_error_records = []
        block_perturb_acc_records = []
      End Routine:
        # hide the cursor
        win.mouseVisible = False
    TextComponent textPreBlock
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Starting Block " + str(block_id+1)
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    ButtonComponent buttonPreBlock
      bold = False
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.0, -0.35)
      size = (0.25, 0.08)
      startVal [time (s)] = 0
      text = continue
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  Routine AfterMask
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    CodeComponent codeAfterMask
      Code Type = Py
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      Before Experiment:
        class NoisePatch:
            def __init__(self, window, loc, display_r):
                noise_img_path = "resources/noise.png"
                self.obj = visual.ImageStim(
                    win=window, image=noise_img_path,
                    ori=0, size=2*display_r, pos=loc)

            def rotate(self):
                noise_ori = 180 * random.random()
                self.obj.setOri(noise_ori)

            def draw(self):
                self.obj.draw()
      Begin Experiment:
        mask_obj = NoisePatch(win, [0, 0], PATCH_RADIUS)
      Begin Routine:
        mask_obj.rotate()
      Each Frame:
        mask_obj.draw()
    TextComponent textMaskPlaceholder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = MASK_LENGTH
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  Routine postBlock
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    CodeComponent codePostBlock
      Code Type = Py
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      Begin Routine:
        # show the cursor
        win.mouseVisible = True

        # compute metrics
        block_avg_acc = 1 - np.mean(block_error_records) / 180
        block_avg_acc_str = f"{int(block_avg_acc*100)}%"
        block_avg_perturb_acc = np.mean(block_perturb_acc_records)
        block_avg_perturb_acc_str = f"{int(block_avg_perturb_acc*100)}%"
    TextComponent textPostBlock
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Your get orientation "+ block_avg_acc_str + " correct\n(with " +block_avg_perturb_acc_str + " number of rings judgement correct)"
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    ButtonComponent buttonPostBlock
      bold = False
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.0, -0.35)
      size = (0.25, 0.08)
      startVal [time (s)] = 0
      text = continue
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Flow
  Routine prepareExp
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = N_BLOCKS
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    Routine PreBlock
    LoopInitiator trialLoop loopType="TrialHandler"
      loopType = sequential
      nReps = BLOCK_SIZE
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      Routine PreTrial
      Routine Display
      Routine AfterMask
      Routine Delay
      Routine OriTest
      Routine postTrial
    LoopTerminator trialLoop
    Routine postBlock
  LoopTerminator blockLoop
