PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'test mode': '["online", "lab"]', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/overview.png', 'resources/rule_color_independent.png', 'resources/valid_draw_area.png', 'resources/valid_click_area.png', 'resources/trial_type_1_draw.png', 'resources/trial_type_1_click.png', 'resources/trial_type_0_draw.png', 'resources/trial_type_0_click.png', 'resources/star.png', 'resources/star_2.png', 'resources/star_1.png', 'resources/noise.png', 'resources/empty_star.png', 'resources/empty_star_2.png', 'resources/empty_star_1.png', 'resources/drawing.png', 'resources/dot_2.png', 'resources/dot_1.png', 'resources/clicking.png', 'resources/button.png', 'resources/arrow.png']
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  consoleLoggingLevel = error
  expName = ModeEyeTrackInstr
  keyboardBackend = ioHub
  logging level = error
  runMode = 1
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Routines
  Routine fullInstruction
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    CodeComponent codeFullInstruction
      Code Type = Both
      Begin Experiment:
        continue_button = None
      Begin JS Experiment:
        continue_button = null;
      Begin JS Routine:
        continue_button = funcCreateButton(
            psychoJS.window, 'continue',
            [0, -0.4], [0.25, 0.1]);
      Begin Routine:
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
      Each Frame:
        left_button = mouseFullInstruction.getPressed()[0]
        mouse_position = mouseFullInstruction.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      Each JS Frame:
        left_button = mouseFullInstruction.getPressed()[0];
        mouse_position = mouseFullInstruction.getPos();
        if (left_button && (t > 0.5) && continue_button.contains(mouse_position)) {
            continueRoutine = false;
        }
      End JS Routine:
        continue_button.setAutoDraw(false);
        continue_button = null;
      End Routine:
        continue_button.setAutoDraw(False);
        continue_button = None
    TextComponent textInstruction
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'In this experiment, you will complete tasks that involve remembering and reproducing visual patterns.\n\n In each trial, you will see two oriented patches. Your task is to remember them for a few seconds and reproduce them afterward. \n\n The experiment consists of '+ str(n_kinds_of_tasks) + ' types of tasks. For each type, you will first see instructions, followed by a few practice trials before starting the actual task.'
      wrapWidth = 1.2
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    MouseComponent mouseFullInstruction
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine prepareComponents
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    CodeComponent codePrepareComponents
      Code Type = Both
      Before Experiment:
        import random
        import math

        MAX_DRAWINGS = 3
        MAX_STROKES = 10
        CLICK_REGION_FACTOR = 3

        # define some helper functions
        # functions for ori comparison
        def funcComputeOriDiff(s1, s2):
            diff = (s1 - s2 + 90) % 180 - 90
            if diff == -90:
                diff = 90
            return diff

        # functions to create buttons
        class SelfDefinedButton:
            def __init__(self, window, text, pos, size):
                # load background
                img_path = "resources/button.png"
                self.img = visual.ImageStim(
                    win=window, image=img_path,
                    size=size, pos=pos)

                # load text
                text_height = size[1] / 2
                self.text = visual.TextStim(
                    win=window, text=text, pos=pos, color='black',
                    height=text_height, anchorHoriz='center', anchorVert='center')

                # get stats
                self.left = pos[0] - size[0] / 2
                self.right = pos[0] + size[0] / 2
                self.top = pos[1] + size[1] / 2
                self.bottom = pos[1] - size[1] / 2

                # set auto draw
                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                self.img.setAutoDraw(autoDraw)
                self.text.setAutoDraw(autoDraw)

            def contains(self, pos):
                px = pos[0]
                py = pos[1]
                on_button = (
                    (px > self.left) & (px < self.right) & (
                    py > self.bottom) & (py < self.top))
                return on_button

        def funcCreateButton(window, text, pos, size):
            button = SelfDefinedButton(window, text, pos, size)
            return button

        def createPatch(window, pos, radius, fill_color='white', line_color='black'):
            scaled_border = radius * 10 / 0.2
            patch = visual.Circle(
                window, pos=pos, radius=radius,
                fillColor=fill_color, lineColor=line_color, colorSpace='rgb',
                lineWidth=scaled_border)
            return patch

        def createEnabledDrawPatch(window, pos, radius):
            patch = createPatch(
                window, pos, radius,
                fill_color='white', line_color='black')
            return patch

        def createDisabledDrawPatch(window, pos, radius):
            gray_color = [-0.3, -0.3, -0.3]
            patch = createPatch(
                window, pos, radius,
                fill_color=gray_color, line_color=gray_color)
            return patch

        # define the function to display the stimuli
        def funcDrawStim(window, ori, loc, radius):
            # ori: 0-180 (degrees)
            # loc: position of the grating
            grating = visual.GratingStim(
                window, tex='sin', mask='gauss',
                sf=5.0, size=radius*2,
                ori=ori, pos=loc)
            grating.autoDraw = True
            return grating

        # define the function to make report
        # define the function to process mouse response
        class WheelClickRegister:
            def __init__(self, wheel, pos_point, opp_point, wheel_pos):
                self.wheel = wheel
                self.wheel_c = wheel_pos[0]
                self.wheel_r = wheel_pos[1]
                self.click_radius = wheel_pos[2]
                self.point_click_selected = pos_point
                self.opposite_point = opp_point
                self.clicks_x = []
                self.clicks_y = []
                self.clicks_time = []

                # flag for whether there are any response
                self.is_valid = True
                self.ever_have_response = False

                # initialize only the wheel
                self.wheel.setAutoDraw(True)
                self.point_click_selected.setAutoDraw(False)
                self.opposite_point.setAutoDraw(False)

            def register_click(self, mouse_position, mouse_time):
                mouse_x = mouse_position[0]
                mouse_y = mouse_position[1]
                mouse_r = math.sqrt(
                    (mouse_x-self.wheel_c[0]) ** 2 +
                    (mouse_y-self.wheel_c[1]) ** 2)

                click_min_r = self.wheel_r - self.click_radius * CLICK_REGION_FACTOR
                click_max_r = self.wheel_r + self.click_radius * CLICK_REGION_FACTOR
                if mouse_r >= click_min_r and mouse_r <= click_max_r:
                    # the click is treated as a valid response
                    self.ever_have_response = True

                    pos_x_scaled = (mouse_x-self.wheel_c[0]) / mouse_r
                    pos_y_scaled = (mouse_y-self.wheel_c[1]) / mouse_r
                    pos_select_x = self.wheel_c[0] + pos_x_scaled * self.wheel_r
                    pos_select_y = self.wheel_c[1] + pos_y_scaled * self.wheel_r
                    opp_select_x = self.wheel_c[0] - pos_x_scaled * self.wheel_r
                    opp_select_y = self.wheel_c[1] - pos_y_scaled * self.wheel_r

                    if len(self.clicks_x) == 0:
                        # initialize the two points
                        self.point_click_selected.autoDraw = True
                        self.opposite_point.autoDraw = True
                    # update the position of two_points
                    self.point_click_selected.setPos(
                        (pos_select_x, pos_select_y))
                    self.opposite_point.setPos(
                        (opp_select_x, opp_select_y))
                    # add the selected
                    self.clicks_x.append(pos_x_scaled)
                    self.clicks_y.append(pos_y_scaled)
                    self.clicks_time.append(mouse_time)

            def setAutoDraw(self, autoDraw):
                self.wheel.setAutoDraw(autoDraw)
                self.point_click_selected.setAutoDraw(autoDraw)
                self.opposite_point.setAutoDraw(autoDraw)

            def compute_response(self):
                # convert response to orientation
                if self.ever_have_response:
                    x_resp = self.clicks_x[-1]
                    y_resp = self.clicks_y[-1]
                    rad = np.arctan2(y_resp, x_resp)
                    deg = np.rad2deg(rad)
                    deg = deg % 180
                    deg = 90 - deg
                    deg = deg % 180
                    return deg
                else:
                    return None

        class FakeWheelClickRegister:
            def __init__(self, wheel, wheel_pos):
                self.wheel = wheel
                self.wheel_c = wheel_pos[0]
                self.wheel_r = wheel_pos[1]
                self.click_radius = wheel_pos[2]

                # if it's valid
                self.is_valid = False
                self.has_response = False

                # change the color of some

                # initialize
                self.setAutoDraw(True)

            def register_click(self, mouse_position, mouse_time):
                mouse_x = mouse_position[0]
                mouse_y = mouse_position[1]
                mouse_r = math.sqrt(
                    (mouse_x-self.wheel_c[0]) ** 2 +
                    (mouse_y-self.wheel_c[1]) ** 2)

                click_min_r = self.wheel_r - self.click_radius * CLICK_REGION_FACTOR
                click_max_r = self.wheel_r + self.click_radius * CLICK_REGION_FACTOR
                if mouse_r >= click_min_r and mouse_r <= click_max_r:
                    # the click is within the valid region
                    self.has_response = True

            def setAutoDraw(self, autoDraw):
                self.wheel.setAutoDraw(autoDraw)

        # define the function to collect free-form drawing
        class CanvasDrawRegister:
            def __init__(self, canvas, strokes, redo_button,
                    canvas_pos, redo_button_pos):
                self.canvas = canvas
                self.strokes = strokes
                self.redo_button = redo_button
                self.canvas_c = canvas_pos[0]
                self.canvas_r = canvas_pos[1]
                self.redo_button_pos = redo_button_pos # left, right, top, bottom

                # this is a valid response object
                self.is_valid = True

                # temporary inner states
                self.all_drawings_x = []
                self.all_drawings_y = []
                self.all_drawings_time = []
                self.drawing_index = 0
                self.initialize_drawing()

                # flag for whether there are any response
                self.ever_have_response = False

                # if we have strokes not saved yet
                self.has_unsaved_drawing = False
                self.has_unsaved_stroke = False

                # start drawing
                self.canvas.setAutoDraw(True)
                self.redo_button.setAutoDraw(True)

            def initialize_drawing(self):
                self.stroke_time = []
                self.stroke_data_x = []
                self.stroke_data_y = []
                self.stroke_index = 0
                self.current_vertices = []
                self.current_stroke_x = []
                self.current_stroke_y = []
                self.current_stroke_time = []
                self.has_started_drawing = False
                self.has_stopped_drawing = True

                self.last_x = None
                self.last_y = None

                # initialize all strokes
                for i in range(len(self.strokes)):
                    stroke = self.strokes[i]
                    stroke.autoDraw = False
                    stroke.vertices = [(0, 0)]

            def register_mouse(self, mouse_position, mouse_time):
                has_redo = False # sent back to timer
                stroke = self.strokes[self.stroke_index]
                if self.stroke_index < len(self.strokes):
                    # only process the first max_strokes strokes
                    # Get the current mouse position and state
                    # check if it's within the region to draw
                    mouse_x = mouse_position[0]
                    mouse_y = mouse_position[1]
                    mouse_r = mouse_r = math.sqrt(
                        (mouse_x-self.canvas_c[0]) ** 2 +
                        (mouse_y-self.canvas_c[1]) ** 2)

                    if mouse_r < self.canvas_r:
                        # the click is treated as a valid response
                        self.ever_have_response = True

                        # if within the drawing region
                        if not self.has_started_drawing:
                            # initialize a stroke
                            stroke.autoDraw = True
                            self.current_vertices = []
                            self.current_stroke_x = []
                            self.current_stroke_y = []
                            self.current_stroke_time = []
                            self.has_started_drawing = True
                            self.has_stopped_drawing = False

                        if self.last_x == None or abs(self.last_x - mouse_x) > 0.01 or abs(self.last_y - mouse_y) > 0.01:
                            # Update
                            pos_x_scaled = (mouse_x-self.canvas_c[0]) / self.canvas_r
                            pos_y_scaled = (mouse_y-self.canvas_c[1]) / self.canvas_r
                            self.current_vertices.append(mouse_position)
                            self.current_stroke_x.append(pos_x_scaled)
                            self.current_stroke_y.append(pos_y_scaled)
                            self.current_stroke_time.append(mouse_time)
                            stroke.vertices = self.current_vertices

                            # flag that there are unsaved drawings
                            self.has_unsaved_stroke = True
                            self.has_unsaved_drawing = True

                            self.last_x = mouse_x
                            self.last_y = mouse_y
                    else:
                        # if out of the region
                        if self.has_started_drawing:
                            # if have already start drawing, stop
                            self.deregister_mouse(mouse_position, mouse_time)
                            self.has_stopped_drawing = False
                        else:
                            # if over the buttons and click and has unsaved
                            if self.has_stopped_drawing:
                                on_redo = (
                                    (mouse_x > self.redo_button_pos[0])
                                    & (mouse_x < self.redo_button_pos[1])) & (
                                    (mouse_y > self.redo_button_pos[3])
                                    & (mouse_y < self.redo_button_pos[2]))

                                if on_redo and self.has_unsaved_drawing:
                                    # only allow redo if it does not exceed the limit:
                                    if self.drawing_index < MAX_DRAWINGS:
                                        # save the drawings
                                        self.save_drawing()
                                        # clear the canvas
                                        self.initialize_drawing()
                                        # later signal to the timer
                                        has_redo = True

                return has_redo

            def deregister_mouse(self, mouse_position, mouse_time):
                self.has_stopped_drawing = True
                if self.has_started_drawing:
                    self.save_stroke()
                    self.has_started_drawing = False

            def save_stroke(self):
                # only save valid stroke
                if len(self.current_stroke_time) > 0:
                    self.stroke_time.append(self.current_stroke_time)
                    self.stroke_data_x.append(self.current_stroke_x)
                    self.stroke_data_y.append(self.current_stroke_y)
                    self.stroke_index += 1
                self.has_unsaved_stroke = False

            def save_drawing(self):
                # only save valid drawing
                if len(self.stroke_time) > 0:
                    self.all_drawings_time.append(self.stroke_time)
                    self.all_drawings_x.append(self.stroke_data_x)
                    self.all_drawings_y.append(self.stroke_data_y)
                    self.drawing_index += 1

                # mark that everything has veen saved
                self.has_unsaved_drawing = False

            def setAutoDraw(self, autoDraw):
                self.canvas.autoDraw = autoDraw
                for i in range(len(self.strokes)):
                    self.strokes[i].autoDraw = autoDraw
                self.redo_button.setAutoDraw(autoDraw)

            def compute_response(self):
                # convert response to orientation
                if len(self.all_drawings_time) > 0:
                    x_to_analyze = self.all_drawings_x[-1]
                    y_to_analyze = self.all_drawings_y[-1]

                    # the easiest way: start to end
                    x_resp = x_to_analyze[-1][-1] - x_to_analyze[0][0]
                    y_resp = y_to_analyze[-1][-1] - y_to_analyze[0][0]

                    # compute all the rest
                    rad = np.arctan2(y_resp, x_resp)
                    deg = np.rad2deg(rad)
                    deg = deg % 180
                    deg = 90 - deg
                    deg = deg % 180
                    return deg
                else:
                    return None

        # define the function to collect free-form drawing
        class FakeCanvasDrawRegister:
            def __init__(self, canvas, redo_button, canvas_pos, redo_button_pos):
                self.canvas = canvas
                self.redo_button = redo_button
                self.canvas_c = canvas_pos[0]
                self.canvas_r = canvas_pos[1]
                self.redo_button_pos = redo_button_pos # left, right, top, bottom

                # variable to keep track if there are unnecessary drawing
                self.is_valid = False
                self.has_response = False

                # initialize
                self.canvas.setAutoDraw(True)
                self.redo_button.setAutoDraw(False)

            def register_mouse(self, mouse_position, mouse_time):
                # register clicks as unvalid
                mouse_x = mouse_position[0]
                mouse_y = mouse_position[1]
                mouse_r = mouse_r = math.sqrt(
                    (mouse_x-self.canvas_c[0]) ** 2 +
                    (mouse_y-self.canvas_c[1]) ** 2)

                if mouse_r < self.canvas_r:
                    # the click is within drawing
                    self.has_response = True

                return False # place holder

            def deregister_mouse(self, mouse_position, mouse_time):
                pass

            def setAutoDraw(self, autoDraw):
                self.canvas.autoDraw = autoDraw
                self.redo_button.setAutoDraw(autoDraw)


        def funcDrawAdjustResponse(window, loc, draw_radius, click_radius, is_valid):
            # set the drawing region
            ## for the wheel
            draw_area_x = loc[0]
            draw_area_y = loc[1]
            draw_area_bottom_y = draw_area_y - draw_radius

            wheel_pos = [
                (loc[0], loc[1]),
                draw_radius, click_radius]
            wheel_color = 'black'
            if is_valid:
                wheel_color = 'white'
            wheel = createPatch(
                window, pos=(draw_area_x, draw_area_y), radius=draw_radius,
                fill_color='gray', line_color=wheel_color)

            response_wheel_obj = None
            if is_valid:
                # create the point to represent orientation
                # initialize the two points
                point_click_selected = createPatch(
                    window, pos=(draw_area_x, draw_area_y), radius=click_radius,
                    fill_color='black', line_color='black')
                opposite_point = createPatch(
                    window, pos=(draw_area_x, draw_area_y), radius=click_radius,
                    fill_color='black', line_color='black')

                # register mouse click function
                response_wheel_obj = WheelClickRegister(
                    wheel, pos_point=point_click_selected,
                    opp_point=opposite_point, wheel_pos=wheel_pos)
            else:
                response_wheel_obj = FakeWheelClickRegister(
                    wheel, wheel_pos=wheel_pos)
            return response_wheel_obj

        def funcDrawDrawResponse(window, loc, draw_radius, is_valid):
            # set the drawing region
            draw_area_x = loc[0]
            draw_area_y = loc[1]
            draw_area_bottom_y = draw_area_y - draw_radius
            # first define the canvas
            canvas_pos = [(loc[0], loc[1]), draw_radius]
            canvas = None
            if is_valid:
                canvas = createEnabledDrawPatch(
                    window, pos=(draw_area_x, draw_area_y), radius=draw_radius)
            else:
                canvas = createDisabledDrawPatch(
                    window, pos=(draw_area_x, draw_area_y), radius=draw_radius)
            canvas.setAutoDraw(True)

            # define the confirm and redo button
            button_width = draw_radius / 1.8 * 1.0
            button_height = draw_radius / 1.8 * 0.5
            button_x = draw_area_x
            button_y = draw_area_bottom_y - button_height / 2 - 0.01

            # redo button
            redo_button_pos = [
                button_x - button_width / 2, # left
                button_x + button_width / 2, # right
                button_y + button_height / 2, # top
                button_y - button_height / 2 # bottom
            ]
            redo_button = funcCreateButton(
                window, 'redo',
                pos=(button_x, button_y),
                size=(button_width, button_height))

            response_canvas_obj = None
            if is_valid:
                # this is a real drawing object
                # then define the strokes (on top of background)
                strokes = []
                for i in range(MAX_STROKES):
                    new_stroke = visual.ShapeStim(
                        window, vertices=[(0, 0)],
                        fillColor=None, lineWidth=5,
                        lineColor='black', closeShape=False)
                    new_stroke.autoDraw = False
                    strokes.append(new_stroke)

                response_canvas_obj = CanvasDrawRegister(
                    canvas, strokes, redo_button,
                    canvas_pos, redo_button_pos)
            else:
                response_canvas_obj = FakeCanvasDrawRegister(
                    canvas, redo_button,
                    canvas_pos, redo_button_pos)

            return response_canvas_obj

        # define the function to display cue
        class SingleCueObject:
            def __init__(self, window, loc, cue_code, radius, cue_color=None):
                cue_r = radius * 0.3
                cue_type = int(cue_code)
                cue_ori = 180 * random.random()
                self.cue_object = self.load_report_cue(
                    window, loc, (cue_r, cue_r), cue_ori, cue_type, cue_color)

                self.setAutoDraw(True)

            def load_report_cue(self, window, loc, cue_size, cue_ori, cue_type, cue_color):
                cue_img_path = None
                color_info = '' if cue_color is None else f'_{cue_color}'
                if cue_type == 99:
                    cue_img_path = f"resources/dot{color_info}.png"
                elif cue_type==1:
                    cue_img_path = f"resources/star{color_info}.png"
                elif cue_type==0:
                    cue_img_path = f"resources/empty_star{color_info}.png"
                else:
                    raise ValueError(f'Unknow cue type {cue_type}')
                cue_obj = visual.ImageStim(
                    win=window, image=cue_img_path,
                    ori=cue_ori, size=cue_size, pos=loc)
                return cue_obj

            def setAutoDraw(self, auto_draw):
                self.cue_object.setAutoDraw(auto_draw)


        class CueObject:
            def __init__(self, window, loc, cue_codes, radius):
                self.cue_objects = []
                cue_r = radius * 0.3

                # create the center bar
                bar_object = self.load_report_cue(
                    window, loc, (cue_r*1.2, cue_r*0.4), 0, 0)
                self.cue_objects.append(bar_object)

                # create the cues
                cue_locs = [
                    (loc[0]-cue_r, loc[1]),
                    (loc[0]+cue_r, loc[1])]
                for i in range(2):
                    cue_object = SingleCueObject(
                        window, cue_locs[i], cue_codes[i], radius)
                    self.cue_objects.append(cue_object)

                self.setAutoDraw(True)

            def load_report_cue(self, window, loc, cue_size, cue_ori, cue_type):
                cue_img_path = None
                if cue_type==0:
                    cue_img_path = "resources/bar.png"
                else:
                    raise ValueError(f'Unknow cue type {cue_type}')
                cue_obj = visual.ImageStim(
                    win=window, image=cue_img_path,
                    ori=cue_ori, size=cue_size, pos=loc)
                return cue_obj

            def setAutoDraw(self, auto_draw):
                for obj in self.cue_objects:
                    obj.setAutoDraw(auto_draw)

        # define the function to display implicit cue
        class ImplicitCueObject:
            def __init__(self, window, loc, radius, n_split, regions, offset):
                self.n_split = n_split
                self.cue_objects = []
                cue_r = radius * 0.5

                # create the background
                back_object = self.load_report_cue(
                    window, loc, [cue_r, cue_r], 0, offset)
                self.cue_objects.append(back_object)

                # highlight the region to report
                for i in range(len(regions)):
                    region_id = regions[i]
                    cue_ori = 180 / self.n_split * region_id
                    # cue_width = abs(cue_r * math.sin(math.radians(180 / self.n_split + offset)))
                    cue_object = self.load_report_cue(
                        window, loc, [cue_r, cue_r], 1, cue_ori + offset)
                    self.cue_objects.append(cue_object)

                self.setAutoDraw(True)

            def load_report_cue(self, window, loc, cue_size, cue_type, cue_ori=0):
                cue_img_path = None
                if cue_type==0:
                    cue_img_path = f"resources/implicit_cue_back_{self.n_split}.png"
                elif cue_type==1:
                    cue_img_path = f"resources/implicit_cue_front_{self.n_split}.png"
                cue_obj = visual.ImageStim(
                    win=window, image=cue_img_path,
                    ori=cue_ori, size=cue_size, pos=loc)
                return cue_obj

            def setAutoDraw(self, auto_draw):
                for obj in self.cue_objects:
                    obj.setAutoDraw(auto_draw)

        def funcDrawArrow(window, radius, start_loc, end_loc):
            # compute orientation
            x_dir = end_loc[0] - start_loc[0]
            y_dir = end_loc[1] - start_loc[1]
            arrow_rad = np.arctan2(-y_dir, x_dir)
            arrow_ori = np.rad2deg(arrow_rad)
            arrow_pos = [
                (end_loc[0] + start_loc[0])/2,
                (end_loc[1] + start_loc[1])/2]
            cue_size = radius * 0.3
            arrow_img_path = "resources/arrow.png"
            arrow = visual.ImageStim(
                win=window, image=arrow_img_path,
                ori=arrow_ori, pos=arrow_pos,
                size=(cue_size, cue_size))
            arrow.setAutoDraw(True)
            return arrow

        def funcCheckNoPending(objs):
            no_unanswered = True
            for i in range(len(objs)):
                obj = objs[i]
                if obj.is_valid:
                    no_unanswered = no_unanswered and obj.ever_have_response
            return no_unanswered

        # other components for feedback and training
        class ClickAnswerObject:
            def __init__(self, window, ori, loc, radius, click_radius):
                ## for the wheel
                self.components = []
                self.wheel_r = radius
                self.wheel_c = [loc[0], loc[1]]
                self.click_radius = click_radius
                self.wheel = createPatch(
                    window, pos=self.wheel_c, radius=self.wheel_r,
                    fill_color='gray', line_color='white')
                self.components.append(self.wheel)

                ## create the point to represent orientation
                if ori is not None:
                    converted_pos = self.convert_ori_to_pos(ori)
                    ans_point_pos = converted_pos[0]
                    opp_point_pos = converted_pos[1]
                    self.point_click_selected = createPatch(
                        window, pos=ans_point_pos,
                        radius=self.click_radius,
                        fill_color='black', line_color='black')
                    self.opposite_point = createPatch(
                        window, pos=opp_point_pos,
                        radius=self.click_radius,
                        fill_color='black', line_color='black')
                    self.components.append(self.point_click_selected)
                    self.components.append(self.opposite_point)

                # make all objects visible
                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                n_comp = len(self.components)
                for i in range(n_comp):
                    comp = self.components[i]
                    comp.setAutoDraw(autoDraw)

            def convert_ori_to_pos(self, ori):
                # convert orientation to x,y
                deg = 90 - ori
                deg = deg % 180
                rad = np.deg2rad(deg)

                # adjust point position
                x_ans = self.wheel_c[0] + np.cos(rad) * self.wheel_r
                y_ans = self.wheel_c[1] + np.sin(rad) * self.wheel_r
                x_opp = self.wheel_c[0] - np.cos(rad) * self.wheel_r
                y_opp = self.wheel_c[1] - np.sin(rad) * self.wheel_r
                return (x_ans, y_ans), (x_opp, y_opp)


        class DrawAnswerObject:
            def __init__(self, window, response, is_ori, loc, radius):
                self.components = []
                self.strokes = []

                # set the drawing region
                self.canvas_r = radius
                self.canvas_c = (loc[0], loc[1])
                self.canvas = canvas = createEnabledDrawPatch(
                    window, pos=self.canvas_c, radius=self.canvas_r)
                self.components.append(self.canvas)

                # then set the strokes
                if response is not None:
                    strokes = response
                    if is_ori:
                        # the 'answer' provided is orientation
                        strokes = self.convert_ori_to_drawing(response)
                    x_strokes = strokes[0]
                    y_strokes = strokes[1]
                    n_strokes = len(x_strokes)
                    for i in range(n_strokes):
                        xs = x_strokes[i]
                        ys = y_strokes[i]
                        n_vertices = len(xs)
                        vertices = []
                        for j in range(n_vertices):
                            # convert the x,y to new coords
                            vx = self.canvas_c[0] + xs[j] * self.canvas_r
                            vy = self.canvas_c[1] + ys[j] * self.canvas_r
                            vertices.append((vx, vy))
                        new_stroke = visual.ShapeStim(
                            win=window, vertices=vertices,
                            fillColor=None, lineWidth=5,
                            lineColor='black', closeShape=False)
                        self.strokes.append(new_stroke)
                        self.components.append(new_stroke)

                # make all objects visible
                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                n_comp = len(self.components)
                for i in range(n_comp):
                    comp = self.components[i]
                    comp.setAutoDraw(autoDraw)

            def convert_ori_to_drawing(self, ori):
                # convert orientation to x,y
                deg = 90 - ori
                deg = deg % 180
                rad = np.deg2rad(deg)

                # adjust point position
                r_scale =  0.7
                x1 = np.cos(rad) * r_scale
                x2 = - np.cos(rad) * r_scale
                y1 = np.sin(rad) * r_scale
                y2 = - np.sin(rad) * r_scale
                drawing = [[[x1, x2]], [[y1, y2]]]
                return drawing

        class FeedbackText:
            def __init__(self, window, text, loc, radius):
                self.text = text
                self.text_object = visual.TextStim(
                    win=window, text=self.text,
                    pos=(loc[0], loc[1]),
                    height=radius * 0.2,
                    color='black', colorSpace='rgb')
                # make components visible
                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                self.text_object.setAutoDraw(autoDraw)

        class TrainingCue:
            def __init__(self, window, text, target_loc, display_r):
                # get the location
                vec_x = (1 - 2 * (target_loc[0] < 0)) * display_r / math.sqrt(2)
                vec_y = (1 - 2 * (target_loc[1] < 0)) * display_r / math.sqrt(2)
                x_offset_scale = 1
                text_loc = [
                    target_loc[0] + vec_x * (1.4+x_offset_scale),
                    target_loc[1] + vec_y * 1.4]

                # create the text
                self.text = text
                self.text_object = visual.TextStim(
                    win=window, text=self.text,
                    pos=text_loc,
                    height=display_r * 0.2,
                    color='white', colorSpace='rgb')
                # create the arrow
                arrow_start_loc = [
                    target_loc[0] + vec_x * (1.2+x_offset_scale),
                    target_loc[1] + vec_y * 1.2]
                arrow_end_loc = [
                    target_loc[0] + vec_x * (1.02+x_offset_scale),
                    target_loc[1] + vec_y * 1.02]
                self.arrow = funcDrawArrow(
                    window, display_r * 0.5,
                    arrow_start_loc, arrow_end_loc)

                # auto draw --> true
                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                self.text_object.setAutoDraw(autoDraw)
                self.arrow.setAutoDraw(autoDraw)

        class NoisePatch:
            def __init__(self, window, loc, display_r):
                noise_img_path = "resources/noise.png"
                noise_ori = 180 * random.random()
                self.obj = visual.ImageStim(
                    win=window, image=noise_img_path,
                    ori=noise_ori, size=2*display_r, pos=loc)

                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                self.obj.setAutoDraw(autoDraw)

        class DefaultFixation:
            def __init__(self, window):
                self.fixation = visual.ShapeStim(
                    win=window, vertices='cross',
                    size=(0.06, 0.06), lineWidth=1,
                    lineColor='white', fillColor='white')

                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                self.fixation.setAutoDraw(autoDraw)
      Before JS Experiment:
        const MAX_DRAWINGS = 3;
        const MAX_STROKES = 10;
        const CLICK_REGION_FACTOR = 3;

        // define some functions
        function funcRandomUniform (vmin, vmax) {
            return Math.random() * (vmax - vmin) + vmin;
        }

        function funcShuffleArray(arr) {
            let shuffled = arr.slice().sort(() => Math.random() - 0.5);
            return shuffled;
        }

        function funcRandomSample (arr, m) {
            let n = arr.length;
            let shuffled = funcShuffleArray(arr);
            if (m >= n) {
                // Return a copy if m is >= n
                return shuffled;
            }
            return shuffled.slice(0, m);
        }

        function sampleWithProb(arr, p, N) {
            if (arr.length !== p.length) {
                throw new Error("wrong size of p.");
            }

            // Calculate the cumulative distribution
            let csum = [];
            let sum = 0;
            for (let i = 0; i < p.length; i++) {
                sum += p[i];
                csum.push(sum);
            }

            // Sampling
            let samples = [];
            for (let i = 0; i < N; i++) {
                let rand_val = Math.random();
                let index = csum.findIndex((c) => c >= rand_val);
                samples.push(arr[index]);
            }

            return samples;
        }

        function funcComputeOriDiff(s1, s2) {
            let diff = (s1 - s2 + 90) % 180;
            if (diff < 0) {
                diff += 180;
            }
            diff -= 90;
            if (diff === -90) {
                diff = 90;
            }
            return diff;
        }

        function funcCreateStroke(window) {
            let stroke = new visual.ShapeStim({
                    "win": window,
                    "vertices": stroke_vertex,
                    "closeShape": false,
                    "lineWidth": 5,
                    "lineColor": "black"});
            return stroke;
        }

        function funcCreateRoundPatch(
                window, pos, radius,
                fillColor='white', lineColor='white') {
            let border_width = 5 * radius / 0.2;
            let fill_color = new util.Color(fillColor);
            let line_color = new util.Color(lineColor);
            let patch = new visual.Polygon({
                "win": window,
                "edges": 200, "ori": 0.0, "anchor": 'center', "colorSpace": 'rgb',
                "size": [radius*2, radius*2], "pos": pos,
                "lineWidth": border_width, "lineColor": line_color,
                "fillColor": fill_color,
                "opacity": 1.0, "colorSpace": 'rgb'});
            return patch;
        }

        function funcCreateEnabledCanvas(window, pos, radius) {
            let patch = funcCreateRoundPatch(
                window, pos, radius, 'white', 'black');
            return patch;
        }

        function funcCreateDisabledCanvas(window, pos, radius) {
            let patch = funcCreateRoundPatch(
                window, pos, radius, [-0.3, -0.3, -0.3], [-0.3, -0.3, -0.3]);
            return patch;
        }

        class SelfDefinedButton {
              constructor(window, text, pos, size) {
                    // Load background
                    let img_path = "resources/button.png";
                    this.img = new visual.ImageStim({
                      win:window, image:img_path,
                      size:size, pos:pos});

                    // Load text
                    let text_height = size[1] / 2;
                    this.text = new visual.TextStim({
                      win:window, text:text,
                      pos:pos, color:'black',
                      height:text_height, anchorHoriz:'center',
                      anchorVert:'center'});

                    //stats
                    this.left = pos[0] - size[0] / 2;
                    this.right = pos[0] + size[0] / 2;
                    this.top = pos[1] + size[1] / 2;
                    this.bottom = pos[1] - size[1] / 2;

                    // Set auto draw
                    this.setAutoDraw(true);
              }

              setAutoDraw(autoDraw) {
                    this.img.setAutoDraw(autoDraw);
                    this.text.setAutoDraw(autoDraw);
              }

              contains(pos) {
                    let px = pos[0];
                    let py = pos[1];
                    let on_button = (
                        px > this.left &&
                        px < this.right &&
                        py > this.bottom &&
                        py < this.top
                    );
                    return on_button
              }
        }
        function funcCreateButton(window, text, pos, size) {
            let button = new SelfDefinedButton(window, text, pos, size);
            return button;
        }


        // function to create stim or response objects
        // define the function for display
        function funcDrawStim(window, ori, loc, radius) {
            var grating;
            grating = new visual.GratingStim({"win": window, "tex": "sin", "mask": "gauss", "sf": 5.0, "size": (radius * 2), "ori": ori, "pos": loc});
            grating.autoDraw = true;
            return grating;
        }

        class WheelClickRegister {
            constructor(wheel, pos_point, opp_point, wheel_pos) {
                this.wheel = wheel;
                this.wheel_c = wheel_pos[0];
                this.wheel_r = wheel_pos[1];
                this.click_radius = wheel_pos[2];
                this.point_click_selected = pos_point;
                this.opposite_point = opp_point;
                this.clicks_x = [];
                this.clicks_y = [];
                this.clicks_time = [];
                this.is_valid = true;
                this.ever_have_response = false;
                this.wheel.setAutoDraw(true);
                this.point_click_selected.setAutoDraw(false);
                this.opposite_point.setAutoDraw(false);
            }
            register_click(mouse_position, mouse_time) {
                var click_max_r, click_min_r, mouse_r, mouse_x, mouse_y, opp_select_x, opp_select_y, pos_select_x, pos_select_y, pos_x_scaled, pos_y_scaled;
                mouse_x = mouse_position[0];
                mouse_y = mouse_position[1];
                mouse_r = Math.sqrt((Math.pow((mouse_x - this.wheel_c[0]), 2) + Math.pow((mouse_y - this.wheel_c[1]), 2)));
                click_min_r = (this.wheel_r - this.click_radius * CLICK_REGION_FACTOR);
                click_max_r = (this.wheel_r + this.click_radius * CLICK_REGION_FACTOR);
                if (((mouse_r >= click_min_r) && (mouse_r <= click_max_r))) {
                    this.ever_have_response = true;
                    pos_x_scaled = ((mouse_x - this.wheel_c[0]) / mouse_r);
                    pos_y_scaled = ((mouse_y - this.wheel_c[1]) / mouse_r);
                    pos_select_x = (this.wheel_c[0] + (pos_x_scaled * this.wheel_r));
                    pos_select_y = (this.wheel_c[1] + (pos_y_scaled * this.wheel_r));
                    opp_select_x = (this.wheel_c[0] - (pos_x_scaled * this.wheel_r));
                    opp_select_y = (this.wheel_c[1] - (pos_y_scaled * this.wheel_r));
                    if ((this.clicks_x.length === 0)) {
                        this.point_click_selected.autoDraw = true;
                        this.opposite_point.autoDraw = true;
                    }
                    this.point_click_selected.setPos([pos_select_x, pos_select_y]);
                    this.opposite_point.setPos([opp_select_x, opp_select_y]);
                    this.clicks_x.push(pos_x_scaled);
                    this.clicks_y.push(pos_y_scaled);
                    this.clicks_time.push(mouse_time);
                }
            }
            setAutoDraw(autoDraw) {
                this.wheel.setAutoDraw(autoDraw);
                this.point_click_selected.setAutoDraw(autoDraw);
                this.opposite_point.setAutoDraw(autoDraw);
            }
            compute_response() {
                var deg, rad, x_resp, y_resp;
                if (this.ever_have_response) {
                    x_resp = this.clicks_x.slice((- 1))[0];
                    y_resp = this.clicks_y.slice((- 1))[0];
                    rad = Math.atan2(y_resp, x_resp);
                    deg = rad * (180 / Math.PI);
                    deg = (90 - deg) % 180;
                    if (deg < 0) {
                        deg += 180;
                    }
                    return deg;
                } else {
                    return null;
                }
            }
        }

        class FakeWheelClickRegister {
            constructor(wheel, wheel_pos) {
                this.wheel = wheel;
                this.wheel_c = wheel_pos[0];
                this.wheel_r = wheel_pos[1];
                this.click_radius = wheel_pos[2];

                // Initialize properties
                this.is_valid = false;
                this.has_response = false;

                // Initialize and set auto draw
                this.setAutoDraw(true);
            }

            register_click(mouse_position, mouse_time) {
                let mouse_x = mouse_position[0];
                let mouse_y = mouse_position[1];
                let mouse_r = Math.sqrt(
                    Math.pow(mouse_x - this.wheel_c[0], 2) +
                    Math.pow(mouse_y - this.wheel_c[1], 2)
                );

                let click_min_r = this.wheel_r - this.click_radius * CLICK_REGION_FACTOR;
                let click_max_r = this.wheel_r + this.click_radius * CLICK_REGION_FACTOR;

                if (mouse_r >= click_min_r && mouse_r <= click_max_r) {
                    // The click is within the valid region
                    this.has_response = true;
                }
            }

            setAutoDraw(autoDraw) {
                this.wheel.setAutoDraw(autoDraw);
            }
        }

        class CanvasDrawRegister {
            constructor(canvas, strokes, redo_button, canvas_pos, redo_button_pos) {
                this.canvas = canvas;
                this.strokes = strokes;
                this.redo_button = redo_button;
                this.canvas_c = canvas_pos[0];
                this.canvas_r = canvas_pos[1];
                this.redo_button_pos = redo_button_pos;

                // this is a valid response object
                this.is_valid = true;

                // temporary inner states
                this.all_drawings_x = [];
                this.all_drawings_y = [];
                this.all_drawings_time = [];
                this.drawing_index = 0;
                this.initialize_drawing();

                // flag for whether there are any response
                this.ever_have_response = false;

                // if we have strokes not saved yet
                this.has_unsaved_drawing = false;
                this.has_unsaved_stroke = false;

                // start drawing
                this.canvas.setAutoDraw(true);
                this.redo_button.setAutoDraw(true);

            }
            initialize_drawing() {
                var stroke;
                this.stroke_time = [];
                this.stroke_data_x = [];
                this.stroke_data_y = [];
                this.stroke_index = 0;
                this.current_vertices = [];
                this.current_stroke_x = [];
                this.current_stroke_y = [];
                this.current_stroke_time = [];
                this.has_started_drawing = false;
                this.has_stopped_drawing = true;
                this.last_x = null;
                this.last_y = null;
                for (var i, _pj_c = 0, _pj_a = util.range(this.strokes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    stroke = this.strokes[i];
                    stroke.autoDraw = false;
                    stroke.vertices = [[0, 0]];
                }
            }
            register_mouse(mouse_position, mouse_time) {
                var mouse_r, mouse_x, mouse_y, on_confirm, on_redo, pos_x_scaled, pos_y_scaled, stroke;
                let has_redo = false; // sent back to timer
                stroke = this.strokes[this.stroke_index];
                if ((this.stroke_index < this.strokes.length)) {
                    mouse_x = mouse_position[0];
                    mouse_y = mouse_position[1];
                    mouse_r = Math.sqrt((Math.pow((mouse_x - this.canvas_c[0]), 2) + Math.pow((mouse_y - this.canvas_c[1]), 2)));
                    if ((mouse_r < this.canvas_r)) {
                        this.ever_have_response = true;
                        if ((! this.has_started_drawing)) {
                            stroke.autoDraw = true;
                            this.current_vertices = [];
                            this.current_stroke_x = [];
                            this.current_stroke_y = [];
                            this.current_stroke_time = [];
                            this.has_started_drawing = true;
                            this.has_stopped_drawing = false;
                        }
                        if ((((this.last_x === null) || (Math.abs((this.last_x - mouse_x)) > 0.01)) || (Math.abs((this.last_y - mouse_y)) > 0.01))) {
                            pos_x_scaled = (mouse_x - this.canvas_c[0]) / this.canvas_r;
                            pos_y_scaled = (mouse_y - this.canvas_c[1]) / this.canvas_r;
                            this.current_vertices.push(mouse_position);
                            this.current_stroke_x.push(pos_x_scaled);
                            this.current_stroke_y.push(pos_y_scaled);
                            this.current_stroke_time.push(mouse_time);
                            stroke.vertices = this.current_vertices;
                            this.has_unsaved_stroke = true;
                            this.has_unsaved_drawing = true;
                            this.last_x = mouse_x;
                            this.last_y = mouse_y;
                        }
                    } else {
                        if (this.has_started_drawing) {
                            this.deregister_mouse(mouse_position, mouse_time);
                            this.has_stopped_drawing = false;
                        } else {
                            if (this.has_stopped_drawing) {
                                on_redo = (((mouse_x > this.redo_button_pos[0]) & (mouse_x < this.redo_button_pos[1])) & ((mouse_y > this.redo_button_pos[3]) & (mouse_y < this.redo_button_pos[2])));
                                if ((on_redo && this.has_unsaved_drawing)) {
                                    // only allow redo if it does not exceed the limit:
                                    if (this.drawing_index < MAX_DRAWINGS) {
                                        // save the drawings
                                        this.save_drawing();
                                        // clear the canvas
                                        this.initialize_drawing();
                                        // later signal to the timer
                                        has_redo = true;
                                    }
                                }
                            }
                        }
                    }
                }
                return has_redo;
            }

            deregister_mouse(mouse_position, mouse_time) {
                this.has_stopped_drawing = true;
                if (this.has_started_drawing) {
                    this.save_stroke();
                    this.has_started_drawing = false;
                }
            }
            save_stroke() {
                // only save valid stroke
                if (this.current_stroke_time.length > 0) {
                    this.stroke_time.push(this.current_stroke_time);
                    this.stroke_data_x.push(this.current_stroke_x);
                    this.stroke_data_y.push(this.current_stroke_y);
                    this.stroke_index += 1;
                }
                // mark the stroke has been updated
                this.has_unsaved_stroke = false;
            }
            save_drawing() {
                if (this.stroke_time.length > 0) {
                    this.all_drawings_time.push(this.stroke_time);
                    this.all_drawings_x.push(this.stroke_data_x);
                    this.all_drawings_y.push(this.stroke_data_y);
                    this.drawing_index += 1;
                }
                // mark that drawing has been saved
                this.has_unsaved_drawing = false;
            }

            setAutoDraw(autoDraw) {
                this.canvas.autoDraw = autoDraw;
                for (var i, _pj_c = 0, _pj_a = util.range(this.strokes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    this.strokes[i].autoDraw = autoDraw;
                }
                this.redo_button.setAutoDraw(autoDraw);
            }

            compute_response() {
                // convert response to orientation
                if (this.all_drawings_time.length > 0) {
                    let x_to_analyze = this.all_drawings_x[this.all_drawings_x.length - 1];
                    let y_to_analyze = this.all_drawings_y[this.all_drawings_y.length - 1];

                    // The easiest way: start to end
                    let x_resp = x_to_analyze[x_to_analyze.length - 1][x_to_analyze[x_to_analyze.length - 1].length - 1] - x_to_analyze[0][0];
                    let y_resp = y_to_analyze[y_to_analyze.length - 1][y_to_analyze[y_to_analyze.length - 1].length - 1] - y_to_analyze[0][0];

                    // Compute all the rest
                    let rad = Math.atan2(y_resp, x_resp);
                    let deg = (rad * (180 / Math.PI)) % 180;
                    deg = 90 - deg;
                    deg = deg % 180;
                    return deg;
                } else {
                    return null;
                }
            }
        }

        class FakeCanvasDrawRegister {
            constructor(canvas, redo_button, canvas_pos, redo_button_pos) {
                this.canvas = canvas;
                this.redo_button = redo_button;
                this.canvas_c = canvas_pos[0];
                this.canvas_r = canvas_pos[1];
                this.redo_button_pos = redo_button_pos; // left, right, top, bottom

                // Variables to keep track of unnecessary drawing
                this.is_valid = false;
                this.has_response = false;

                // Initialization
                this.canvas.setAutoDraw(true);
                this.redo_button.setAutoDraw(false);
            }

            register_mouse(mouse_position, mouse_time) {
                // Register clicks as invalid
                let mouse_x = mouse_position[0];
                let mouse_y = mouse_position[1];
                let mouse_r = Math.sqrt(
                    Math.pow(mouse_x - this.canvas_c[0], 2) +
                    Math.pow(mouse_y - this.canvas_c[1], 2)
                );

                if (mouse_r < this.canvas_r) {
                    // The click is within the drawing
                    this.has_response = true;
                }

                return false; // Placeholder
            }

            deregister_mouse(mouse_position, mouse_time) {
                // Placeholder for mouse deregistration
            }

            setAutoDraw(autoDraw) {
                this.canvas.setAutoDraw(autoDraw);
                this.redo_button.setAutoDraw(autoDraw);
            }
        }

        function funcDrawAdjustResponse(window, loc, draw_radius, click_radius, is_valid) {
            var draw_area_bottom_y, draw_area_x, draw_area_y, opposite_point, point_click_selected, response_wheel_obj, wheel, wheel_pos;
            draw_area_x = loc[0];
            draw_area_y = loc[1];
            draw_area_bottom_y = (draw_area_y - draw_radius);
            // create the wheel the circle to move along
            wheel_pos = [[loc[0], loc[1]], draw_radius, click_radius];
            let wheel_color = 'black';
            if (is_valid) {
                wheel_color = 'white';
            }
            wheel = funcCreateRoundPatch(
                window, [draw_area_x, draw_area_y], draw_radius,
                'gray', wheel_color);

            // create the handlers
            if (is_valid) {
                // create the handlers
                point_click_selected = funcCreateRoundPatch(
                    window, [draw_area_x, draw_area_y], click_radius,
                    'black', 'black');
                point_click_selected.setAutoDraw(false);
                opposite_point = funcCreateRoundPatch(
                    window, [draw_area_x, draw_area_y], click_radius,
                    'black', 'black');
                opposite_point.setAutoDraw(false);

                // register the response object
                response_wheel_obj = new WheelClickRegister(
                    wheel, point_click_selected, opposite_point, wheel_pos);
            } else {
                response_wheel_obj = new FakeWheelClickRegister(wheel, wheel_pos);
            }
            return response_wheel_obj;
        }

        function funcDrawDrawResponse(window, loc, draw_radius, is_valid) {
            var button_x, button_y, canvas, canvas_pos, confirm_button, confirm_button_pos, confirm_button_x, draw_area_bottom_y, draw_area_x, draw_area_y, new_stroke, redo_button, redo_button_pos, redo_button_x, response_canvas_obj, strokes;
            strokes = [];
            draw_area_x = loc[0];
            draw_area_y = loc[1];
            draw_area_bottom_y = (draw_area_y - draw_radius);

            // define the canvas
            canvas_pos = [[loc[0], loc[1]], draw_radius];
            if (is_valid) {
                canvas = funcCreateEnabledCanvas(
                    window, [draw_area_x, draw_area_y], draw_radius);
            } else {
                canvas = funcCreateDisabledCanvas(
                    window, [draw_area_x, draw_area_y], draw_radius);
            }

            // define the button
            button_width = draw_radius / 1.8 * 1.0;
            button_height = draw_radius / 1.8 * 0.5;
            button_x = draw_area_x;
            button_y = ((draw_area_bottom_y - (button_height / 2)) - 0.01);
            redo_button_x = button_x;
            redo_button_pos = [(redo_button_x - (button_width / 2)), (redo_button_x + (button_width / 2)), (button_y + (button_height / 2)), (button_y - (button_height / 2))];
            redo_button = funcCreateButton(window,
                'redo', [redo_button_x, button_y], [button_width, button_height])

            if (is_valid) {
                // define strokes
                for (var i, _pj_c = 0, _pj_a = util.range(MAX_STROKES), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    new_stroke = new visual.ShapeStim({
                        "win": window,
                        "vertices": [(0, 0)],
                        "closeShape": false,
                        "lineWidth": 5,
                        "lineColor": "black"});
                    new_stroke.autoDraw = false;
                    strokes.push(new_stroke);
                }
                response_canvas_obj = new CanvasDrawRegister(
                    canvas, strokes, redo_button,
                    canvas_pos, redo_button_pos);
            } else {
                response_canvas_obj = new FakeCanvasDrawRegister(
                    canvas, redo_button,
                    canvas_pos, redo_button_pos);
            }
            return response_canvas_obj;
        }

        // display cue
        class SingleCueObject {
            constructor(window, loc, cue_code, radius, cue_color=null) {
                let cue_r = radius * 0.3;
                let cue_type = Number(cue_code);
                // console.log(`CUE DEBUG: cue code ${cue_code}, cue code number ${cue_type}`);
                // throw new error("DEBUG");
                let cue_ori = 180 * Math.random();
                this.cue_object = this.load_report_cue(window, loc, [cue_r, cue_r], cue_ori, cue_type, cue_color);

                this.setAutoDraw(true);
            }

            load_report_cue(window, loc, cue_size, cue_ori, cue_type, cue_color) {
                let cue_img_path = null;
                let color_info = cue_color === null ? '' : `_${cue_color}`;
                if (cue_type === 99) {
                    cue_img_path = `resources/dot${color_info}.png`;
                } else if (cue_type === 1) {
                    cue_img_path = `resources/star${color_info}.png`;
                } else if (cue_type === 0) {
                    cue_img_path = `resources/empty_star${color_info}.png`;
                } else {
                    throw new Error(`Unknown cue type ${cue_type}`);
                }

                let cue_obj = new visual.ImageStim({
                    win: window,
                    image: cue_img_path,
                    ori: cue_ori,
                    size: cue_size,
                    pos: loc
                });
                return cue_obj;
            }

            setAutoDraw(auto_draw) {
                this.cue_object.setAutoDraw(auto_draw);
            }
        }

        class CueObject {
            constructor(window, loc, cue_codes, radius) {
                this.cue_objects = [];
                let cue_r = radius * 0.3;

                // Create the center bar
                let bar_object = this.load_report_cue(
                    window, loc, [cue_r * 1.2, cue_r * 0.4], 0, 0);
                this.cue_objects.push(bar_object);

                // Create the cues
                let cue_locs = [
                    [loc[0] - cue_r, loc[1]],
                    [loc[0] + cue_r, loc[1]]
                ];

                for (let i = 0; i < 2; i++) {
                    let cue_object = new SingleCueObject(
                        window, cue_locs[i], cue_codes[i], radius);
                    this.cue_objects.push(cue_object);
                }

                this.setAutoDraw(true);
            }

            load_report_cue(window, loc, cue_size, cue_ori, cue_type) {
                let cue_img_path;
                if (cue_type === 0) {
                    cue_img_path = "resources/bar.png";
                } else {
                    throw new Error(`Unknown cue type ${cue_type}`);
                }

                let cue_obj = new visual.ImageStim({
                    win: window,
                    image: cue_img_path,
                    ori: cue_ori,
                    size: cue_size,
                    pos: loc
                });

                return cue_obj;
            }

            setAutoDraw(auto_draw) {
                for (let obj of this.cue_objects) {
                    obj.setAutoDraw(auto_draw);
                }
            }
        }

        function funcDrawSingleCue(window, loc, cue_code, radius, cue_color=null) {
            let cue_obj = new SingleCueObject(window, loc, cue_code, radius, cue_color);
            return cue_obj;
        }

        function funcDrawCue(window, loc, cue_codes, radius) {
            let cue_obj = new CueObject(window, loc, cue_codes, radius);
            return cue_obj;
        }

        // display implicit cue
        class ImplicitCueObject {
            constructor(window, loc, radius, n_split, regions, offset) {
                this.n_split = n_split;
                this.cue_objects = [];
                let cue_r = radius * 0.5;

                // Create the center bar
                let back_object = this.load_report_cue(
                    window, loc, [cue_r, cue_r], 0, offset);
                this.cue_objects.push(back_object);

                // Create the cues
                for (let i = 0; i < regions.length; i++) {
                    let region_id = regions[i];
                    let cue_ori = 180 / this.n_split * region_id;
                    let cue_object = this.load_report_cue(
                        window, loc, [cue_r, cue_r], 1, cue_ori+offset);
                    this.cue_objects.push(cue_object);
                }
                this.setAutoDraw(true);
            }

            load_report_cue(window, loc, cue_size, cue_type, cue_ori=0) {
                let cue_img_path = null;
                if (cue_type === 0) {
                    cue_img_path = `resources/implicit_cue_back_${this.n_split}.png`;
                } else if (cue_type === 1) {
                    cue_img_path = `resources/implicit_cue_front_${this.n_split}.png`;
                }
                let cue_obj = new visual.ImageStim({
                    win: window, image: cue_img_path,
                    ori: cue_ori, size: cue_size, pos: loc
                });
                return cue_obj;
            }

            setAutoDraw(auto_draw) {
                this.cue_objects.forEach(obj => {
                    obj.setAutoDraw(auto_draw);
                });
            }
        }

        function funcDrawArrow(window, radius, start_loc, end_loc) {
          // Compute orientation
          let xDir = end_loc[0] - start_loc[0];
          let yDir = end_loc[1] - start_loc[1];
          let arrowRad = Math.atan2(-yDir, xDir);
          let arrowOri = (arrowRad * (180 / Math.PI)) % 180;
          let arrowPos = [
                (end_loc[0] + start_loc[0])/2,
                (end_loc[1] + start_loc[1])/2];
          let cueSize = radius * 0.3;

          let arrowImgPath = "resources/arrow.png";
          let arrow = new visual.ImageStim({
            win: window,
            image: arrowImgPath,
            ori: arrowOri,
            pos: arrowPos,
            size: [cueSize, cueSize]
          });

          arrow.setAutoDraw(true);
          return arrow;
        }

        function funcCheckNoPending (objs) {
          let no_unanswered = true;
          for (let i = 0; i < objs.length; i++) {
            let obj = objs[i];
            if (obj.is_valid) {
              no_unanswered = no_unanswered && obj.ever_have_response;
            }
          }
          return no_unanswered;
        }

        // functions for feedback
        // to show click answer
        class ClickAnswerObject {
            constructor(window, ori, loc, radius, click_radius) {
                var ans_point_pos, converted_pos, opp_point_pos;
                this.components = [];
                this.wheel_r = radius;
                this.wheel_c = [loc[0], loc[1]];
                this.click_radius = click_radius;
                this.wheel = funcCreateRoundPatch(
                    window, this.wheel_c, this.wheel_r,
                    'gray', 'white');
                this.components.push(this.wheel);
                if ((ori !== null)) {
                    converted_pos = this.convert_ori_to_pos(ori);
                    ans_point_pos = converted_pos[0];
                    opp_point_pos = converted_pos[1];
                    this.point_click_selected = funcCreateRoundPatch(
                        window, ans_point_pos, this.click_radius,
                        'black', 'black');
                    this.opposite_point = funcCreateRoundPatch(
                        window, opp_point_pos, this.click_radius,
                        'black', 'black');
                    this.components.push(this.point_click_selected);
                    this.components.push(this.opposite_point);
                }
                this.setAutoDraw(true);
            }
            setAutoDraw(autoDraw) {
                var comp, n_comp;
                n_comp = this.components.length;
                for (var i, _pj_c = 0, _pj_a = util.range(n_comp), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    comp = this.components[i];
                    comp.setAutoDraw(autoDraw);
                }
            }
            convert_ori_to_pos(ori) {
                var deg, rad, x_ans, x_opp, y_ans, y_opp;
                deg = (90 - ori);
                deg = (deg % 180);
                rad = deg * Math.PI / 180;
                x_ans = (this.wheel_c[0] + (Math.cos(rad) * this.wheel_r));
                y_ans = (this.wheel_c[1] + (Math.sin(rad) * this.wheel_r));
                x_opp = (this.wheel_c[0] - (Math.cos(rad) * this.wheel_r));
                y_opp = (this.wheel_c[1] - (Math.sin(rad) * this.wheel_r));
                return [[x_ans, y_ans], [x_opp, y_opp]];
            }
        }
        class DrawAnswerObject {
            constructor(window, response, is_ori, loc, radius) {
                var n_strokes, n_vertices, new_stroke, strokes, vertices, vx, vy, x_strokes, xs, y_strokes, ys;
                this.components = [];
                this.strokes = [];
                this.canvas_r = radius;
                this.canvas_c = [loc[0], loc[1]];
                this.canvas = funcCreateEnabledCanvas(
                    window, this.canvas_c, this.canvas_r);
                this.components.push(this.canvas);
                if ((response !== null)) {
                    strokes = response;
                    if (is_ori) {
                        strokes = this.convert_ori_to_drawing(response);
                    }
                    x_strokes = strokes[0];
                    y_strokes = strokes[1];
                    n_strokes = x_strokes.length;
                    for (var i, _pj_c = 0, _pj_a = util.range(n_strokes), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        i = _pj_a[_pj_c];
                        xs = x_strokes[i];
                        ys = y_strokes[i];
                        n_vertices = xs.length;
                        vertices = [];
                        for (var j, _pj_f = 0, _pj_d = util.range(n_vertices), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                            j = _pj_d[_pj_f];
                            vx = (this.canvas_c[0] + (xs[j] * this.canvas_r));
                            vy = (this.canvas_c[1] + (ys[j] * this.canvas_r));
                            vertices.push([vx, vy]);
                        }
                        new_stroke = new visual.ShapeStim({"win": window, "vertices": vertices, "fillColor": null, "lineWidth": 5, "lineColor": "black", "closeShape": false});
                        this.strokes.push(new_stroke);
                        this.components.push(new_stroke);
                    }
                }
                this.setAutoDraw(true);
            }
            setAutoDraw(autoDraw) {
                var comp, n_comp;
                n_comp = this.components.length;
                for (var i, _pj_c = 0, _pj_a = util.range(n_comp), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    comp = this.components[i];
                    comp.setAutoDraw(autoDraw);
                }
            }
            convert_ori_to_drawing(ori) {
                var deg, drawing, r_scale, rad, x1, x2, y1, y2;
                deg = (90 - ori);
                deg = (deg % 180);
                rad = deg * Math.PI / 180;
                r_scale = 0.7;
                x1 = (Math.cos(rad) * r_scale);
                x2 = ((- Math.cos(rad)) * r_scale);
                y1 = (Math.sin(rad) * r_scale);
                y2 = ((- Math.sin(rad)) * r_scale);
                drawing = [[[x1, x2]], [[y1, y2]]];
                return drawing;
            }
        }
        class FeedbackText {
            constructor(window, text, loc, radius) {
                this.text = text;
                this.text_object = new visual.TextStim({
                    "win": window, "text": this.text,
                    "pos": [loc[0], loc[1]], "height": (radius * 0.2),
                    "color": "black", "colorSpace": "rgb"});
                this.setAutoDraw(true);
            }
            setAutoDraw(autoDraw) {
                this.text_object.setAutoDraw(autoDraw);
            }
        }

        // to fix the defined issues...
        function funcCreateClickAnswerObject(window, ori, loc, radius, click_radius) {
            return new ClickAnswerObject(window, ori, loc, radius, click_radius);
        }

        function funcCreateDrawAnswerObject(window, response, is_ori, loc, radius) {
            return new DrawAnswerObject(window, response, is_ori, loc, radius);
        }

        function funcCreateFeedbackText(window, text, loc, radius) {
            return new FeedbackText(window, text, loc, radius);
        }

        class TrainingCue {
            constructor(window, text, target_loc, display_r) {
                // Get the location
                let vec_x = (1 - 2 * (target_loc[0] < 0)) * display_r / Math.sqrt(2);
                let vec_y = (1 - 2 * (target_loc[1] < 0)) * display_r / Math.sqrt(2);
                let x_offset_scale = 1;
                let text_loc = [
                    target_loc[0] + vec_x * (1.4+x_offset_scale),
                    target_loc[1] + vec_y * 1.4
                ];

                // Create the text
                this.text = text;
                this.text_object = new visual.TextStim({
                    win: psychoJS.window,
                    text: this.text,
                    pos: text_loc,
                    height: display_r * 0.2,
                    color: new util.Color('white'),
                    colorSpace: 'rgb'
                });

                // Create the arrow
                let arrow_start_loc = [
                    target_loc[0] + vec_x * (1.2+x_offset_scale),
                    target_loc[1] + vec_y * 1.2
                ];
                let arrow_end_loc = [
                    target_loc[0] + vec_x * (1.02+x_offset_scale),
                    target_loc[1] + vec_y * 1.02
                ];
                this.arrow = funcDrawArrow(
                    psychoJS.window, display_r * 0.5,
                    arrow_start_loc, arrow_end_loc
                );

                // Auto draw --> true
                this.setAutoDraw(true);
            }

            setAutoDraw(autoDraw) {
                this.text_object.setAutoDraw(autoDraw);
                this.arrow.setAutoDraw(autoDraw);
            }
        }

        class NoisePatch {
            constructor(window, loc, display_r) {
                let noise_img_path = "resources/noise.png";
                let noise_ori = 180 * Math.random();
                this.obj = new visual.ImageStim({
                    win: window,
                    image: noise_img_path,
                    ori: noise_ori,
                    size: 2*display_r,
                    pos: loc
                });
                this.setAutoDraw(true);
            }

            setAutoDraw(autoDraw) {
                this.obj.setAutoDraw(autoDraw);
            }
        }

        class DefaultFixation {
            constructor(window) {
                // Create a new ShapeStim object with a cross shape
                let white_color = new util.Color("white");
                this.fixation = new visual.ShapeStim({
                    "win": window,
                    "vertices": 'cross',
                    "size": [0.06, 0.06],
                    "lineWidth": 1,
                    "lineColor": white_color,
                    "fillColor": white_color
                });
                this.setAutoDraw(true);
            }

            setAutoDraw(autoDraw) {
                this.fixation.setAutoDraw(autoDraw);
            }
        }
      Begin Experiment:
        # show the cursor
        win.mouseVisible = True
      Begin JS Experiment:
        // show the cursor
        psychoJS.window.mouseVisible = true;
  Routine prepareExperiment
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    CodeComponent codePrepareExperiment
      Code Type = Both
      Before Experiment:
        VALID_N_REGIONS = [4,]

        class StimSampler:
            def __init__(self, n_sample_regions):
                if n_sample_regions not in VALID_N_REGIONS:
                    raise ValueError(
                        f'{VALID_N_REGIONS} is not a valid number of sample regions ')
                self.n_sample_regions = n_sample_regions
                self.count = 0

            def sample_sample_region(self, sample_strategy):
                result_regions = None
                if self.n_sample_regions == 4:
                    if sample_strategy == 'single':
                        result_regions = self.sample_single_sample_region()
                    elif sample_strategy == 'adjacent':
                        result_regions = self.sample_adjacent_sample_region()
                    elif sample_strategy == 'orthogonal':
                        result_regions = self.sample_orthogonal_sample_region()
                    elif sample_strategy == 'all':
                        result_regions = self.sample_all_sample_region()
                    elif sample_strategy == 'same':
                        result_regions = self.sample_same_sample_region()
                    elif sample_strategy == 'opp':
                        result_regions = self.sample_opp_sample_region()
                    elif sample_strategy == 'mixed':
                        result_regions = self.sample_mixed_sample_region()
                    else:
                        raise ValueError(
                            f'{sample_strategy} is not valid for '
                            f'for {self.n_sample_regions} regions')
                else:
                    raise NotImplementedError(f'{sample_strategy} not implemented')
                return result_regions

            def sample_single_sample_region(self):
                region = random.randint(0, self.n_sample_regions - 1)
                return [region,]

            def sample_adjacent_sample_region(self):
                region_1 = random.randint(0, self.n_sample_regions - 1)
                region_2 = (region_1 + 1) % self.n_sample_regions
                return [region_1, region_2]

            def sample_orthogonal_sample_region(self):
                region_1 = random.randint(0, self.n_sample_regions - 1)
                region_2 = (region_1 + self.n_sample_regions // 2) % self.n_sample_regions
                return [region_1, region_2]

            def sample_all_sample_region(self):
                regions = []
                for i in range(self.n_sample_regions):
                    regions.append(i)
                return regions

            def sample_same_sample_region(self):
                big_region_id = random.randint(0, 1)
                region_1 = big_region_id * 2 + random.randint(0, 1)
                region_2 = big_region_id * 2 + random.randint(0, 1)
                return [region_1, region_2]

            def sample_opp_sample_region(self):
                big_region_id = random.randint(0, 1)
                region_1 = big_region_id * 2 + random.randint(0, 1)
                region_2 = (1 - big_region_id) * 2 + random.randint(0, 1)
                return [region_1, region_2]

            def sample_mixed_sample_region(self):
                region_1 = random.randint(0, 3)
                region_2 = random.randint(0, 3)
                return [region_1, region_2]

            def sample_from_given_regions(self, regions, allow_same_region):
                # sample the regions to sample from
                stim_region_ids_selected = []
                if allow_same_region:
                    for i in range(2):
                        stim_region_id = random.choice(regions)
                        stim_region_ids_selected.append(stim_region_id)
                else:
                    if len(regions) < 2:
                        raise ValueError('Unable to sample without duplicate twice')
                    stim_region_ids_selected = random.sample(regions, 2)

                stims_selected = []
                for i in range(2):
                    stim_region_id = stim_region_ids_selected[i]
                    stim = random.uniform(
                        stim_region_id * 180 / self.n_sample_regions,
                        (stim_region_id+1) * 180 / self.n_sample_regions)
                    stims_selected.append(stim)

                return stim_region_ids_selected, stims_selected


        class StimSamplingScheduler:
            def __init__(self, n_sample_regions, stage_strategies):
                self.n_sample_regions = n_sample_regions
                self.stage_strategies = stage_strategies
                self.n_stages = len(self.stage_strategies)
                self.sampler = StimSampler(n_sample_regions)

                # keep a record
                self.strategy = None
                self.regions = None
                self.stage_idx = -1
                self.block_idx = -1
                self.block_within_stage_idx = -1
                self.n_trials = 0

            def initialize_stage(self):
                self.stage_idx += 1
                self.block_within_stage_idx = -1
                self.n_trials = 0
                self.strategy = self.stage_strategies[self.stage_idx]

            def initialize_block(self):
                self.block_idx += 1
                self.block_within_stage_idx += 1
                self.n_trials = 0
                self.regions = self.sampler.sample_sample_region(self.strategy)

            def sample_for_trial(self, allow_same_region):
                self.n_trials += 1
                selected_regions, selected_stims = self.sampler.sample_from_given_regions(
                    self.regions, allow_same_region)
                # change regions every trial
                self.regions = self.sampler.sample_sample_region(self.strategy)
                return selected_regions, selected_stims
      Before JS Experiment:
        const VALID_N_REGIONS = [4];

        class StimSampler {
            constructor(n_sample_regions) {
                if (!VALID_N_REGIONS.includes(n_sample_regions)) {
                    throw new Error(`${VALID_N_REGIONS} is not a valid number of sample regions`);
                }
                this.n_sample_regions = n_sample_regions;
            }

            sample_sample_region(sample_strategy) {
                let result_regions = null;
                if (this.n_sample_regions === 4) {
                    switch (sample_strategy) {
                        case 'single':
                            result_regions = this.sample_single_sample_region();
                            break;
                        case 'adjacent':
                            result_regions = this.sample_adjacent_sample_region();
                            break;
                        case 'orthogonal':
                            result_regions = this.sample_orthogonal_sample_region();
                            break;
                        case 'all':
                            result_regions = this.sample_all_sample_region();
                            break;
                        case 'same':
                            result_regions = this.sample_same_sample_region();
                            break;
                        case 'opp':
                            result_regions = this.sample_opp_sample_region();
                            break;
                        case 'mixed':
                            result_regions = this.sample_mixed_sample_region();
                            break;
                        default:
                            throw new Error(`${sample_strategy} is not valid for ${this.n_sample_regions} regions`);
                    }
                } else {
                    throw new Error(`${sample_strategy} not implemented`);
                }
                return result_regions;
            }

            sample_single_sample_region() {
                let region = util.randint(this.n_sample_regions);
                return [region];
            }

            sample_adjacent_sample_region() {
                let region_1 = util.randint(this.n_sample_regions);
                let region_2 = (region_1 + 1) % this.n_sample_regions;
                return [region_1, region_2];
            }

            sample_orthogonal_sample_region() {
                let region_1 = util.randint(this.n_sample_regions);
                let region_2 = (region_1 + Math.floor(this.n_sample_regions / 2)) % this.n_sample_regions;
                return [region_1, region_2];
            }

            sample_all_sample_region() {
                let regions = [];
                for (let i = 0; i < this.n_sample_regions; i++) {
                    regions.push(i);
                }
                return regions;
            }

            sample_same_sample_region() {
                let big_region_id = util.randint(2);
                let region_1 = big_region_id * 2 + util.randint(2);
                let region_2 = big_region_id * 2 + util.randint(2);
                return [region_1, region_2];
            }

            sample_opp_sample_region() {
                let big_region_id = util.randint(2);
                let region_1 = big_region_id * 2 + util.randint(2);
                let region_2 = (1 - big_region_id) * 2 + util.randint(2);
                return [region_1, region_2];
            }

            sample_mixed_sample_region() {
                let region_1 = util.randint(4);
                let region_2 = util.randint(4);
                return [region_1, region_2];
            }

            sample_from_given_regions(regions, allow_same_region) {
                let stim_region_ids_selected = [];
                if (allow_same_region) {
                    for (let i = 0; i < 2; i++) {
                        let stim_region_id = util.randchoice(regions);
                        stim_region_ids_selected.push(stim_region_id);
                    }
                } else {
                    if (regions.length < 2) {
                        throw new Error('Unable to sample without duplicate twice');
                    }
                    stim_region_ids_selected = funcRandomSample(regions, 2);
                }

                let stims_selected = [];
                for (let i = 0; i < 2; i++) {
                    let stim_region_id = stim_region_ids_selected[i];
                    let stim = funcRandomUniform(
                        stim_region_id * 180 / this.n_sample_regions,
                        (stim_region_id + 1) * 180 / this.n_sample_regions);
                    stims_selected.push(stim);
                }

                return [stim_region_ids_selected, stims_selected];
            }
        }

        class StimSamplingScheduler {
            constructor(n_sample_regions, stage_strategies) {
                this.n_sample_regions = n_sample_regions;
                this.stage_strategies = stage_strategies;
                this.n_stages = this.stage_strategies.length;
                this.sampler = new StimSampler(n_sample_regions);

                // Keep a record
                this.strategy = null;
                this.regions = null;
                this.stage_idx = -1;
                this.block_idx = -1;
                this.block_within_stage_idx = -1;
                this.n_trials = 0
            }

            initialize_stage() {
                this.stage_idx++;
                this.block_within_stage_idx = -1;
                this.n_trials = 0;
                this.strategy = this.stage_strategies[this.stage_idx];
            }

            initialize_block() {
                this.block_idx++;
                this.block_within_stage_idx++;
                this.n_trials = 0;
                this.regions = this.sampler.sample_sample_region(this.strategy);
            }

            sample_for_trial(allow_same_region) {
                this.n_trials += 1
                let [selected_regions, selected_stims] = this.sampler.sample_from_given_regions(
                    this.regions, allow_same_region
                );
                // change regions every trial
                this.regions = this.sampler.sample_sample_region(this.strategy);
                return [selected_regions, selected_stims];
            }
        }
      Begin Experiment:
        import random

        random.seed()

        # split the space into 4 regions
        n_ori_regions = 4

        # TODO: read the allowed trial code
        trial_types_allowed = [1, 0]
        n_trial_types_allowed = len(trial_types_allowed)

        # TODO: read the allowed sampling strategies
        sampling_strategies_allowed = ['mixed',]
        n_sampling_strategies_allowed = len(sampling_strategies_allowed)

        # TODO: figure out if we have cases where people only do one mode?
        response_modes_allowed = ['draw', 'click']
        n_response_modes_allowed = len(response_modes_allowed)

        # TODO: define n blocks each sub type?
        n_blocks_each_subtype = 4

        # THE PATH TO BACKUP RECORDS
        BACKUP_IDX = 0
        N_BACKUPS = 2
        BACKUP_FOLDER_PATH = thisExp.dataFileName
        if not os.path.exists(BACKUP_FOLDER_PATH):
            os.makedirs(BACKUP_FOLDER_PATH)
      Begin JS Experiment:
        // split the space into 8 regions
        n_ori_regions = 4;

        // TODO: read the allowed trial code
        trial_types_allowed = [0, 1];
        n_trial_types_allowed = trial_types_allowed.length;

        // TODO: read the allowed sampling strategies
        sampling_strategies_allowed = ["mixed"];
        n_sampling_strategies_allowed = sampling_strategies_allowed.length;

        // TODO: figure out if we have cases where people only do one mode?
        response_modes_allowed = ["draw", "click"]
        n_response_modes_allowed = response_modes_allowed.length;

        // TODO: define n blocks each sub type?
        n_blocks_each_subtype = 4;
      Begin JS Routine:
        // keep track of errors
        experiment_error_records = [];

        // initialize the list of trials to run
        sampling_type_to_sample = sampling_strategies_allowed.length;
        trial_type_list = funcRandomSample(trial_types_allowed, n_trial_types_allowed);
        mode_type_list = funcRandomSample(response_modes_allowed, n_response_modes_allowed);
        sampling_type_list = funcRandomSample(sampling_strategies_allowed, n_sampling_strategies_allowed);

        // compute the stats
        n_kinds_of_tasks = n_trial_types_allowed
        n_blocks_each_subtask = n_sampling_strategies_allowed * n_blocks_each_subtype;
        n_blocks_each_task = n_blocks_each_subtask * n_response_modes_allowed;
        n_trials_each_block = 10;
        if (expInfo["test mode"] === "online") {
            n_trials_each_block = 10;
        }
      Begin Routine:
        # keep track of errors
        experiment_error_records = []

        # initialize the list of trials to run
        sampling_type_to_sample = len(sampling_strategies_allowed)
        trial_type_list = random.sample(trial_types_allowed, n_trial_types_allowed)
        mode_type_list = random.sample(response_modes_allowed, n_response_modes_allowed)
        sampling_type_list = random.sample(sampling_strategies_allowed, n_sampling_strategies_allowed)

        # compute the stats
        n_kinds_of_tasks = n_trial_types_allowed
        n_blocks_each_subtask = n_sampling_strategies_allowed * n_blocks_each_subtype
        n_blocks_each_task = n_blocks_each_subtask * n_response_modes_allowed
        n_trials_each_block = 10
        if expInfo["test mode"] == "online":
            n_trials_each_block = 10
    CodeComponent el_ctrl
      Code Type = Auto->JS
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      Begin Routine:
        eyetracking = 1 #0 is off tracker; 1 is on tracker
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  Routine responseInstruction
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    CodeComponent codeResponseInstruction
      Code Type = Both
      Begin Experiment:
        continue_button = None
      Begin JS Experiment:
        continue_button = null;
      Begin JS Routine:
        instruction_mode = response_modes_allowed[
            response_instruction_loop.thisN];
        continue_button = funcCreateButton(
            psychoJS.window, 'continue',
            [0, -0.4], [0.25, 0.1]);
      Begin Routine:
        instruction_mode = response_modes_allowed[response_instruction_loop.thisN]
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
      Each Frame:
        left_button = mouseResponseInstruction.getPressed()[0]
        mouse_position = mouseResponseInstruction.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      Each JS Frame:
        left_button = mouseResponseInstruction.getPressed()[0];
        mouse_position = mouseResponseInstruction.getPos();
        if (left_button && (t > 0.5) && continue_button.contains(mouse_position)) {
            continueRoutine = false;
        }
      End JS Routine:
        continue_button.setAutoDraw(false);
        continue_button = null;
      End Routine:
        continue_button.setAutoDraw(False);
        continue_button = None
    TextComponent textResponseInstruction
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'For reporting orientation by ' + instruction_mode + 'ing, here is an example of a grating stimulus and the correct response'
      wrapWidth = 1.4
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    ImageComponent imageResponseInstruction
      image [set every repeat] = $'resources/'+instruction_mode+'ing.png'
      size = (1.12, 0.63)
      startVal [time (s)] = 0.0
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    MouseComponent mouseResponseInstruction
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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
  Routine prepareQuiz
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    CodeComponent codePrepareQuiz
      Code Type = Both
      Before Experiment:
        class QuizDiagram:
            def __init__(self, window, loc, width, height, diagram_type, params):
                self.obj_display = []
                loc_x = loc[0]
                loc_y = loc[1]
                stim_r = height * 0.36
                if diagram_type == 'stims':
                    stims = params['stims']
                    n_stims = len(stims)
                    unit_width = width / n_stims
                    for i in range(n_stims):
                        # compute the location of this stim
                        stim_ori = stims[i]
                        stim_x = loc_x + (2*i+1-n_stims) * unit_width / 2
                        stim_y = loc_y
                        new_stim_obj = funcDrawStim(
                            window, stim_ori, [stim_x, stim_y], stim_r)
                        self.obj_display.append(new_stim_obj)

                elif diagram_type == 'answers':
                    ans_mode = params['mode']
                    answers = params['answers']
                    n_answers = len(answers)
                    unit_width = width / n_answers
                    for i in range(n_answers):
                        # compute the location of this stim
                        ans_ori = answers[i]
                        ans_x = loc_x + (2*i+1-n_answers) * unit_width / 2
                        ans_y = loc_y
                        ans_r = stim_r

                        # create the correct answer
                        new_ans_obj = None
                        if ans_mode == 'click':
                            new_ans_obj = ClickAnswerObject(
                                window, ans_ori,
                                [ans_x, ans_y], ans_r, 0.01)
                        elif ans_mode == 'draw':
                            new_ans_obj = DrawAnswerObject(
                                window, ans_ori, True,
                                [ans_x, ans_y], ans_r)
                        self.obj_display.append(new_ans_obj)

                elif diagram_type == 'stims_with_cue':
                    stims = params['stims']
                    n_stims = len(stims)
                    unit_width = width / (n_stims+1)

                    stim_locs = []
                    if n_stims == 2:
                        stim_locs = [
                            [loc_x-unit_width, loc_y],
                            [loc_x+unit_width, loc_y]]
                    else:
                        raise NotImplementedError()

                    for i in range(n_stims):
                        # draw the stims
                        stim_ori = stims[i]
                        stim_loc = stim_locs[i]
                        new_stim_obj = funcDrawStim(
                            window, stim_ori, stim_loc, stim_r)
                        self.obj_display.append(new_stim_obj)

                        # draw the cue
                        cue_type = params['cue_type']
                        color_code = params["color_code"][i]
                        cue_obj = None
                        if cue_type == "explicit":
                            to_report_code = params["to_report_code"][i]
                            cue_obj = SingleCueObject(
                                window, stim_loc, to_report_code, stim_r, color_code)
                        self.obj_display.append(cue_obj)


            def setAutoDraw(self, auto_draw):
                for i in range(len(self.obj_display)):
                    self.obj_display[i].setAutoDraw(auto_draw)

        class singleSelectionButton:
            def __init__(self, window, selection_id, text, loc):
                self.selection_id = selection_id
                self.text = text

                # predefine
                height = 0.04

                # create the button
                self.check_box = visual.Rect(
                    window, width=height, height=height,
                    pos=loc, lineColor='black', fillColor='white')

                # create the text
                self.text_obj = visual.TextStim(
                    window, text=text, pos=(loc[0]+height * 1.5, loc[1]),
                    anchorHoriz='left', alignText='left', height=height)

                # make everything visible
                self.setAutoDraw(True)

            def contains(self, pos):
                return self.check_box.contains(pos)

            def to_select(self):
                self.check_box.setFillColor('black')

            def to_unselect(self):
                self.check_box.setFillColor('white')

            def setAutoDraw(self, auto_draw):
                self.check_box.setAutoDraw(auto_draw)
                self.text_obj.setAutoDraw(auto_draw)

        class QuizSelectionObjects:
            def __init__(self, window, texts, locs):
                self.choice_objs = []
                self.selected = None
                n_choices = len(texts)
                self.choices = []
                for i in range(n_choices):
                    one_choice = singleSelectionButton(window, i, texts[i], locs[i])
                    self.choice_objs.append(one_choice)

            def check_click(self, pos):
                for i in range(len(self.choice_objs)):
                    to_check = self.choice_objs[i]
                    if to_check.contains(pos):
                        # deselect previous one
                        if self.selected is not None:
                            self.choice_objs[self.selected].to_unselect()
                        self.selected = i
                        to_check.to_select()
                        return True # something got selected
                return False # nothing got selected

            def get_selected_text(self):
                if self.selected is not None:
                    return self.choice_objs[self.selected].text
                else:
                    return None

            def setAutoDraw(self, auto_draw):
                for i in range(len(self.choice_objs)):
                    to_check = self.choice_objs[i]
                    to_check.setAutoDraw(auto_draw)

        class quizManagementObj:
            def __init__(self):
                self.obj_display = []
                self.question_diagram_objs = []
                self.choice_diagram_objs = []
                self.choices = None
                self.people_answer = None
                self.correct_answer_id = None
                self.correct_answer = None
                self.continue_button = None
                self.question_text = ''

                # layout
                self.quiz_title_loc = [0, 0.35]
                self.quiz_title_width = 1.3
                self.question_diagram_loc = [0, 0]
                self.question_diagram_size = [0, 0]
                self.choice_diagram_loc = [0, 0]
                self.choice_diagram_size = [0, 0]
                self.question_prompt_loc = [0, 0]
                self.question_prompt_width = 0
                self.choices_loc = [0, 0]
                self.continue_button_loc = []
                self.answer_width = 0

            def initiate_quiz(self, window, question_type, params):
                if question_type == 'response_instruction':
                    # given a stim, what is the correct response?
                    # create the title
                    title_text = "[Quiz] What is the correct response?"
                    self.create_quiz_title(window, title_text)

                    # create stimulus
                    stims = [random.uniform(0, 180)]
                    # create question diagram
                    self.question_diagram_loc = [-0.3, 0.1]
                    self.question_diagram_size = [0.36, 0.36]
                    self.create_question_diagram(window,
                        'stims', {'stims': stims})

                    # create choice diagram
                    response_mode = params['mode']
                    correct_ans = stims[0]
                    wrong_ans = (correct_ans + 90) % 180
                    left_correct = random.random() > 0.5
                    choice_values = None
                    if left_correct:
                        self.correct_answer_id = 0
                        choice_values = [correct_ans, wrong_ans]
                    else:
                        self.correct_answer_id = 1
                        choice_values = [wrong_ans, correct_ans]
                    self.choice_diagram_loc = [-0.3, -0.2]
                    self.choice_diagram_size = [0.6, 0.36]
                    self.create_choice_diagram(window,
                        'answers', {'answers': choice_values,
                        'mode': response_mode})

                    # create question prompt
                    self.question_prompt_loc = [0.2, 0.1]
                    self.question_prompt_width = 0.7
                    self.answer_width = 0.6
                    self.question_text = "For the grating patch on the top, \n" +\
                        "which of the response at the bottom is correct?"
                    question_text_display = self.question_text + "\n Choose your answer and click 'continue' to check."
                    self.question_prompt = visual.TextStim(
                        window, text=question_text_display, height=0.04,
                        pos=self.question_prompt_loc,
                        wrapWidth=self.question_prompt_width)
                    self.question_prompt.setAutoDraw(True)
                    self.obj_display.append(self.question_prompt)

                    # create choices
                    self.choices_loc = [[0.1, -0.1], [0.1, -0.2]]
                    choice_texts = ['the left one', 'the right one']
                    self.correct_answer = choice_texts[self.correct_answer_id]
                    self.choices = QuizSelectionObjects(
                        window, choice_texts, self.choices_loc)
                    self.obj_display.append(self.choices)

                    # set continue button position
                    self.continue_button_loc = [0.2, -0.35]
                    self.continue_button = funcCreateButton(
                        window, 'continue', self.continue_button_loc, [0.24, 0.1])
                    self.obj_display.append(self.continue_button)
                elif question_type == 'cue':
                    # how to respond to a implicit cue?
                    ## create the title
                    cue_type = params["cue_type"]
                    title_text = "[Quiz] What to report when there is an " + cue_type + " cue?"
                    self.create_quiz_title(window, title_text)

                    ## set up question diagram
                    ## create stimulus
                    self.question_diagram_loc = [0, 0.15]
                    self.question_diagram_size = [1, 0.5]
                    sampler = params['stim_sampler']
                    stim_region_ids, stims = sampler.sample_for_trial(
                        allow_same_region=False)
                    diagram_params = {
                        "stims": stims,
                        "cue_type": cue_type}

                    # decide the cue to report
                    # report_type_id = random.randint(0, 2)
                    report_type_id = sampler.n_trials % 3
                    self.correct_answer_id = report_type_id
                    if cue_type == "explicit":
                        to_report = []
                        if report_type_id == 0:
                            to_report = [True, False]
                        elif report_type_id == 1:
                            to_report = [False, True]
                        else:
                            to_report = [True, True]
                        diagram_params["to_report_code"] = to_report

                    # set color code
                    diagram_params["color_code"] = [1, 2] if random.random() < 0.5 else [2, 1]

                    self.create_question_diagram(
                        window, 'stims_with_cue', params=diagram_params)

                    # create question prompt
                    self.question_prompt_loc = [-0.3, -0.15]
                    self.question_prompt_width = 0.7
                    self.answer_width = 0.6
                    self.question_text = "Given the cue in the center, \n" +\
                        "which of the stimuli you need to remember and report?"
                    question_text_display = self.question_text + "\n Choose your answer and click 'continue' to check."
                    self.question_prompt = visual.TextStim(
                        window, text=question_text_display, height=0.04,
                        pos=self.question_prompt_loc,
                        wrapWidth=self.question_prompt_width)
                    self.question_prompt.setAutoDraw(True)
                    self.obj_display.append(self.question_prompt)

                    # create choices
                    self.choices_loc = [[0.1, -0.1], [0.1, -0.17], [0.1, -0.24]]
                    choice_texts = ['the left one', 'the right one', 'both']
                    self.correct_answer = choice_texts[self.correct_answer_id]
                    self.choices = QuizSelectionObjects(
                        window, choice_texts, self.choices_loc)
                    self.obj_display.append(self.choices)

                    # set continue button position
                    self.continue_button_loc = [0, -0.35]
                    self.continue_button = funcCreateButton(
                        window, 'continue', self.continue_button_loc, [0.24, 0.1])
                    self.obj_display.append(self.continue_button)

                else:
                    pass

            def create_quiz_title(self, window, title_text):
                self.title = visual.TextStim(
                    window, text=title_text, height=0.06,
                    pos=self.quiz_title_loc,
                    wrapWidth=self.quiz_title_width)
                self.title.setAutoDraw(True)
                self.obj_display.append(self.title)

            def create_question_diagram(self, window, diagram_type, params):
                self.question_diagram_objs = QuizDiagram(
                    window, self.question_diagram_loc,
                    self.question_diagram_size[0],
                    self.question_diagram_size[1],
                    diagram_type, params)
                self.obj_display.append(self.question_diagram_objs)

            def create_choice_diagram(self, window, diagram_type, params):
                self.choice_diagram_objs = QuizDiagram(
                    window, self.choice_diagram_loc,
                    self.choice_diagram_size[0],
                    self.choice_diagram_size[1],
                    diagram_type, params)
                self.obj_display.append(self.choice_diagram_objs)

            def collect_quiz_answer(self):
                self.people_answer = self.choices.get_selected_text()
                return self.people_answer is not None

            def create_quiz_feedback_obj(self, window):
                # remove choices
                self.choices.setAutoDraw(False)
                self.choices = []

                # change question
                self.question_prompt.setText(self.question_text)

                # display answer
                answer_msg = ''
                if self.people_answer == self.correct_answer:
                    # the person get correct answer
                    answer_msg += "Your are right! "
                    answer_msg += "The correct answer is '" + self.correct_answer + "'\n"
                else:
                    answer_msg += "Thanks for your input! However, "
                    answer_msg += "the correct answer is '" + self.correct_answer + "'\n"
                answer_msg_width = self.answer_width
                answer_msg_x = self.choices_loc[0][0] + 0.2
                answer_msg_y = (self.choices_loc[0][1] + self.choices_loc[-1][1]) / 2
                self.answer_msg_obj = visual.TextStim(
                    window, text=answer_msg, height=0.04,
                    pos=[answer_msg_x, answer_msg_y],
                    wrapWidth=answer_msg_width)
                self.answer_msg_obj.setAutoDraw(True)
                self.obj_display.append(self.answer_msg_obj)

            def setAutoDraw(self, auto_draw):
                n_objs = len(self.obj_display)
                for i in range(n_objs):
                    obj = self.obj_display[i]
                    obj.setAutoDraw(auto_draw)
      Before JS Experiment:
        class QuizDiagram{
            constructor(window, loc, width, height, diagram_type, params) {
                this.obj_display = [];
                let loc_x = loc[0];
                let loc_y = loc[1];
                let stim_r = (height * 0.36);
                if ((diagram_type === "stims")) {
                    let stims = params["stims"];
                    let n_stims = stims.length;
                    let unit_width = (width / n_stims);
                    for (var i = 0; i< n_stims; i++) {
                        let stim_ori = stims[i];
                        let stim_x = loc_x + (2 * i + 1 - n_stims) * unit_width / 2;
                        let stim_y = loc_y;
                        let new_stim_obj = funcDrawStim(window, stim_ori, [stim_x, stim_y], stim_r);
                        this.obj_display.push(new_stim_obj);
                    }
                } else if (diagram_type === 'answers') {
                    let ans_mode = params['mode'];
                    let answers = params['answers'];
                    let n_answers = answers.length;
                    let unit_width = width / n_answers;
                    for (var i = 0; i < n_answers; i++) {
                        // Compute the location of this stim
                        let ans_ori = answers[i];
                        let ans_x = loc_x + (2 * i + 1 - n_answers) * unit_width / 2;
                        let ans_y = loc_y;
                        let ans_r = stim_r;

                        // Create the correct answer
                        let new_ans_obj = null;
                        if (ans_mode === 'click') {
                            new_ans_obj = new ClickAnswerObject(
                                window, ans_ori, [ans_x, ans_y], ans_r, 0.01);
                        } else if (ans_mode === 'draw') {
                            new_ans_obj = new DrawAnswerObject(
                                window, ans_ori, true, [ans_x, ans_y], ans_r);
                        }
                        this.obj_display.push(new_ans_obj);
                    }
                } else if (diagram_type === "stims_with_cue") {
                    let stims = params['stims'];
                    let n_stims = stims.length;
                    let unit_width = width / (n_stims+1);
                    let stim_locs = [];
                    if (n_stims === 2) {
                        stim_locs = [
                            [loc_x-unit_width, loc_y],
                            [loc_x+unit_width, loc_y]];
                    } else {
                        throw new Error("Not Implemented");
                    }

                    for (var i = 0; i < n_stims; i++) {
                        // draw the stims
                        let stim_ori = stims[i];
                        let stim_loc = stim_locs[i];
                        let new_stim_obj = funcDrawStim(
                            window, stim_ori, stim_loc, stim_r);
                        this.obj_display.push(new_stim_obj);

                        // draw the cue
                        let cue_type = params['cue_type'];
                        let color_code = params["color_code"][i];
                        let cue_obj = null;
                        if (cue_type === "explicit") {
                            let to_report_code = params["to_report_code"][i];
                            cue_obj = new SingleCueObject(
                                window, stim_loc, to_report_code, stim_r, color_code);
                        }
                        this.obj_display.push(cue_obj);
                    }
                } else {}
            }

            setAutoDraw(auto_draw) {
                for (var i = 0; i< this.obj_display.length; i++) {
                    this.obj_display[i].setAutoDraw(auto_draw);
                }
            }
        }

        class singleSelectionButton {
            constructor(window, selection_id, text, loc) {
                this.loc = loc
                this.height = 0.04;
                this.selection_id = selection_id;
                this.text = text;
                this.check_box = new visual.Rect(
                    {"win": window, "width": this.height, "height": this.height,
                    "pos": loc, "lineColor": "black", "fillColor": "white"});
                this.text_obj = new visual.TextStim({
                    "win": window, "text": text, "pos": [(loc[0] + (this.height * 5)), loc[1]],
                    "anchorHoriz": "left", "alignText": "left", "height": this.height});
                this.setAutoDraw(true);
            }
            contains(pos) {
                let left = this.loc[0] - this.height/2;
                let right = this.loc[0] + this.height/2;
                let bottom = this.loc[1] - this.height/2;
                let top = this.loc[1] + this.height/2;
                let within_x = (pos[0] >= left) && (pos[0] <= right);
                let within_y = (pos[1] >= bottom) && (pos[1] <= top);
                return within_x && within_y;
            }
            to_select() {
                this.check_box.setFillColor("black");
            }
            to_unselect() {
                this.check_box.setFillColor("white");
            }
            setAutoDraw(auto_draw) {
                this.check_box.setAutoDraw(auto_draw);
                this.text_obj.setAutoDraw(auto_draw);
            }
        }
        class QuizSelectionObjects {
            constructor(window, texts, locs) {
                var n_choices, one_choice;
                this.choice_objs = [];
                this.selected = null;
                n_choices = texts.length;
                this.choices = [];
                for (var i, _pj_c = 0, _pj_a = util.range(n_choices), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    one_choice = new singleSelectionButton(window, i, texts[i], locs[i]);
                    this.choice_objs.push(one_choice);
                }
            }
            check_click(pos) {
                var to_check;
                for (var i, _pj_c = 0, _pj_a = util.range(this.choice_objs.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    to_check = this.choice_objs[i];
                    if (to_check.contains(pos)) {
                        if ((this.selected !== null)) {
                            this.choice_objs[this.selected].to_unselect();
                        }
                        this.selected = i;
                        to_check.to_select();
                        return true;
                    }
                }
                return false;
            }
            get_selected_text() {
                if ((this.selected !== null)) {
                    return this.choice_objs[this.selected].text;
                } else {
                    return null;
                }
            }
            setAutoDraw(auto_draw) {
                var to_check;
                for (var i, _pj_c = 0, _pj_a = util.range(this.choice_objs.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    to_check = this.choice_objs[i];
                    to_check.setAutoDraw(auto_draw);
                }
            }
        }
        class quizManagementObj {
            constructor() {
                this.obj_display = [];
                this.question_diagram_objs = [];
                this.choice_diagram_objs = [];
                this.choices = null;
                this.people_answer = null;
                this.correct_answer_id = null;
                this.correct_answer = null;
                this.continue_button = null;
                this.question_text = "";

                // layout
                this.quiz_title_loc = [0, 0.35];
                this.quiz_title_width = 1.3;
                this.question_diagram_loc = [0, 0];
                this.question_diagram_size = [0, 0];
                this.choice_diagram_loc = [0, 0];
                this.choice_diagram_size = [0, 0];
                this.question_prompt_loc = [0, 0];
                this.question_prompt_width = 0;
                this.choices_loc = [0, 0];
                this.continue_button_loc = [0, 0];
                this.answer_width = 0;
            }
            initiate_quiz(window, question_type, params) {
                if (question_type === "response_instruction") {
                    // given a stim, what is the correct response?

                    // create the title
                    let title_text = "[Quiz] What is the correct response?";
                    this.create_quiz_title(window, title_text);

                    // create the stims
                    let stims = [funcRandomUniform(0, 180)];

                    // create question diagram
                    this.question_diagram_loc = [-0.3, 0.1];
                    this.question_diagram_size = [0.36, 0.36];
                    this.create_question_diagram(window,
                        "stims", {"stims": stims});

                    // create choice diagram
                    let response_mode = params['mode'];
                    let correct_ans = stims[0];
                    let wrong_ans = (correct_ans + 90) % 180;
                    let left_correct = funcRandomUniform(0, 1) > 0.5;
                    let choice_values = null;
                    if (left_correct) {
                        this.correct_answer_id = 0;
                        choice_values = [correct_ans, wrong_ans];
                    } else {
                        this.correct_answer_id = 1;
                        choice_values = [wrong_ans, correct_ans];
                    }
                    this.choice_diagram_loc = [-0.3, -0.2];
                    this.choice_diagram_size = [0.6, 0.36];
                    this.create_choice_diagram(window,
                        'answers', {'answers': choice_values,
                        'mode': response_mode});

                    // create question prompt
                    this.question_prompt_loc = [0.2, 0.1];
                    this.question_prompt_width = 0.7;
                    this.answer_width = 0.6;
                    this.question_text = "For the grating patch on the top, \n" +
                        "which of the response at the bottom is correct?"
                    let question_text_display = this.question_text +
                        "\n Choose your answer and click 'continue' to check.";
                    this.question_prompt = new visual.TextStim({
                        "win": window, "text": question_text_display, "height": 0.04,
                        "pos": this.question_prompt_loc,
                        "wrapWidth": this.question_prompt_width});
                    this.question_prompt.setAutoDraw(true);
                    this.obj_display.push(this.question_prompt);

                    // create choices
                    this.choices_loc = [[0.1, - 0.1], [0.1, -0.2]];
                    let choice_texts = ["the left one", "the right one"];
                    this.correct_answer = choice_texts[this.correct_answer_id];
                    this.choices = new QuizSelectionObjects(
                        window, choice_texts,
                        this.choices_loc);
                    this.obj_display.push(this.choices);

                    // set continue button position
                    this.continue_button_loc = [0.2, - 0.35];
                    this.continue_button = funcCreateButton(
                        window, "continue", this.continue_button_loc,
                        [0.24, 0.1]);
                    this.obj_display.push(this.continue_button);
                } else if (question_type === "cue") {
                    // how to respond to a implicit cue?
                    // create the title
                    let cue_type = params["cue_type"];
                    let title_text = "[Quiz] What to report when there is an " + cue_type + " cue?";
                    this.create_quiz_title(window, title_text);

                    // set up question diagram
                    this.question_diagram_loc = [0, 0.15];
                    this.question_diagram_size = [1, 0.5];
                    // create stimulus
                    let sampler = params["stim_sampler"];
                    let [stim_region_ids, stims] = sampler.sample_for_trial(false);
                    let diagram_params = {
                        "stims": stims,
                        "cue_type": cue_type};

                    // decide the cue to report
                    // let report_type_id = util.randint(0, 3);
                    let report_type_id = sampler.n_trials % 3;
                    this.correct_answer_id = report_type_id;
                    if (cue_type === "explicit") {
                        let to_report = [];
                        if (report_type_id === 0) {
                            to_report = [true, false];
                        } else if (report_type_id === 1) {
                            to_report = [false, true];
                        } else {
                            to_report = [true, true];
                        }
                        diagram_params["to_report_code"] = to_report;
                    } else {}

                    // set color code
                    diagram_params["color_code"] = (Math.random() < 0.5) ? [1, 2] : [2, 1];

                    // create question diagram
                    this.create_question_diagram(
                        window, "stims_with_cue", diagram_params);

                    // create question prompt
                    this.question_prompt_loc = [-0.3, -0.15];
                    this.question_prompt_width = 0.7;
                    this.answer_width = 0.6;
                    this.question_text = "Given the cue in the center, \n" +
                        "which of the stimuli you need to remember and report?";
                    let question_text_display = this.question_text + "\n Choose your answer and click 'continue' to check.";
                    this.question_prompt = new visual.TextStim({
                        "win": window, "text": question_text_display, "height": 0.04,
                        "pos": this.question_prompt_loc,
                        "wrapWidth": this.question_prompt_width});
                    this.question_prompt.setAutoDraw(true);
                    this.obj_display.push(this.question_prompt);

                    // create choices
                    this.choices_loc = [[0.1, -0.1], [0.1, -0.17], [0.1, -0.24]];
                    let choice_texts = ["the left one", "the right one", "both"];
                    this.correct_answer = choice_texts[this.correct_answer_id];
                    this.choices = new QuizSelectionObjects(
                        window, choice_texts,
                        this.choices_loc);
                    this.obj_display.push(this.choices);

                    // set continue button position
                    this.continue_button_loc = [0, -0.35];
                    this.continue_button = funcCreateButton(
                        window, "continue", this.continue_button_loc,
                        [0.24, 0.1]);
                    this.obj_display.push(this.continue_button);

                } else {
                }
            }
            create_quiz_title(window, title_text) {
                this.title = new visual.TextStim({
                    "win": window, "text": title_text, "height": 0.06,
                    "pos": this.quiz_title_loc,
                    "wrapWidth": this.quiz_title_width});
                this.title.setAutoDraw(true);
                this.obj_display.push(this.title);
            }
            create_question_diagram(window, diagram_type, params) {
                this.question_diagram_objs = new QuizDiagram(
                    window, this.question_diagram_loc,
                    this.question_diagram_size[0], this.question_diagram_size[1],
                    diagram_type, params);
                this.obj_display.push(this.question_diagram_objs);
            }
            create_choice_diagram(window, diagram_type, params) {
                this.choice_diagram_objs = new QuizDiagram(
                    window, this.choice_diagram_loc,
                    this.choice_diagram_size[0],
                    this.choice_diagram_size[1],
                    diagram_type, params);
                this.obj_display.push(this.choice_diagram_objs);
            }
            collect_quiz_answer() {
                this.people_answer = this.choices.get_selected_text();
                return (this.people_answer !== null);
            }
            create_quiz_feedback_obj(window) {
                // remove choices
                this.choices.setAutoDraw(false);
                this.choices = [];

                // change question
                this.question_prompt.setText(this.question_text)

                // Display answer
                let answer_msg = "";
                if (this.people_answer === this.correct_answer) {
                    // The person got the correct answer
                    answer_msg += "Your are right! ";
                    answer_msg += "The correct answer is '" + this.correct_answer + "'\n";
                } else {
                    answer_msg += "Thanks for your input! However, ";
                    answer_msg += "the correct answer is '" + this.correct_answer + "'\n";
                }
                let answer_msg_width = this.answer_width;
                let answer_msg_x = this.choices_loc[0][0] + 0.2;
                let answer_msg_y = (this.choices_loc[0][1] +
                    this.choices_loc[this.choices_loc.length-1][1]) / 2;
                this.answer_msg_obj = new visual.TextStim({
                    "win": window, "text": answer_msg, "height": 0.04,
                    "pos": [answer_msg_x, answer_msg_y],
                    "wrapWidth": answer_msg_width});
                this.answer_msg_obj.setAutoDraw(true);
                this.obj_display.push(this.answer_msg_obj);
            }
            setAutoDraw(auto_draw) {
                var n_objs, obj;
                n_objs = this.obj_display.length;
                for (var i, _pj_c = 0, _pj_a = util.range(n_objs), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    obj = this.obj_display[i];
                    obj.setAutoDraw(auto_draw);
                }
            }
        }
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  Routine prepareSingleTrial
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    CodeComponent codePrepareSingleTrial
      Code Type = Both
      Before Experiment:
        class ResponseLocationSampler:
            def __init__(self, xs, ys, allow_diagonal, allow_off_axis, allow_row_align):
                self.xs = [0, ] + xs[:]
                self.ys = [0, ] + ys[:]

                # pre-register possible locations
                resp_loc_id_candidates = []

                # register locations on axis
                if allow_diagonal:
                    for loc_flip in [0, 1]:
                        resp_loc_ids = [
                            [1, 1+loc_flip],
                            [2, 2-loc_flip]]
                        resp_loc_id_candidates.append(resp_loc_ids)

                # register row- or column-align positions
                fix_pos_ids = [0, 1, 2] if allow_off_axis else [0, ]
                for fix_pos_id in fix_pos_ids:
                    resp_loc_ids = [[fix_pos_id, 1], [fix_pos_id, 2]]
                    resp_loc_id_candidates.append(resp_loc_ids)
                    if allow_row_align:
                        resp_loc_ids = [[1, fix_pos_id], [2, fix_pos_id]]
                        resp_loc_id_candidates.append(resp_loc_ids)

                self.resp_loc_id_candidates = resp_loc_id_candidates

            def sample_location(self, allow_swap):
                loc_id_pos = random.randint(0, len(self.resp_loc_id_candidates)-1)
                loc_ids = self.resp_loc_id_candidates[loc_id_pos]
                resp_locs = []
                if allow_swap and random.random() < 0.5:
                    resp_locs = [
                        [self.xs[loc_ids[1][0]], self.ys[loc_ids[1][1]]],
                        [self.xs[loc_ids[0][0]], self.ys[loc_ids[0][1]]]]
                else:
                    resp_locs = [
                        [self.xs[loc_ids[0][0]], self.ys[loc_ids[0][1]]],
                        [self.xs[loc_ids[1][0]], self.ys[loc_ids[1][1]]]]

                return resp_locs
      Before JS Experiment:
        class ResponseLocationSampler {
            constructor(xs, ys, allow_diagonal, allow_off_axis, allow_row_align) {
                this.xs = [0].concat([...xs]);
                this.ys = [0].concat([...ys]);

                // Pre-register possible locations
                this.resp_loc_id_candidates = [];

                // Register locations on axis
                if (allow_diagonal) {
                    for (let loc_flip of [0, 1]) {
                        let resp_loc_ids = [
                            [1, 1 + loc_flip],
                            [2, 2 - loc_flip]
                        ];
                        this.resp_loc_id_candidates.push(resp_loc_ids);
                    }
                }

                // Register row- or column-align positions
                let fix_pos_ids = allow_off_axis ? [0, 1, 2] : [0];
                for (let fix_pos_id of fix_pos_ids) {
                    let resp_loc_ids = [[fix_pos_id, 1], [fix_pos_id, 2]];
                    this.resp_loc_id_candidates.push(resp_loc_ids);
                    if (allow_row_align) {
                        resp_loc_ids = [[1, fix_pos_id], [2, fix_pos_id]];
                        this.resp_loc_id_candidates.push(resp_loc_ids);
                    }
                }
            }

            sample_location(allow_swap) {
                let loc_id_pos = util.randint(0, this.resp_loc_id_candidates.length);
                let loc_ids = this.resp_loc_id_candidates[loc_id_pos];
                let resp_locs = [];
                if (allow_swap && Math.random() < 0.5) { // Randomly decide to swap
                    resp_locs = [
                        [this.xs[loc_ids[1][0]], this.ys[loc_ids[1][1]]],
                        [this.xs[loc_ids[0][0]], this.ys[loc_ids[0][1]]]
                    ];
                } else {
                    resp_locs = [
                        [this.xs[loc_ids[0][0]], this.ys[loc_ids[0][1]]],
                        [this.xs[loc_ids[1][0]], this.ys[loc_ids[1][1]]]
                    ];
                }

                return resp_locs;
            }
        }
      Begin Experiment:
        # define the 4 quadrants to display/response
        quadrant_x_pos = [-0.25, 0.25]
        quadrant_y_pos = [0.3, -0.24]

        # pre-register possible locations
        allow_diagonal = False # TO TUNE
        allow_off_axis = False # TO TUNE
        allow_row_align = True # TO TUNE
        allow_location_swap = True # TO TUNE
        resp_location_sampler = ResponseLocationSampler(
            xs=quadrant_x_pos,
            ys=quadrant_y_pos,
            allow_diagonal=allow_diagonal,
            allow_off_axis=allow_off_axis,
            allow_row_align=allow_location_swap)
      Begin JS Experiment:
        // define the 4 quadrants to display/response
        quadrant_x_pos = [-0.25, 0.25];
        quadrant_y_pos = [0.3, -0.24];

        // Pre-register possible locations
        allow_diagonal = false; // TO TUNE
        allow_off_axis = false; // TO TUNE
        allow_row_align = true; // TO TUNE
        allow_location_swap = true; // TO TUNE

        resp_location_sampler = new ResponseLocationSampler(
            quadrant_x_pos,
            quadrant_y_pos,
            allow_diagonal,
            allow_off_axis,
            allow_row_align);
      Begin JS Routine:
        // initialize stimuli
        // during instruction, two stims are forced to be from different regions
        stim_region_ids_selected = null;
        stims_selected = null;
        allow_same_region = false;
        if (has_finished_instruction) {
          // In real trials, 2/3 allow same region
          // allow_same_region = Math.random() < 2/3;
          allow_same_region = false;
        }
        [stim_region_ids_selected, stims_selected] = stim_sampler.sample_for_trial(
            allow_same_region=allow_same_region);

        // initialize which to report
        // 0: to report only the first
        // 1: to report only the second
        // 2 or 3: to report both
        report_type_id = util.randint(0, 4);
        if (!has_finished_instruction) {
            report_type_id = block.thisN;
        }
        to_report_code = [true, true];
        if (report_type_id === 0) {
            to_report_code[1] = false;
        } else if (report_type_id === 1) {
            to_report_code[0] = false;
        }

        // define the color of cues
        color_codes = [1, 2];
        if (Math.random() < 0.5) {
            color_codes = [2, 1];
        }

        // place holder: to record the future response
        participant_responses = [null, null];

        // set where to display stimuli
        // eyetracking: stimulus all at the center
        stim_locs = [[0, 0], [0, 0]]
        // select response locations
        resp_locs = resp_location_sampler.sample_location(allow_location_swap);

        // set time limits
        // total max time for response
        response_time = (response_mode === "draw") ? draw_response_time : click_response_time;
        // set time limits for display
        trial_display_time = display_time;
        // set time limits for delay
        delay_time = 4; // funcRandomUniform(delay_time_min, delay_time_max);
        // set time limits for response
        trial_resp_time = util.sum(to_report_code) * response_time;
        // set time limits for ITI
        total_duration_min = (((delay_time_min + display_time) + (util.sum(to_report_code) * response_time * 0.5)) + post_trial_time_min);
        total_duration_max = (((delay_time_max + display_time) + (util.sum(to_report_code) * response_time * 0.5)) + (post_trial_time_max * 0.5));

        // make things slower for instruction
        let slow_down_factor = 1.5
        if (!has_finished_instruction) {
            trial_display_time *= slow_down_factor;
            display_cue_onset_time *= slow_down_factor;
            trial_resp_time *= slow_down_factor;
        }

        // start the timer for the trial
        trial_timer = new util.Clock();
      Begin Routine:
        # initialize stimuli
        # during instruction, two stims are forced to be from different regions
        allow_same_region = False
        if has_finished_instruction:
            # in real trials, 2/3 allow same region
            # allow_same_region = random.random() < 2/3
            allow_same_region = False
        stim_region_ids_selected, stims_selected = stim_sampler.sample_for_trial(
            allow_same_region=allow_same_region)

        # initialize which to report
        # 0: to report only the first
        # 1: to report only the second
        # 2 or 3: to report both
        report_type_id = random.randint(0, 3)
        if not has_finished_instruction:
            report_type_id = block.thisN
        to_report_code = [True, True]
        if report_type_id == 0:
            to_report_code[1] = False
        elif report_type_id == 1:
            to_report_code[0] = False

        # define the color of cues
        color_codes = (1, 2)
        if random.random() < 0.5:
            color_codes = (2, 1)

        # place holder: to record the future response
        participant_responses = [None, None]

        # set where to display stimuli
        # eyetracking: all at the center
        stim_locs = [(0, 0), (0, 0)]
        # select response locations
        resp_locs = resp_location_sampler.sample_location(allow_location_swap)

        # set time limits
        ## total max time for response
        response_time = draw_response_time if response_mode == "draw" else click_response_time
        ## for display
        trial_display_time = display_time
        ## for delay
        delay_time = 4 # random.uniform(delay_time_min, delay_time_max)
        ## for response
        trial_resp_time = response_time * sum(to_report_code)
        # generate a reasonable range of ITI total duration
        total_duration_min = delay_time_min \
            + display_time + response_time * sum(to_report_code) * 0.5 + post_trial_time_min
        total_duration_max = delay_time_max \
            + display_time + response_time * sum(to_report_code) * 0.5 + post_trial_time_max * 0.5

        # make things slower for instruction
        slow_down_factor = 1.5
        if not has_finished_instruction:
            trial_display_time *= slow_down_factor
            display_cue_onset_time *= slow_down_factor
            trial_resp_time *= slow_down_factor

        # start the timer for the trial
        trial_timer = core.Clock()
      End JS Routine:
        // record data
        // record whether this is a practice trial and other misc
        psychoJS.experiment.addData('is_real_trial', has_finished_rehearsal);
        psychoJS.experiment.addData('sample_stage', stim_sampler.stage_idx);
        psychoJS.experiment.addData('block', stim_sampler.block_idx);

        // record the stimulip
        psychoJS.experiment.addData("stim_1", stims_selected[0]);
        psychoJS.experiment.addData("stim_2", stims_selected[1]);
        psychoJS.experiment.addData("stim_region_1", stim_region_ids_selected[0]);
        psychoJS.experiment.addData("stim_region_2", stim_region_ids_selected[1]);
        psychoJS.experiment.addData("stim_1_loc_x", stim_locs[0][0]);
        psychoJS.experiment.addData("stim_1_loc_y", stim_locs[0][1]);
        psychoJS.experiment.addData("stim_2_loc_x", stim_locs[1][0]);
        psychoJS.experiment.addData("stim_2_loc_y", stim_locs[1][1]);
        psychoJS.experiment.addData("stim_1_color", color_codes[0]);
        psychoJS.experiment.addData("stim_2_color", color_codes[1]);

        // record the trial type
        psychoJS.experiment.addData("mode", response_mode);
        psychoJS.experiment.addData("trial_code", trial_type);
        // record which is asked to report
        psychoJS.experiment.addData("stim_1_to_report", to_report_code[0]);
        psychoJS.experiment.addData("stim_2_to_report", to_report_code[1]);
        // record delay
        psychoJS.experiment.addData("delay_post_stim", delay_post_stim);
        psychoJS.experiment.addData("delay", delay_time);
        // record response position
        psychoJS.experiment.addData("resp_1_loc_x", resp_locs[0][0]);
        psychoJS.experiment.addData("resp_1_loc_y", resp_locs[0][1]);
        psychoJS.experiment.addData("resp_2_loc_x", resp_locs[1][0]);
        psychoJS.experiment.addData("resp_2_loc_y", resp_locs[1][1]);
        // record the strategy for stim generation
        psychoJS.experiment.addData('stim_sample_method', stim_sampler.strategy);
      End Routine:
        # record data
        # record whether this is a practice trial and other misc
        thisExp.addData('is_real_trial', has_finished_rehearsal)
        thisExp.addData('sample_stage', stim_sampler.stage_idx)
        thisExp.addData('block', stim_sampler.block_idx)

        ## record the stimuli
        thisExp.addData('stim_1', stims_selected[0])
        thisExp.addData('stim_2', stims_selected[1])
        thisExp.addData('stim_region_1', stim_region_ids_selected[0])
        thisExp.addData('stim_region_2', stim_region_ids_selected[1])
        thisExp.addData('stim_1_loc_x', stim_locs[0][0])
        thisExp.addData('stim_1_loc_y', stim_locs[0][1])
        thisExp.addData('stim_2_loc_x', stim_locs[1][0])
        thisExp.addData('stim_2_loc_y', stim_locs[1][1])
        thisExp.addData('stim_1_color', color_codes[0])
        thisExp.addData('stim_2_color', color_codes[1])

        ## record the trial type
        thisExp.addData('mode', response_mode)
        thisExp.addData('trial_code', trial_type)
        ## record which is asked to report
        thisExp.addData('stim_1_to_report', to_report_code[0])
        thisExp.addData('stim_2_to_report', to_report_code[1])
        ## record delay
        thisExp.addData('delay_post_stim', delay_post_stim)
        thisExp.addData('delay', delay_time)
        ## record response position
        thisExp.addData('resp_1_loc_x', resp_locs[0][0])
        thisExp.addData('resp_1_loc_y', resp_locs[0][1])
        thisExp.addData('resp_2_loc_x', resp_locs[1][0])
        thisExp.addData('resp_2_loc_y', resp_locs[1][1])
        ## record the strategy for stim generation
        thisExp.addData('stim_sample_method', stim_sampler.strategy)
    CodeComponent trlIDSetup
      Code Type = Auto->JS
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      Begin Routine:
        trlId = (expInfo['participant'],block.thisN, EYETRACK_real_block_id)
        thisExp.addData('TRIALID',trlId)
  Routine pre_trial
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    CodeComponent codePreTrial
      Code Type = Both
      Begin JS Routine:
        // create the fixation
        pre_fixation = new DefaultFixation(psychoJS.window);
      Begin Routine:
        # create the fixation
        pre_fixation = DefaultFixation(win)
      Each Frame:
        # end routine when time up
        if t > pre_trial_time:
            continueRoutine = False
      Each JS Frame:
        // end routine when time up
        if (t > pre_trial_time) {
            continueRoutine = false;
        }
      End JS Routine:
        pre_fixation.setAutoDraw(false);
        pre_fixation = null;
      End Routine:
        pre_fixation.setAutoDraw(False)
        pre_fixation = None
    TextComponent textPreTrial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent elRecord_fixation
      Code Type = Py
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      Begin Routine:
        this_epoch = 'fixation'
        aaa = core.monotonicClock.getTime
        thisExp.addData('fixationStart',str(aaa()))
        if eyetracking == 1:
            # get a reference to the currently active EyeLink connection
            el_tracker = pylink.getEYELINK()

            try:
                #start recording
                el_tracker.startRecording(1, 1, 1, 1)
                #send message to tracker to count trial number
                el_tracker.sendMessage('TRIALID %s' % str(trlId))
                el_tracker.sendMessage('fixationRest')
            except RuntimeError as error:
                print("ERROR:", error)
                abort_trial()
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('fixationEnd',str(aaa()))
  Routine display_stimuli
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    MouseComponent mouseStim
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = trial_display_time
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    CodeComponent codeDisplayStim
      Code Type = Both
      Begin JS Routine:
        objs_display = [];

        // hide the cursor

        // fetch the id of the stimulus
        let i = seq_display_loop.thisN;

        // now display the stimulus
        let ori = stims_selected[i];
        let loc = stim_locs[i];
        let stim_obj = funcDrawStim(psychoJS.window, ori, loc, patch_radius);
        objs_display.push(stim_obj);

        // dump the no delay condition

        // to detect whether a pressed has released
        has_released = true;

        // to mark if the cue has displayed
        has_cue_shown = false;

        // record mouse
        display_mouse_xs = [];
        display_mouse_ys = [];
      Begin Routine:
        objs_display = []

        # fetch the id of the stimulus
        i = seq_display_loop.thisN

        # now display the stimulus
        ori = stims_selected[i]
        loc = stim_locs[i]
        stim_obj = funcDrawStim(win, ori, loc, patch_radius)
        objs_display.append(stim_obj)

        # dump the no delay condition

        # to detect whether a pressed has released
        has_released = True

        # to mark if the cue has displayed
        has_cue_shown = False

        # record mouse
        display_mouse_xs = []
        display_mouse_ys = []
      Each Frame:
        # display the cue when onset
        if (not has_cue_shown) and t >= display_cue_onset_time:
            i = seq_display_loop.thisN
            cue_loc = stim_locs[i]
            cue_color = color_codes[i]
            report_cue = None
            cue_code = None
            if trial_type == 0 :
                # pre-cue
                cue_code = to_report_code[seq_display_loop.thisN]
            elif trial_type == 1:
                cue_code = True # remind them to remember it
            else:
                raise ValueError('Unknown trial type {trial_type}')
            report_cue = SingleCueObject(
                win, cue_loc, cue_code, patch_radius, cue_color)
            objs_display.append(report_cue)
            has_cue_shown = True

        # monitor mouse behavior
        mouse_position = mouseStim.getPos()
        display_mouse_xs.append(mouse_position[0])
        display_mouse_ys.append(mouse_position[1])

        # end routine when time up
        if t > trial_display_time:
            continueRoutine = False
      Each JS Frame:
        // check if we should start displaying the stimuli
        if (!has_cue_shown && t >= display_cue_onset_time) {
            let i = seq_display_loop.thisN;
            let cue_loc = stim_locs[i];
            let cue_color = color_codes[i];
            let report_cue = null;
            let cue_code = null;
            if (trial_type === 0) {
                // Pre-cue
                cue_code = to_report_code[seq_display_loop.thisN];
            } else if (trial_type === 1) {
                cue_code = true; // remember it!
            } else {
                throw new Error(`Unknown trial type ${trial_type}`);
            }
            report_cue = new SingleCueObject(
                psychoJS.window, cue_loc, cue_code, patch_radius, cue_color);
            objs_display.push(report_cue);
            has_cue_shown = true;

            // Additionally, for instruction purpose
            // Show the verbal cue
            if (!has_finished_instruction) {
                // If this is to report
                let sloc = stim_locs[i];
                let s_to_cue = false;
                if (trial_type === 1) {
                    // Post-cue: remember everything
                    s_to_cue = true;
                } else if (trial_type === 0) {
                    // Otherwise, only remember the cued
                    s_to_cue = to_report_code[i];
                }
                if (s_to_cue) {
                    let additional_cue = new TrainingCue(
                        psychoJS.window, 'remember this', sloc, patch_radius
                    );
                    objs_display.push(additional_cue);
                }
            }
        }

        // # monitor mouse behavior
        mouse_position = mouseStim.getPos();
        display_mouse_xs.push(mouse_position[0]);
        display_mouse_ys.push(mouse_position[1]);

        // end routine when time up
        if (t > trial_display_time) {
            continueRoutine = false;
        }
      End JS Routine:
        has_released = true;

        // record mouse position
        psychoJS.experiment.addData(`mouseStim.x_${seq_display_loop.thisN+1}`, display_mouse_xs);
        psychoJS.experiment.addData(`mouseStim.y_${seq_display_loop.thisN+1}`, display_mouse_ys);

        for (var i, _pj_c = 0, _pj_a = util.range(objs_display.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            let display_obj = objs_display[i];
            display_obj.setAutoDraw(false);
        }

        objs_display = [];
        response_objects = [];
      End Routine:
        # reset click recording
        has_released = True

        # record mouse position
        thisExp.addData(f'mouseStim.x_{seq_display_loop.thisN+1}', display_mouse_xs)
        thisExp.addData(f'mouseStim.y_{seq_display_loop.thisN+1}', display_mouse_ys)

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
        response_objects = []
    TextComponent textDisplayStim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = trial_display_time
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    CodeComponent elRecord_stim
      Code Type = Py
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      Begin Routine:
        this_epoch = 'stim'+str(seq_display_loop.thisN)

        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine delay
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    MouseComponent mouseDelay
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = delay_time
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    CodeComponent codeDelay
      Code Type = Both
      Before Experiment:
        def sample_n_from_trange(n, duration, min_space, tmin, tmax):
            result = []
            trange_start = tmin
            for i in range(n):
                trange_end = tmax- (n-i) * (min_space + duration)
                if trange_end <= trange_start:
                    # no more points available
                    continue
                sample = random.uniform(trange_start, trange_end)
                result.append(sample)
                trange_start = sample + min_space + duration
            return result
      Before JS Experiment:
        function sample_n_from_trange(n, duration, min_space, tmin, tmax) {
            let result = [];
            let trange_start = tmin;

            for (let i = 0; i < n; i++) {
                let trange_end = tmax - (n - i) * (min_space + duration);

                if (trange_end <= trange_start) {
                    // No more points available
                    continue;
                }

                let sample = Math.random() * (trange_end - trange_start) + trange_start;
                result.push(sample);
                trange_start = sample + min_space + duration;
            }

            return result;
        }
      Begin Experiment:
        n_max_cues = 0 # TO TUNE
        delay_cue_duration = 0.5
        delay_cue_space = 1 # TO TUNE
      Begin JS Experiment:
        n_max_cues = 0; // TO TUNE
        delay_cue_duration = 0.5;
        delay_cue_space = 1 // TO TUNE
      Begin JS Routine:
        incidental_cue = null;
        t_start_delay_cue = delay_time;
        t_end_delay_cue = delay_time;

        // Initialize the start of cues
        let n_cues = Math.floor(Math.random() * (n_max_cues + 1));
        tstarts = sample_n_from_trange(
            n_cues, delay_cue_duration,
            delay_cue_space,
            0, delay_time
        );

        // console.log(`delay: ${delay_time}, TSTARTS: ${tstarts}`);
        n_cue_to_show = tstarts.length;
        tindex = 0;

        // Initialize the stimulus they map to
        stim_ids = (Math.random() < 0.5) ? [0, 1] : [1, 0];
        stim_ids = stim_ids.slice(0, n_cue_to_show);
        // console.log(`stim ids ${stim_ids}`);

        // create fixation
        // fixation = new DefaultFixation(psychoJS.window);

        // record mouse
        long_delay_mouse_xs = [];
        long_delay_mouse_ys = [];
      Begin Routine:
        incidental_cue = None
        t_start_delay_cue = delay_time
        t_end_delay_cue = delay_time

        # initialize the start of cues
        n_cues = random.randint(0, n_max_cues)
        tstarts = sample_n_from_trange(
            n=n_cues, duration=delay_cue_duration,
            min_space=delay_cue_space,
            tmin=0, tmax=delay_time)
        # logging.log(level=logging.WARN, msg=f'delay: {delay_time}, TSTARTS: {tstarts}')
        n_cue_to_show = len(tstarts)
        tindex = 0

        # initialize the stimulus they map to
        stim_ids = [0, 1] if random.random() < 0.5 else [1, 0]
        stim_ids = stim_ids[0:n_cue_to_show]
        # logging.log(level=logging.WARN, msg=f'stim ids {stim_ids}')

        # create fixation
        # fixation = DefaultFixation(win)

        # record mouse
        long_delay_mouse_xs = []
        long_delay_mouse_ys = []
      Each Frame:
        # end routine when time up
        if t > delay_time:
            continueRoutine = False

        if (incidental_cue is not None) and (t > t_end_delay_cue):
            # time to kill the old cue
            incidental_cue.setAutoDraw(False)
            incidental_cue = None

        if n_cue_to_show > 0:
            # update time for the next
            t_start_delay_cue = tstarts[tindex]
            if t > t_start_delay_cue:
                # update the end time
                t_end_delay_cue = t_start_delay_cue + delay_cue_duration
                # logging.log(level=logging.WARN, msg=f'time: {t_start_delay_cue} -- {t_end_delay_cue}')

                # fetch stim information
                stim_id = stim_ids[tindex]
                # logging.log(level=logging.WARN, msg=f'stim id: {stim_id}')
                cue_code= to_report_code[stim_id] if trial_type == 0 else False
                cue_loc = stim_locs[stim_id]
                cue_color = color_codes[stim_id]
                # logging.log(level=logging.WARN, msg=f'stim info:  code {cue_code}, loc {cue_loc}, color {cue_color}')

                # create the cue
                incidental_cue = SingleCueObject(
                    win, cue_loc, cue_code, patch_radius, cue_color)

                # update stats
                tindex += 1
                n_cue_to_show -= 1

        # monitor mouse behavior
        mouse_position = mouseDelay.getPos()
        long_delay_mouse_xs.append(mouse_position[0])
        long_delay_mouse_ys.append(mouse_position[1])
      Each JS Frame:
        // End routine when time is up
        if (t > delay_time) {
            continueRoutine = false;
        }

        if ((incidental_cue !== null) && (t > t_end_delay_cue)) {
            // Time to remove the old cue
            incidental_cue.setAutoDraw(false);
            incidental_cue = null;
        }

        if (n_cue_to_show > 0) {
            // Update time for the next cue
            t_start_delay_cue = tstarts[tindex];
            if (t > t_start_delay_cue) {
                // Update the end time
                t_end_delay_cue = t_start_delay_cue + delay_cue_duration;
                // console.log(`time: ${t_start_delay_cue} -- ${t_end_delay_cue}`);

                // Fetch stimulus information
                let stim_id = stim_ids[tindex];
                // console.log(`stim id: ${stim_id}`);
                let cue_code = (trial_type === 0) ? to_report_code[stim_id] : false;
                let cue_loc = stim_locs[stim_id];
                let cue_color = color_codes[stim_id];
                // console.log(`stim info: code ${cue_code}, loc ${cue_loc}, color ${cue_color}`);

                // Create the cue
                incidental_cue = new SingleCueObject(
                    psychoJS.window, cue_loc, cue_code, patch_radius, cue_color
                );

                // Update statistics
                tindex += 1;
                n_cue_to_show -= 1;
            }
        }

        // monitor mouse behavior
        mouse_position = mouseDelay.getPos();
        long_delay_mouse_xs.push(mouse_position[0]);
        long_delay_mouse_ys.push(mouse_position[1]);
      End JS Routine:
        if (incidental_cue !== null) {
            incidental_cue.setAutoDraw(false);
            incidental_cue = null;
        }

        // remove the fixation
        // fixation.setAutoDraw(false);

        psychoJS.experiment.addData("inci_cue_time", tstarts);
        psychoJS.experiment.addData("inci_cue_ids", stim_ids);

        // record mouse position
        psychoJS.experiment.addData(`mouseDelay.x_${seq_display_loop.thisN+1}`, long_delay_mouse_xs);
        psychoJS.experiment.addData(`mouseDelay.y_${seq_display_loop.thisN+1}`, long_delay_mouse_ys);

        // shwo the cursor
        psychoJS.window.mouseVisible = true;
      End Routine:
        if incidental_cue is not None:
            incidental_cue.setAutoDraw(False)
            incidental_cue = None

        # remove the fixation
        # fixation.setAutoDraw(False)

        thisExp.addData('inci_cue_time', tstarts)
        thisExp.addData('inci_cue_ids', stim_ids)

        # record mouse position
        thisExp.addData(f'mouseDelay.x_{seq_display_loop.thisN+1}', long_delay_mouse_xs)
        thisExp.addData(f'mouseDelay.y_{seq_display_loop.thisN+1}', long_delay_mouse_ys)

        # show the cursor
        win.mouseVisible = True
    TextComponent textDelay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent elRecord_delay
      Code Type = Py
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      Begin Routine:
        this_epoch = 'delay'

        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine response
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    CodeComponent codeDelayResp
      Code Type = Both
      Begin Routine:
        objs_display = []
        response_objects = []
        for i in range(2):
            loc = resp_locs[i]
            to_report = to_report_code[i]
            response_obj = None
            if response_mode == 'click':
                response_obj = funcDrawAdjustResponse(
                    win, loc, patch_radius, click_radius, to_report)
            elif response_mode == 'draw':
                response_obj = funcDrawDrawResponse(
                    win, loc, patch_radius, to_report)
            else:
                raise NotImplementedError(f'Unknown response mode: {response_mode}')
            objs_display.append(response_obj)
            response_objects.append(response_obj)

            # give order color cue
            if to_report: # only if its valid region
                report_cue = SingleCueObject(
                    win, loc, 99, patch_radius*0.6, color_codes[i])
                objs_display.append(report_cue)

            # give cues for instruction
            if not has_finished_instruction:
                if to_report:
                    additional_cue = TrainingCue(
                        win, 'report here',
                        loc, patch_radius)
                    objs_display.append(additional_cue)

        # to add the confirm button
        continue_button = None
        if len(response_objects) > 0:
            # loc_x = (resp_locs[0][0] + resp_locs[1][0]) / 2
            # loc_y = (resp_locs[0][1] + resp_locs[1][1]) / 2
            continue_button = funcCreateButton(
                win, 'continue', pos=(0, 0),
                size=(button_width*1.3, button_height*1.3))
            objs_display.append(continue_button)

        # to detect whether a pressed has released
        has_released = True
      Each Frame:
        # read mouse click
        if len(response_objects) > 0:
            # if there are objects clicked
            left_button = responseMouse.getPressed()[0]
            mouse_position = responseMouse.getPos()
            mouse_time = t
            if left_button:
                if continue_button.contains(mouse_position):
                    # first check if it's over the continue button
                    no_pending = funcCheckNoPending(response_objects)
                    if no_pending:
                        continueRoutine = False
                else:
                    if response_mode == 'click':
                        # only register the first click
                        if has_released:
                            # this is a new press, register it
                            has_released = False
                            # otherwise, ignore it
                            for i in range(len(response_objects)):
                                # update each position with the click
                                resp_obj = response_objects[i]
                                resp_obj.register_click(mouse_position, mouse_time)
                    elif response_mode == 'draw':
                        # register all mouse movements
                        has_released = False
                        for i in range(len(response_objects)):
                            # update each position with the click
                            resp_obj = response_objects[i]
                            has_redo = resp_obj.register_mouse(
                                mouse_position, mouse_time)
                            # update the time limit
                            if has_redo:
                                trial_resp_time += response_time
                                # trial_display_time = t + response_time
            else:
                # check if we should update has_released
                has_released = True
                if response_mode == 'draw':
                    for i in range(len(response_objects)):
                        # update each position with the click
                        resp_obj = response_objects[i]
                        resp_obj.deregister_mouse(mouse_position, mouse_time)

            # register click on space
            key_inputs = keyRespInput.getKeys(clear=True)
            if 'space' in key_inputs:
                # check if all required response is there
                no_pending = funcCheckNoPending(response_objects)
                if no_pending:
                    continueRoutine = False

        if enforce_response_time_limit and (t > trial_resp_time):
            continueRoutine = False
      Each JS Frame:
        if (response_objects.length > 0) {
            let left_button = responseMouse.getPressed()[0];
            let mouse_position = responseMouse.getPos();
            let mouse_time = t;
            if (left_button) {
                if (continue_button.contains(mouse_position)) {
                    let no_pending = funcCheckNoPending(response_objects);
                    if (no_pending) {
                        continueRoutine = false;
                    }
                } else {
                    if ((response_mode === "click")) {
                        if (has_released) {
                            has_released = false;
                            for (var i, _pj_c = 0, _pj_a = util.range(response_objects.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                                i = _pj_a[_pj_c];
                                let resp_obj = response_objects[i];
                                resp_obj.register_click(mouse_position, mouse_time);
                            }
                        }
                    } else {
                        if ((response_mode === "draw")) {
                            has_released = false;
                            for (var i, _pj_c = 0, _pj_a = util.range(response_objects.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                                i = _pj_a[_pj_c];
                                let resp_obj = response_objects[i];
                                let has_redo = resp_obj.register_mouse(
                                    mouse_position, mouse_time);
                                // # update the time limit
                                if (has_redo) {
                                    trial_resp_time += response_time;
                                    // trial_display_time = t + response_time;
                                }
                            }
                        }
                    }
                }
            } else {
                has_released = true;
                if ((response_mode === "draw")) {
                    for (var i, _pj_c = 0, _pj_a = util.range(response_objects.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                        i = _pj_a[_pj_c];
                        let resp_obj = response_objects[i];
                        resp_obj.deregister_mouse(mouse_position, mouse_time);
                    }
                }
            }

            // check if we have hit space
            let key_inputs = keyRespInput.getKeys({"keyList": ['space'], "waitRelease": false, "clear": true});
            if (key_inputs.length > 0) {
                // space has been pressed
                let no_pending = funcCheckNoPending(response_objects);
                if (no_pending) {
                    continueRoutine = false;
                }
            }
        }

        // end routine when time up
        if (enforce_response_time_limit && (t > trial_resp_time)) {
            continueRoutine = false;
        }
      End JS Routine:
        has_released = true;
        if (response_objects.length > 0) {
            let resp_obj_id = 0;
            for (var i, _pj_c = 0, _pj_a = util.range(2), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                let to_report = to_report_code[i];
                let resp_x_to_record = [];
                let resp_y_to_record = [];
                let resp_time_to_record = [];
                let resp_has_invalid = false;
                if (to_report) {
                    // let resp_obj = response_objects[resp_obj_id];
                    let resp_obj = response_objects[i];
                    if ((response_mode === "click")) {
                        resp_x_to_record = resp_obj.clicks_x;
                        resp_y_to_record = resp_obj.clicks_y;
                        resp_time_to_record = resp_obj.clicks_time;
                    } else {
                        if ((response_mode === "draw")) {
                            // save the stroke
                            if (resp_obj.has_unsaved_stroke) {
                                resp_obj.save_stroke();
                            }
                            // save the drawings
                            if (resp_obj.has_unsaved_drawing) {
                                resp_obj.save_drawing();
                            }
                            resp_x_to_record = resp_obj.all_drawings_x;
                            resp_y_to_record = resp_obj.all_drawings_y;
                            resp_time_to_record = resp_obj.all_drawings_time;
                        }
                    }

                    // Approximate the response
                    // If it's not null, compute the error and add it to the records
                    let resp_approximated = resp_obj.compute_response();
                    if (resp_approximated !== null) {
                        let ground_truth = stims_selected[i];
                        let error_approximated = funcComputeOriDiff(resp_approximated, ground_truth);
                        block_error_records.push(error_approximated);
                    } else {
                        // Record cases with no response
                        block_error_records.push(null);
                    }

                    // Record the response for feedback
                    participant_responses[i] = resp_approximated;
                    if (!has_finished_rehearsal && response_mode === 'draw') {
                        // Save the last drawings to display later
                        let original_drawing = null;
                        if (resp_approximated !== null) {
                            original_drawing = [
                                resp_obj.all_drawings_x[resp_obj.all_drawings_x.length - 1],
                                resp_obj.all_drawings_y[resp_obj.all_drawings_y.length - 1]];
                        }
                        participant_responses[i] = original_drawing;
                    }

                    resp_obj_id += 1;
                } else {
                    let resp_obj = response_objects[i];
                    if (resp_obj.has_response) {
                        resp_has_invalid = true;
                    }
                }
                psychoJS.experiment.addData(`resp_${(i + 1)}_x`, resp_x_to_record);
                psychoJS.experiment.addData(`resp_${(i + 1)}_y`, resp_y_to_record);
                psychoJS.experiment.addData(`resp_${(i + 1)}_time`, resp_time_to_record);
                psychoJS.experiment.addData(`resp_${(i + 1)}_invalid`, resp_has_invalid);
            }
        }
        for (var i, _pj_c = 0, _pj_a = util.range(objs_display.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            let display_obj = objs_display[i];
            display_obj.setAutoDraw(false);
        }

        objs_display = [];
        response_objects = [];

        // hide the cursor
        psychoJS.window.mouseVisible = false;
      End Routine:
        # reset click recording
        has_released = True

        # record responses, if no-delay
        if len(response_objects) > 0:
            resp_obj_id = 0
            for i in range(2):
                to_report = to_report_code[i]
                resp_x_to_record = []
                resp_y_to_record = []
                resp_time_to_record = []
                resp_has_invalid = False
                if to_report:
                    # resp_obj = response_objects[resp_obj_id]
                    resp_obj = response_objects[i]
                    if response_mode == 'click':
                        resp_x_to_record = resp_obj.clicks_x
                        resp_y_to_record = resp_obj.clicks_y
                        resp_time_to_record = resp_obj.clicks_time
                    elif response_mode == 'draw':
                        # save the stroke
                        if resp_obj.has_unsaved_stroke:
                            resp_obj.save_stroke()
                        # saving drawings (if there are unsaved)
                        if resp_obj.has_unsaved_drawing:
                            resp_obj.save_drawing()
                        resp_x_to_record = resp_obj.all_drawings_x
                        resp_y_to_record = resp_obj.all_drawings_y
                        resp_time_to_record = resp_obj.all_drawings_time

                    # approximate the response
                    # if it's not none, compute the error and add to records
                    resp_approximated = resp_obj.compute_response()
                    if resp_approximated is not None:
                        ground_truth = stims_selected[i]
                        error_approximated = funcComputeOriDiff(resp_approximated, ground_truth)
                        block_error_records.append(error_approximated)
                    else:
                        # record those no response
                        block_error_records.append(None)

                    # record the response for feedback
                    participant_responses[i] = resp_approximated
                    if not has_finished_rehearsal and response_mode == 'draw':
                        # save the last drawings to display later
                        original_drawing = None
                        if resp_approximated is not None:
                            original_drawing = (
                                resp_obj.all_drawings_x[-1],
                                resp_obj.all_drawings_y[-1])
                        participant_responses[i] = original_drawing

                    resp_obj_id += 1

                else:
                    resp_obj = response_objects[i]
                    if resp_obj.has_response:
                        resp_has_invalid = True

                thisExp.addData(f'resp_{i+1}_x', resp_x_to_record)
                thisExp.addData(f'resp_{i+1}_y', resp_y_to_record)
                thisExp.addData(f'resp_{i+1}_time', resp_time_to_record)
                thisExp.addData(f'resp_{i+1}_invalid', resp_has_invalid)

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
        response_objects = []

        # hide the cursor
        win.mouseVisible = False
    MouseComponent responseMouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent keyRespInput
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent elRecord_rsp
      Code Type = Py
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      Begin Routine:
        this_epoch = 'rsp'

        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
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
  Routine post_trial
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    CodeComponent codePostTrial
      Code Type = Both
      Begin JS Experiment:
        post_trial_time = 0;
      Begin JS Routine:
        let trial_time_elapsed = trial_timer.getTime();
        trial_timer = null;
        post_trial_time = funcRandomUniform(post_trial_time_min, post_trial_time_max);
      Begin Routine:
        # get time elapsed
        trial_time_elapsed = trial_timer.getTime()
        trial_timer = None

        # set ITI
        post_trial_time = random.uniform(
            post_trial_time_min, post_trial_time_max)
      End JS Routine:
        psychoJS.experiment.addData("ITI", post_trial_time);
      End Routine:
        ## record ITI
        thisExp.addData('ITI', post_trial_time)
    TextComponent textPostTrial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = post_trial_time
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    CodeComponent elRecord_iti
      Code Type = Auto->JS
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      Begin Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('itiStart',str(aaa()))
        this_epoch = 'ITI'

        if eyetracking == 1:
            el_tracker.sendMessage('ITI')
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('itiEnd',str(aaa()))
        if eyetracking == 1:

            el_tracker.sendMessage('trialEnd')
            el_tracker.sendMessage('!V TRIAL_VAR TRIALID %s'% str(trlId))
            el_tracker.stopRecording()
  Routine block_feedback
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    CodeComponent codeBlockFeedback
      Code Type = Both
      Before Experiment:
        def check_block_quality(errors):
            ERR_THRESHOLD = 30 # 20
            ACC_THRESHOLD = 0.5 # 0.55
            MISS_THRESHOLD = 0.2 # 0.15

            n_total = len(errors)
            n_hit = 0
            n_miss = 0
            for i in range(n_total):
                err = errors[i]
                if err is None:
                    n_miss += 1
                elif abs(err) <= ERR_THRESHOLD:
                    n_hit += 1
            pass_hit_check = (n_hit / n_total) >= ACC_THRESHOLD
            pass_miss_check = (n_miss / n_total) <= MISS_THRESHOLD
            return pass_hit_check and pass_miss_check
      Before JS Experiment:
        function check_block_quality(errors) {
            let ERR_THRESHOLD = 30; // 20;
            let ACC_THRESHOLD = 0.5; // 0.55;
            let MISS_THRESHOLD = 0.2; // 0.15;

            let n_total = errors.length;
            let n_hit = 0;
            let n_miss = 0;

            for (let i = 0; i < n_total; i++) {
                let err = errors[i];
                if (err === null) {
                    n_miss++;
                } else if (Math.abs(err) <= ERR_THRESHOLD) {
                    n_hit++;
                }
            }

            let pass_hit_check = (n_hit / n_total) >= ACC_THRESHOLD;
            let pass_miss_check = (n_miss / n_total) <= MISS_THRESHOLD;

            return pass_hit_check && pass_miss_check;
        }
      Begin Experiment:
        # create functions for stats of errors
        # within 10 degrees
        # within 30 degrees
        # no response
        def count_errors(errors):
            n_datapoint = len(errors)

            # for empty set
            if n_datapoint == 0:
                return 0, 0, 0
            n_err_5 = 0
            n_err_10 = 0
            n_err_30 = 0
            n_err_none = 0
            for i in range(n_datapoint):
                err = errors[i]
                if err is None:
                    n_err_none += 1
                else:
                    abs_err = abs(err)
                    if abs_err <= 5:
                        n_err_5 += 1
                    if abs_err <= 10:
                        n_err_10 += 1
                    if abs_err <= 30:
                        n_err_30 += 1
            return n_err_5 / n_datapoint, n_err_10 / n_datapoint, \
                n_err_30 / n_datapoint, n_err_none / n_datapoint
        funcCountErrrors = count_errors

        def create_freq_bar(freq_data, window, pos, size, color, text):
            bar_x = pos[0]
            bar_y = pos[1]
            bar_width = size[0]
            bar_height = size[1]
            objs = []

            left_bar = None
            if freq_data > 0:
                left_bar_width = bar_width * freq_data
                left_bar_x = bar_x - (bar_width - left_bar_width) / 2
                left_bar = visual.Rect(window,
                    size=(left_bar_width, bar_height),
                    pos=(left_bar_x, bar_y),
                    fillColor=color, lineColor='white')
                left_bar.setAutoDraw(True)
                objs.append(left_bar)

            # right bar
            right_bar = None
            if freq_data < 1:
                right_bar_width = bar_width * (1 - freq_data)
                right_bar_x = bar_x + (bar_width - right_bar_width) / 2
                right_bar = visual.Rect(window,
                    size=(right_bar_width, bar_height),
                    pos=(right_bar_x, bar_y),
                    fillColor='white', lineColor='white')
                right_bar.setAutoDraw(True)
                objs.append(right_bar)

            # add annotation
            text_x = -0.4
            text_y = bar_y
            annot_text = visual.TextStim(
                window, text, pos=(text_x, text_y),
                height=bar_height*0.5,
                color='black', colorSpace='rgb')
            annot_text.setAutoDraw(True)
            objs.append(annot_text)
            return objs
        funcCreateFreqBar = create_freq_bar

        # to draw all stats
        def plot_stats(error_stats, window):
            bar_x = 0.3
            bar_width = 0.6
            bar_height = 0.08
            feedback_display_objects = []

            # plot error < 5
            freq5 = error_stats[0]
            freq5_y = 0.2
            freq5_objects = funcCreateFreqBar(
                freq5, window, (bar_x, freq5_y),
                (bar_width, bar_height), 'blue'
                , f"Minor discrepancies: {freq5:.0%}"
            )
            feedback_display_objects += freq5_objects

            # plot error < 10
            freq10 = error_stats[1]
            freq10_y = 0.05
            freq10_objects = funcCreateFreqBar(
                freq10, window,
                [bar_x, freq10_y],
                [bar_width, bar_height], 'blue'
                , f"Errors within a moderate range: {freq10:.0%}"
            )
            feedback_display_objects += freq10_objects

            # plot error < 30
            freq30 = error_stats[2]
            freq30_y = - 0.1
            freq30_objects = funcCreateFreqBar(
                freq30, window,
                [bar_x, freq30_y],
                [bar_width, bar_height], 'blue'
                , f"Acceptable level of error: {freq30:.0%}"
            )
            feedback_display_objects += freq30_objects

            # plot has response
            freq_noresp = error_stats[3]
            freq_noresp_y = - 0.25
            freq_noresp_objects = funcCreateFreqBar(
                freq_noresp, window,
                [bar_x, freq_noresp_y],
                [bar_width, bar_height], 'red'
                , f'no response: {freq_noresp:.0%}'
            )
            feedback_display_objects += freq_noresp_objects
            return feedback_display_objects
        funcPlotStats = plot_stats
      Begin JS Experiment:
        function count_errors(errors) {
            var abs_err, err, n_datapoint, n_err_10, n_err_30, n_err_5, n_err_none;
            n_datapoint = errors.length;
            if ((n_datapoint === 0)) {
                return [0, 0, 0];
            }
            n_err_5 = 0;
            n_err_10 = 0;
            n_err_30 = 0;
            n_err_none = 0;
            for (var i, _pj_c = 0, _pj_a = util.range(n_datapoint), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                err = errors[i];
                if ((err === null)) {
                    n_err_none += 1;
                } else {
                    abs_err = Math.abs(err);
                    if ((abs_err <= 5)) {
                        n_err_5 += 1;
                    }
                    if ((abs_err <= 10)) {
                        n_err_10 += 1;
                    }
                    if ((abs_err <= 30)) {
                        n_err_30 += 1;
                    }
                }
            }
            return [(n_err_5 / n_datapoint), (n_err_10 / n_datapoint), (n_err_30 / n_datapoint), (n_err_none / n_datapoint)];
        }
        funcCountErrrors = count_errors;

        function create_freq_bar(freq_data, window, bar_pos, bar_size, color, text) {
            var annot_text, bar_height, bar_width, bar_x, bar_y, left_bar, left_bar_width, left_bar_x, objs, right_bar, right_bar_width, right_bar_x, text_x, text_y;
            bar_x = bar_pos[0];
            bar_y = bar_pos[1];
            bar_width = bar_size[0];
            bar_height = bar_size[1];
            objs = [];
            left_bar = null;
            if ((freq_data > 0)) {
                left_bar_width = (bar_width * freq_data);
                left_bar_x = (bar_x - ((bar_width - left_bar_width) / 2));
                left_bar = new visual.Rect({
                    "win": window, "size": [left_bar_width*2, bar_height*2],
                    "pos": [left_bar_x, bar_y],
                    "fillColor": color, "lineColor": "white"});
                left_bar.setAutoDraw(true);
                objs.push(left_bar);
            }
            right_bar = null;
            if ((freq_data < 1)) {
                right_bar_width = (bar_width * (1 - freq_data));
                right_bar_x = (bar_x + ((bar_width - right_bar_width) / 2));
                right_bar = new visual.Rect({
                    "win": window, "size": [right_bar_width*2, bar_height*2],
                    "pos": [right_bar_x, bar_y],
                    "fillColor": "white", "lineColor": "white"});
                right_bar.setAutoDraw(true);
                objs.push(right_bar);
            }
            text_x = (- 0.4);
            text_y = bar_y;
            annot_text = new visual.TextStim({
                "win": window, "text": text,
                "pos": [text_x, text_y], "height": (bar_height * 0.5),
                "color": "black", "colorSpace": "rgb"});
            annot_text.setAutoDraw(true);
            objs.push(annot_text);
            return objs;
        }
        funcCreateFreqBar = create_freq_bar;
        function plot_stats(error_stats, window) {
            var bar_height, bar_width, bar_x, feedback_display_objects, freq10, freq10_objects, freq10_y, freq30, freq30_objects, freq30_y, freq5, freq5_objects, freq5_y, freq_noresp, freq_noresp_objects, freq_noresp_y, title_text;
            bar_x = 0.3;
            bar_width = 0.6;
            bar_height = 0.08;
            feedback_display_objects = [];

            // plot error < 5
            freq5 = error_stats[0];
            freq5_y = 0.2;
            freq5_objects = funcCreateFreqBar(
                freq5, window, [bar_x, freq5_y], [bar_width, bar_height], "blue",
                "Minor discrepancies: "+ Math.round(freq5 * 100) + "%");
            feedback_display_objects = feedback_display_objects.concat(freq5_objects);
            freq10 = error_stats[1];

            // plot error < 10
            freq10_y = 0.05;
            freq10_objects = funcCreateFreqBar(
                freq10, window, [bar_x, freq10_y], [bar_width, bar_height], "blue",
                "Errors within a moderate range: "+ Math.round(freq10 * 100) + "%");
            feedback_display_objects = feedback_display_objects.concat(freq10_objects);

            // plot error < 30
            freq30 = error_stats[2];
            freq30_y = -0.1;
            freq30_objects = funcCreateFreqBar(
                freq30, window, [bar_x, freq30_y], [bar_width, bar_height], "blue",
                "Acceptable level of error: "+ Math.round(freq30 * 100) + "%");
            feedback_display_objects = feedback_display_objects.concat(freq30_objects);

            // plot has response
            freq_noresp = error_stats[3];
            freq_noresp_y = -0.25;
            freq_noresp_objects = funcCreateFreqBar(
                freq_noresp, window, [bar_x, freq_noresp_y], [bar_width, bar_height], "red",
                "no response: "+ Math.round(freq_noresp * 100)+ "%");
            feedback_display_objects = feedback_display_objects.concat(freq_noresp_objects);
            return feedback_display_objects;
        }
        funcPlotStats = plot_stats;
      Begin JS Routine:
        // shwo the cursor
        psychoJS.window.mouseVisible = true;

        block_error_stats = funcCountErrrors(block_error_records);
        display_objects = funcPlotStats(block_error_stats, psychoJS.window);

        // flag
        to_terminate_stage = false;

        // add the buttons
        continue_button = null;
        repeat_button = null;
        has_passed_qc = false;

        if (has_finished_instruction && !has_finished_rehearsal) {
            // still practicing
            has_passed_qc = check_block_quality(block_error_records);
            has_ever_passed_qc = has_ever_passed_qc || has_passed_qc;
            if (stim_sampler.block_idx < block_to_run_each_stage) {
                // if haven't hit max trial numbers
                if (has_passed_qc) {
                    // if one pass the qc, allowed to move on to real trials
                    repeat_button = funcCreateButton(
                        psychoJS.window, 'practice again',
                        [-0.2, -0.42], [0.35, 0.1]);
                    display_objects.push(repeat_button);

                    continue_button = funcCreateButton(
                        psychoJS.window, 'continue',
                        [0.2, -0.42], [0.35, 0.1]);
                    display_objects.push(continue_button);

                    // set the text
                    textBlockFeedback.setText(
                        'Good! Press [continue] to start real trials \n' +
                        'or [practice again] to start another practice');
                } else {
                    repeat_button = funcCreateButton(
                        psychoJS.window, 'practice again',
                        [0, -0.42], [0.35, 0.1]);
                    display_objects.push(repeat_button);
                    textBlockFeedback.setText(
                        'You need more practice before starting the real trials.\n' +
                        'Press [practice again] to start another practice'
                    );
                }
            }
        }

        if (repeat_button === null && continue_button === null) {
            // other csses
            console.log('no problem comparing null');
            continue_button = funcCreateButton(
                psychoJS.window, 'continue',
                [0, -0.42], [0.35, 0.1]);
            display_objects.push(continue_button);
            textBlockFeedback.setText(
                'Your performance in this block.\n' +
                'Press [continue] to continue'
            );
        }
      Begin Routine:
        # show the cursor
        win.mouseVisible = True

        block_error_stats = funcCountErrrors(block_error_records)
        display_objects = funcPlotStats(block_error_stats, win)

        # flag
        to_terminate_stage = False

        # add the buttons
        continue_button = None
        repeat_button = None
        has_passed_qc = False

        if has_finished_instruction and not has_finished_rehearsal:
            # still practicing
            has_passed_qc = check_block_quality(block_error_records)
            has_ever_passed_qc = has_ever_passed_qc or has_passed_qc
            if block_stage.thisN < block_to_run_each_stage:
                # if haven't hit max trial numbers
                if has_passed_qc:
                    # if one pass the qc, allowed to move on to real trials
                    repeat_button = funcCreateButton(
                        win, 'practice again', pos=(-0.2,-0.42),
                        size=(0.35, 0.1))
                    display_objects.append(repeat_button)

                    continue_button = funcCreateButton(
                        win, 'continue', pos=(0.2,-0.42),
                        size=(0.35, 0.1))
                    display_objects.append(continue_button)

                    # set the text
                    textBlockFeedback.setText(
                        'Good! Press [continue] to start real trials \n'+
                        'or [practice again] to start another practice')
                else:
                    repeat_button = funcCreateButton(
                        win, 'practice again', pos=(0,-0.42),
                        size=(0.35, 0.1))
                    display_objects.append(repeat_button)
                    textBlockFeedback.setText(
                        'You need more practice before starting the real trials.\n'+
                        'Press [practice again] to start another practice')

        if repeat_button is None and continue_button is None:
            # other cases
            continue_button = funcCreateButton(
                win, 'continue', pos=(0, -0.42),
                size=(0.35, 0.1))
            display_objects.append(continue_button)
            textBlockFeedback.setText(
                'Your performance in this block.\n'+
                'Press [continue] to continue')
      Each Frame:
        left_button = blockFeedbackMouse.getPressed()[0]
        mouse_position = blockFeedbackMouse.getPos()

        if left_button and (t > 0.5):
            if repeat_button is not None:
                if repeat_button.contains(mouse_position):
                    # to repeat is just to continue
                    continueRoutine = False
                elif continue_button is not None:
                    if continue_button.contains(mouse_position):
                        # confirm stop practicing
                        if has_finished_instruction and not has_finished_rehearsal:
                            to_terminate_stage = True
                        continueRoutine = False
            else: # there must exist a continue button
                if continue_button.contains(mouse_position):
                    # to repeat is just to continue
                    continueRoutine = False
      Each JS Frame:
        let left_button = blockFeedbackMouse.getPressed()[0];
        let mouse_position = blockFeedbackMouse.getPos();
        if (left_button && (t > 0.5)) {
            if (repeat_button !== null) {
                if (repeat_button.contains(mouse_position)) {
                    // to repeat is just to continue
                    continueRoutine = false;
                } else if (continue_button !== null) {
                    if (continue_button.contains(mouse_position)) {
                        // confirm stop practicing
                        if (has_finished_instruction && !has_finished_rehearsal) {
                            to_terminate_stage = true;
                        }
                        continueRoutine = false;
                    }
                }
            } else { // there must exist a continue button
                if (continue_button.contains(mouse_position)) {
                    // to repeat is just to continue
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        let n_display_objects = display_objects.length;
        for (var i = 0; i < n_display_objects; i++) {
            let disp_obj = display_objects[i];
            disp_obj.setAutoDraw(false);
        }
        display_objects = [];

        if (to_terminate_stage) {
            block_stage.finished = true;
        }
      End Routine:
        # remove all objects
        n_display_objects = len(display_objects)
        for i in range(n_display_objects):
            disp_obj = display_objects[i]
            disp_obj.setAutoDraw(False)
        display_objects = []

        if to_terminate_stage:
            block_stage.finished = True
    TextComponent textBlockFeedback
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent blockFeedbackMouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine prepare_block
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    CodeComponent codePrepareBlock
      Code Type = Both
      Begin Experiment:
        block_instruction = ''
        continue_button = None
      Begin JS Experiment:
        block_instruction = '';
        continue_button = null;
      Begin Routine:
        block_instruction = ''
        block_idx = block_stage.thisN
        real_block_id = sub_sample_stage_loop.thisN * n_blocks_each_subtype + block_idx
        display_block_idx = real_block_id + 1

        block_instruction = "Block " + str(display_block_idx) + "/" + str(n_blocks_each_subtask) + ".\n\n"
        block_instruction += "This block consists of " + str(n_trials_each_block) + " trials. "
        block_instruction += "You can get feedback about your performance and take a short break after completing this block.\n\n"

        # initialize sampler
        stim_sampler.initialize_block()

        # set the text
        textPrepareBlock.setText(block_instruction)

        # add the button to continue
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])

        # keep track of errors
        block_error_records = []

        # block id for eye tracker
        EYETRACK_real_block_id = EYETRACK_real_stage_id * n_blocks_each_subtype + block_idx
      Each Frame:
        left_button = mousePrepareBlock.getPressed()[0]
        mouse_position = mousePrepareBlock.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      Each JS Frame:
        left_button = mousePrepareBlock.getPressed()[0];
        mouse_position = mousePrepareBlock.getPos();
        if (left_button && (t > 0.5) && continue_button.contains(mouse_position)) {
            continueRoutine = false;
        }
      End JS Routine:
        continue_button.setAutoDraw(false);
        continue_button = null;

        // hide the cursor
        psychoJS.window.mouseVisible = false;
      End Routine:
        continue_button.setAutoDraw(False)
        continue_button = None

        # hide the cursor
        win.mouseVisible = False
    TextComponent textPrepareBlock
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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    MouseComponent mousePrepareBlock
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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
  Routine prepareTaskPhase
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    CodeComponent codePrepareTaskPhase
      Code Type = Both
      Begin Routine:
        # set the trial to run
        has_finished_instruction = True # old-ver compatible
        has_finished_rehearsal = True # old-ver compatible

        # trial_type already defined
        # response mode need to be updated
        response_mode = mode_type_list[ActualTaskLoop.thisN]

        # check sampling methods
        # the order of sampling strategies
        sampling_type_list = random.sample(sampling_strategies_allowed, n_sampling_strategies_allowed)
        stim_sampler = StimSamplingScheduler(n_ori_regions, sampling_type_list)

        # create the continue button
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])

        # record phase id for eyetracker
        EYETRACK_task_mode_phase_id = TasktypeLoop.thisN * n_response_modes_allowed + ActualTaskLoop.thisN
      Each Frame:
        left_button = mousePrepareTaskPhase.getPressed()[0]
        mouse_position = mousePrepareTaskPhase.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      End Routine:
        continue_button.setAutoDraw(False)
        continue_button = None
    MouseComponent mousePrepareTaskPhase
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent textPrepareTaskPhase
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Now the following are ACTUAL trials,\n where you need to ' + response_mode + ' to report your answer.\n For this part, you need to complete ' + str(n_blocks_each_subtask) + ' blocks,\n each consists of ' + str(n_trials_each_block) + ' trials.'   
      wrapWidth = 1.3
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
  Routine prepareSubSampleStage
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    CodeComponent codePrepareSubSampleStage
      Code Type = Both
      Begin Routine:
        stim_sampler.initialize_stage()

        # for eye tracker
        EYETRACK_real_stage_id = EYETRACK_task_mode_phase_id * n_sampling_strategies_allowed + sub_sample_stage_loop.thisN
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
  Routine delayAfterStim
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    MouseComponent mousePostStim
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = delay_post_stim
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    CodeComponent codeDelayAfterStim
      Code Type = Both
      Begin JS Routine:
        objs_display = [];
        has_noise_patch_displaying = false;
        // decide whether to display noise patch
        to_display_noise_patch = Math.random() < noise_patch_display_chance;
        if (to_display_noise_patch) {
            let loc = stim_locs[seq_display_loop.thisN];
            stim_obj = new NoisePatch(psychoJS.window, loc, patch_radius);
            objs_display.push(stim_obj);
            has_noise_patch_displaying = true;
        }

        // record mouse
        post_display_mouse_xs = [];
        post_display_mouse_ys = [];
      Begin Routine:
        objs_display = []
        has_noise_patch_displaying = False
        # decide whether to display noise patch
        to_display_noise_patch =  random.random() < noise_patch_display_chance
        if to_display_noise_patch:
            loc = stim_locs[seq_display_loop.thisN]
            stim_obj = NoisePatch(win, loc, patch_radius)
            objs_display.append(stim_obj)
            has_noise_patch_displaying = True

        # record mouse
        post_display_mouse_xs = []
        post_display_mouse_ys = []
      Each Frame:
        # end routine when time up
        if t > delay_post_stim:
            continueRoutine = False

        # stop displaying all noise patches
        if has_noise_patch_displaying:
            if t > noise_patch_display_time:
                for i in range(len(objs_display)):
                    display_obj = objs_display[i]
                    display_obj.setAutoDraw(False)
                has_noise_patch_displaying = False

                # display the fixation
                # objs_display = []
                # fixation = DefaultFixation(win)
                # objs_display.append(fixation)

        # monitor mouse behavior
        mouse_position = mousePostStim.getPos()
        post_display_mouse_xs.append(mouse_position[0])
        post_display_mouse_ys.append(mouse_position[1])
      Each JS Frame:
        // end routine when time up
        if (t > delay_post_stim) {
            continueRoutine = false;
        }

        // stop displaying all noise patches
        if (has_noise_patch_displaying) {
            if (t > noise_patch_display_time) {
                for (var i, _pj_c = 0, _pj_a = util.range(objs_display.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    i = _pj_a[_pj_c];
                    let display_obj = objs_display[i];
                    display_obj.setAutoDraw(false);
                }
                has_noise_patch_displaying = false;

                // display the fixation
                // objs_display = [];
                // let fixation = new DefaultFixation(psychoJS.window);
                // objs_display.push(fixation);
            }
        }

        // monitor mouse behavior
        mouse_position = mousePostStim.getPos();
        post_display_mouse_xs.push(mouse_position[0]);
        post_display_mouse_ys.push(mouse_position[1]);
      End JS Routine:
        // record mouse position
        psychoJS.experiment.addData(`mousePostStim.x_${seq_display_loop.thisN+1}`, post_display_mouse_xs);
        psychoJS.experiment.addData(`mousePostStim.y_${seq_display_loop.thisN+1}`, post_display_mouse_ys);

        // clear all objects
        for (var i = 0; i < objs_display.length; i++) {
            let display_obj = objs_display[i];
            display_obj.setAutoDraw(false);
        }

        objs_display = [];
      End Routine:
        # record mouse position
        thisExp.addData(f'mousePostStim.x_{seq_display_loop.thisN+1}', post_display_mouse_xs)
        thisExp.addData(f'mousePostStim.y_{seq_display_loop.thisN+1}', post_display_mouse_ys)

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
    TextComponent textDelayAfterStim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = delay_post_stim
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    CodeComponent elRecord_maskShortDelay
      Code Type = Py
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      Begin Routine:
        this_epoch = 'maskShortDelay'+str(seq_display_loop.thisN)

        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
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  Routine practiceFreeDrawing
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    TextComponent textPracticeFreeDraw
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Let’s first get familiar with the tablet and pen...
        (press [space] to continue)
    BrushComponent brushPractice
      buttonRequired = True
      lineColor = $[0,0,0]
      lineWidth = 1.5
      startVal [time (s)] = 0.0
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    KeyboardComponent keyPracticeFreeDraw
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine startModeInstr
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    CodeComponent codeStartModeInstr
      Code Type = Both
      Begin Experiment:
        continue_button = None
      Begin JS Experiment:
        continue_button = null;
      Begin JS Routine:
        continue_button = funcCreateButton(
            psychoJS.window, 'continue',
            [0, -0.4], [0.25, 0.1]);
      Begin Routine:
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
      Each Frame:
        left_button = mouseStartModeInstr.getPressed()[0]
        mouse_position = mouseStartModeInstr.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      Each JS Frame:
        left_button = mouseStartModeInstr.getPressed()[0];
        mouse_position = mouseStartModeInstr.getPos();
        if (left_button && (t > 0.5) && continue_button.contains(mouse_position)) {
            continueRoutine = false;
        }
      End JS Routine:
        continue_button.setAutoDraw(false);
        continue_button = null;
      End Routine:
        continue_button.setAutoDraw(False);
        continue_button = None
    TextComponent textStartModeInstr
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'To report an orientation, you will either draw a line or adjust the position of a dot on a wheel. (More details will follow.)'
      wrapWidth = 1.2
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    MouseComponent mouseStartModeInstr
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine displayOneStim
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    CodeComponent codeDisplayOneStim
      Code Type = Both
      Begin JS Routine:
        objs_display = [];
        resp_obj = null;

        // fetch the id of the stimulus
        let i = practiceOneStim.thisN;

        // now display the stimulus
        let ori = practice_stims[i];
        let loc = [-0.25, 0];
        let stim_obj = funcDrawStim(psychoJS.window, ori, loc, patch_radius);
        objs_display.push(stim_obj);

        // now display the response
        loc = [0.25, 0];
        if (instruction_mode === 'click') {
            resp_obj = funcDrawAdjustResponse(
                psychoJS.window, loc, patch_radius, click_radius, true);
        } else if (instruction_mode === 'draw') {
            resp_obj = funcDrawDrawResponse(
                psychoJS.window, loc, patch_radius, true);
        } else {
            throw new Error(`Unknown response mode: ${instruction_mode}`);
        }
        objs_display.push(resp_obj);

        // to add the confirm button
        continue_button = funcCreateButton(
            psychoJS.window, 'continue',
            [0, -0.4], [0.25, 0.1]);
        objs_display.push(continue_button);

        // to detect whether a pressed has released
        has_released = true;

        // record mouse
        display_mouse_xs = [];
        display_mouse_ys = [];
      Begin Routine:
        objs_display = []
        resp_obj = None

        # fetch the id of the stimulus
        i = practiceOneStim.thisN

        # now display the stimulus
        ori = practice_stims[i]
        loc = [-0.25, 0]
        stim_obj = funcDrawStim(win, ori, loc, patch_radius)
        objs_display.append(stim_obj)

        # now display the response
        loc = [0.25, 0]
        if instruction_mode == 'click':
            resp_obj = funcDrawAdjustResponse(
                win, loc, patch_radius, click_radius, True)
        elif instruction_mode == 'draw':
            resp_obj = funcDrawDrawResponse(
                win, loc, patch_radius, True)
        else:
            raise NotImplementedError(f'Unknown response mode: {instruction_mode}')
        objs_display.append(resp_obj)

        # to add the confirm button
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
        objs_display.append(continue_button)

        # to detect whether a pressed has released
        has_released = True

        # record mouse
        display_mouse_xs = []
        display_mouse_ys = []
      Each Frame:
        # read mouse click
        # if there are objects clicked
        left_button = mouseOneStim.getPressed()[0]
        mouse_position = mouseOneStim.getPos()
        mouse_time = mouseOneStim.mouseClock.getTime()
        if left_button:
            if continue_button.contains(mouse_position):
                # first check if it's over the continue button
                no_pending = resp_obj.ever_have_response
                if no_pending:
                    continueRoutine = False
            else:
                if instruction_mode == 'click':
                    # only register the first click
                    if has_released:
                        has_released = False
                        resp_obj.register_click(mouse_position, mouse_time)
                elif instruction_mode == 'draw':
                    # register all mouse movements
                    has_released = False
                    has_redo = resp_obj.register_mouse(
                        mouse_position, mouse_time)
        else:
            # check if we should update has_released
            has_released = True
            if instruction_mode == 'draw':
                resp_obj.deregister_mouse(mouse_position, mouse_time)
      Each JS Frame:
        // read mouse click
        let left_button = mouseOneStim.getPressed()[0];
        let mouse_position = mouseOneStim.getPos();
        let mouse_time = mouseOneStim.mouseClock.getTime();

        if (left_button) {
            if (continue_button.contains(mouse_position)) {
                // first check if it's over the continue button
                let no_pending = resp_obj.ever_have_response;
                if (no_pending) {
                    continueRoutine = false;
                }
            } else {
                if (instruction_mode === 'click') {
                    // only register the first click
                    if (has_released) {
                        has_released = false;
                        resp_obj.register_click(mouse_position, mouse_time);
                    }
                } else if (instruction_mode === 'draw') {
                    // register all mouse movements
                    has_released = false;
                    let has_redo = resp_obj.register_mouse(mouse_position, mouse_time);
                }
            }
        } else {
            // check if we should update has_released
            has_released = true;
            if (instruction_mode === 'draw') {
                resp_obj.deregister_mouse(mouse_position, mouse_time);
            }
        }
      End JS Routine:
        // reset click recording
        has_released = true;

        // save unsaved
        if (instruction_mode === 'draw') {
            // save the stroke
            if (resp_obj.has_unsaved_stroke) {
                resp_obj.save_stroke();
            }
            // saving drawings (if there are unsaved)
            if (resp_obj.has_unsaved_drawing) {
                resp_obj.save_drawing();
            }
        }

        // record the practice response for later use
        last_practice_response = resp_obj.compute_response();
        if (instruction_mode === 'draw' && last_practice_response !== null) {
            // for drawing: just copy everything from last drawing
            let original_drawing = [
                resp_obj.all_drawings_x.slice(-1)[0],
                resp_obj.all_drawings_y.slice(-1)[0]
            ];
            last_practice_response = original_drawing;
        }

        // clear all objects
        for (let i = 0; i < objs_display.length; i++) {
            let display_obj = objs_display[i];
            display_obj.setAutoDraw(false);
        }

        objs_display = [];
        response_obj = null;
      End Routine:
        # reset click recording
        has_released = True

        # save unsaved
        if instruction_mode == 'draw':
            # save the stroke
            if resp_obj.has_unsaved_stroke:
                resp_obj.save_stroke()
            # saving drawings (if there are unsaved)
            if resp_obj.has_unsaved_drawing:
                resp_obj.save_drawing()

        # record the practice response for later use
        last_practice_response = resp_obj.compute_response()
        if (instruction_mode == 'draw') and (last_practice_response is not None):
            # for drawing: just copy everything from last drawing
            original_drawing = (
                resp_obj.all_drawings_x[-1],
                resp_obj.all_drawings_y[-1])
            last_practice_response = original_drawing

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
        response_obj = None
    MouseComponent mouseOneStim
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent textDisplayOneStim
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Practice: report orientation by ' + instruction_mode + 'ing'
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  Routine prepareModePractice
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    CodeComponent codePrepareModePractice
      Code Type = Auto->JS
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      Begin Routine:
        n_one_stim_practice = 3

        # prepare list of stimuli
        practice_stims = [10, 70, 130]

        # prepare timing
  Routine prepareTrialConfig
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    CodeComponent codePrepareTrialConfig
      Code Type = Both
      Begin Experiment:
        # configuration for time
        pre_trial_time = 1
        display_time = 0.75
        display_cue_onset_time = 0.25
        click_response_time = 4
        draw_response_time = 4
        enforce_response_time_limit = False # TO TUNE
        delay_time_min = 2.5
        delay_time_max = 8.5
        post_trial_time_min = 1
        post_trial_time_max = 3

        # set delay after one stim
        delay_post_stim = 1.5

        # configurations for display
        patch_radius = 0.16
        click_radius = 0.01
        wheel_width = 5
        button_width = 0.1
        button_height = 0.05

        # params control noise patch
        noise_patch_display_time = 0.5
        noise_patch_display_chance = 1.0
      Begin JS Experiment:
        // configuration for time
        pre_trial_time = 1;
        display_time = 0.75;
        display_cue_onset_time = 0.25;
        click_response_time = 4;
        draw_response_time = 4;
        enforce_response_time_limit = false; // TO TUNE
        delay_time_min = 2.5;
        delay_time_max = 8.5;
        post_trial_time_min = 1;
        post_trial_time_max = 3;

        // set delay after one stim
        delay_post_stim = 1.5;

        // configurations for display
        patch_radius = 0.16;
        click_radius = 0.01;
        wheel_width = 5;
        button_width = 0.1;
        button_height = 0.05;

        // params control noise patch
        noise_patch_display_time = 0.5;
        noise_patch_display_chance = 1.0;
  Routine feedbackOneStim
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    CodeComponent codeFeedbackOneStim
      Code Type = Both
      Begin JS Routine:
        objs_display = [];

        display_ys = [0.16, -0.2];
        display_xs = [-0.25, 0.25];
        display_r = 0.13;
        title_ys = [display_ys[0]+display_r+0.02, display_ys[1]+display_r+0.02];

        // draw the stimulus
        let i = practiceOneStim.thisN;
        let ori = stims_selected[i];
        let stim_loc = [0, display_ys[0]];
        let stim_obj = funcDrawStim(psychoJS.window, ori, stim_loc, display_r);
        objs_display.push(stim_obj);
        let stim_title = funcCreateFeedbackText(
            psychoJS.window, "stimulus",
            [stim_loc[0], title_ys[0]], display_r);
        objs_display.push(stim_title);

        // draw the participant's response
        let resp_loc = [display_xs[0], display_ys[1]];
        let resp_obj = null;
        if ((instruction_mode === "click")) {
            resp_obj = funcCreateClickAnswerObject(
                psychoJS.window, last_practice_response, resp_loc, display_r, 0.01);
        } else if ((instruction_mode === "draw")) {
            resp_obj = funcCreateDrawAnswerObject(
                psychoJS.window, last_practice_response, false, resp_loc, display_r);
        }
        objs_display.push(resp_obj);
        let resp_title = funcCreateFeedbackText(
            psychoJS.window, 'your response',
            [resp_loc[0], title_ys[1]], display_r);
        objs_display.push(resp_title);

        // draw the correct response
        let ans_loc = [display_xs[1], display_ys[1]];
        let ans_obj = null;
        if (instruction_mode == 'click') {
            ans_obj = funcCreateClickAnswerObject(
                psychoJS.window, ori, ans_loc, display_r, 0.01);
        } else if (instruction_mode == 'draw') {
            ans_obj = funcCreateDrawAnswerObject(
                psychoJS.window, ori, true, ans_loc, display_r);
        }
        objs_display.push(ans_obj);
        let ans_title = funcCreateFeedbackText(
            psychoJS.window, 'answer',
            [ans_loc[0], title_ys[1]] display_r);
        objs_display.push(ans_title);

        // add the continue button
        continue_button = funcCreateButton(
            psychoJS.window, 'continue',
            [0.52, 0.4], [0.25, 0.1]);
        objs_display.push(continue_button);
      Begin Routine:
        objs_display = []

        display_ys = [0.16, -0.2]
        display_xs = [-0.25, 0.25]
        display_r = 0.13
        title_ys = [display_ys[0]+display_r+0.02, display_ys[1]+display_r+0.02]

        # draw the stimulus
        i = practiceOneStim.thisN
        ori = practice_stims[i]
        stim_loc = [0, display_ys[0]]
        stim_obj = funcDrawStim(win, ori, stim_loc, display_r)
        objs_display.append(stim_obj)
        stim_title = FeedbackText(
            win, f'stimulus',
            [stim_loc[0], title_ys[0]], display_r)
        objs_display.append(stim_title)

        # draw the participant's response
        resp_loc = [display_xs[0], display_ys[1]]
        resp_obj = None
        if instruction_mode == 'click':
            resp_obj = ClickAnswerObject(
                win, last_practice_response, resp_loc, display_r, 0.01)
        elif instruction_mode == 'draw':
            resp_obj= DrawAnswerObject(
                win, last_practice_response, False, resp_loc, display_r)
        objs_display.append(resp_obj)
        resp_title = FeedbackText(
            win, 'your response',
            [resp_loc[0], title_ys[1]], display_r)
        objs_display.append(resp_title)

        # draw the correct response
        ans_loc = [display_xs[1], display_ys[1]]
        ans_obj = None
        if instruction_mode == 'click':
            ans_obj = ClickAnswerObject(
                win, ori, ans_loc, display_r, 0.01)
        elif instruction_mode == 'draw':
            ans_obj = DrawAnswerObject(
                win, ori, True, ans_loc, display_r)
        objs_display.append(ans_obj)
        ans_title = FeedbackText(
            win, 'answer',
            [ans_loc[0], title_ys[1]], display_r)
        objs_display.append(ans_title)

        # add the continue button
        continue_button = funcCreateButton(
            win, 'continue', pos=(0.52,0.4),
            size=(0.25, 0.1))
        objs_display.append(continue_button)
      Each Frame:
        left_button = mouseFeedbackOneStim.getPressed()[0]
        mouse_position = mouseFeedbackOneStim.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      Each JS Frame:
        left_button = mouseFeedbackOneStim.getPressed()[0];
        mouse_position = mouseFeedbackOneStim.getPos();
        if (left_button && (t > 0.5) && continue_button.contains(mouse_position)) {
            continueRoutine = false;
        }
      End JS Routine:
        for (var i, _pj_c = 0, _pj_a = util.range(objs_display.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            let display_obj = objs_display[i];
            display_obj.setAutoDraw(false);
        }
        objs_display = [];
      End Routine:
        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
    TextComponent textFeedbackOneStim
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Feedback
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    MouseComponent mouseFeedbackOneStim
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine startColorRulePractice
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    CodeComponent codeStartColorRule
      Code Type = Both
      Begin Experiment:
        continue_button = None
      Begin JS Experiment:
        continue_button = null;
      Begin JS Routine:
        continue_button = funcCreateButton(
            psychoJS.window, 'continue',
            [0, -0.4], [0.25, 0.1]);
      Begin Routine:
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
      Each Frame:
        left_button = mouseStartColorRule.getPressed()[0]
        mouse_position = mouseStartColorRule.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      Each JS Frame:
        left_button = mouseStartColorRule.getPressed()[0];
        mouse_position = mouseStartColorRule.getPos();
        if (left_button && (t > 0.5) && continue_button.contains(mouse_position)) {
            continueRoutine = false;
        }
      End JS Routine:
        continue_button.setAutoDraw(false);
        continue_button = null;
      End Routine:
        continue_button.setAutoDraw(False);
        continue_button = None
    MouseComponent mouseStartColorRule
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent textStartColorRule
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In the next section, we will explain how the stimuli will be presented and how to respond correctly when there are multiple items to report.
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  Routine overviewColorRule
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    CodeComponent codeOverviewInstruction
      Code Type = Both
      Begin Experiment:
        continue_button = None
      Begin JS Experiment:
        continue_button = null;
      Begin JS Routine:
        continue_button = funcCreateButton(
            psychoJS.window, 'continue',
            [0, -0.4], [0.25, 0.1]);
      Begin Routine:
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
      Each Frame:
        left_button = mouseOverviewInstruction.getPressed()[0]
        mouse_position = mouseOverviewInstruction.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      Each JS Frame:
        left_button = mouseOverviewInstruction.getPressed()[0];
        mouse_position = mouseOverviewInstruction.getPos();
        if (left_button && (t > 0.5) && continue_button.contains(mouse_position)) {
            continueRoutine = false;
        }
      End JS Routine:
        continue_button.setAutoDraw(false);
        continue_button = null;
      End Routine:
        continue_button.setAutoDraw(False);
        continue_button = None
    ImageComponent imageOverviewInstruction
      image = resources/overview.png
      pos = (0, 0.05)
      size = (1.34, 0.75)
      startVal [time (s)] = 0.0
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    MouseComponent mouseOverviewInstruction
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine prepareColorRulePractice
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    CodeComponent codePrepareColorRulePractice
      Code Type = Both
      Begin Experiment:
        n_color_rule_practice = 4
      Begin Routine:
        # response mode
        response_mode = response_modes_allowed[practiceColorRuleLoop.thisN]

        # initialize stims
        all_practice_stims = [
            [20, 110],
            [60, 150],
            [100, 10],
            [140, 50],
        ]
        # initialize color codes
        all_color_codes = [
            [1, 2],
            [2, 1],
            [2, 1],
            [1, 2],
        ]

        # initialize response regions
        all_report_xs = [
            [-0.25, 0.25],
            [0, 0],
            [0.25, -0.25],
            [0, 0],
        ]
        all_report_ys = [
            [0.03, 0.03],
            [0.3, -0.24],
            [0.03, 0.03],
            [-0.24, 0.3],
        ]

        # initialize timing
        delay_lengths = [1.5, 5.5]

        # make it slower for practice
        slow_down_factor = 1.5
        practice_display_time = display_time * slow_down_factor
        practice_display_cue_onset_time = display_cue_onset_time * slow_down_factor

        # provide the button
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
      Each Frame:
        left_button = mousePrepareColorRulePractice.getPressed()[0]
        mouse_position = mousePrepareColorRulePractice.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      End Routine:
        continue_button.setAutoDraw(False)
        continue_button = None
    TextComponent textPrepareColorRulePractice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'In the following trials, we will practice reporting two sequentially presented stimuli (by ' + response_mode + 'ing)'
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    MouseComponent mousePrepareColorRulePractice
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine colorRuleStim
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    CodeComponent codeColorRuleStim
      Code Type = Both
      Begin Routine:
        objs_display = []

        # fetch the id of the stimulus
        color_rule_i = ColorRulePracticeTrials.thisN
        color_rule_j = colorRuleStimDisplayLoop.thisN

        # now display the stimulus
        ori = all_practice_stims[color_rule_i][color_rule_j]
        loc = [0, 0]
        stim_obj = funcDrawStim(win, ori, loc, patch_radius)
        objs_display.append(stim_obj)

        # to detect whether a pressed has released
        has_released = True

        # to mark if the cue has displayed
        has_cue_shown = False
      Each Frame:
        all_color_codes

        # display the cue when onset
        if (not has_cue_shown) and t >= practice_display_cue_onset_time:
            cue_loc = [0, 0]
            cue_color = all_color_codes[color_rule_i][color_rule_j]
            cue_code = 99 # default
            report_cue = SingleCueObject(
                win, cue_loc, cue_code, patch_radius*0.6, cue_color)
            objs_display.append(report_cue)
            has_cue_shown = True

        # end routine when time up
        if t > practice_display_time:
            continueRoutine = False
      End Routine:
        # reset click recording
        has_released = True

        # don't record response
        # thisExp.addData(f'mouseStim.x_{seq_display_loop.thisN+1}', display_mouse_xs)
        # thisExp.addData(f'mouseStim.y_{seq_display_loop.thisN+1}', display_mouse_ys)

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
    TextComponent textColorRuleStim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine colorRuleDelay
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    CodeComponent codeColorRuleDelay
      Code Type = Both
      Begin JS Routine:
        objs_display = [];
        has_noise_patch_displaying = false;
        // decide whether to display noise patch
        to_display_noise_patch = Math.random() < noise_patch_display_chance;
        if (to_display_noise_patch) {
            let loc = [0, 0];
            stim_obj = new NoisePatch(psychoJS.window, loc, patch_radius);
            objs_display.push(stim_obj);
            has_noise_patch_displaying = true;
        }
      Begin Routine:
        objs_display = []
        has_noise_patch_displaying = False

        # decide whether to display noise patch
        to_display_noise_patch =  random.random() < noise_patch_display_chance
        if to_display_noise_patch:
            loc = [0, 0]
            stim_obj = NoisePatch(win, loc, patch_radius)
            objs_display.append(stim_obj)
            has_noise_patch_displaying = True
      Each Frame:
        # end routine when time up
        if t > delay_post_stim:
            continueRoutine = False

        # stop displaying all noise patches
        if has_noise_patch_displaying:
            if t > noise_patch_display_time:
                for i in range(len(objs_display)):
                    display_obj = objs_display[i]
                    display_obj.setAutoDraw(False)
                has_noise_patch_displaying = False

                # display the fixation
                objs_display = []
                fixation = DefaultFixation(win)
                objs_display.append(fixation)
      End JS Routine:
        // no recording
        // psychoJS.experiment.addData(`mousePostStim.x_${seq_display_loop.thisN+1}`, post_display_mouse_xs);
        // psychoJS.experiment.addData(`mousePostStim.y_${seq_display_loop.thisN+1}`, post_display_mouse_ys);

        // clear all objects
        for (var i = 0; i < objs_display.length; i++) {
            let display_obj = objs_display[i];
            display_obj.setAutoDraw(false);
        }

        objs_display = [];
      End Routine:
        # no recording
        # thisExp.addData(f'mousePostStim.x_{seq_display_loop.thisN+1}', post_display_mouse_xs)
        # thisExp.addData(f'mousePostStim.y_{seq_display_loop.thisN+1}', post_display_mouse_ys)

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
    TextComponent textColorRuleDelay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine colorRuleResponse
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    CodeComponent codeColorRuleResp
      Code Type = Both
      Begin Routine:
        objs_display = []
        response_objects = []
        for i in range(2):
            loc = [
                all_report_xs[color_rule_i][i],
                all_report_ys[color_rule_i][i],
            ]
            to_report = True # default; always report it
            response_obj = None
            if response_mode == 'click':
                response_obj = funcDrawAdjustResponse(
                    win, loc, patch_radius, click_radius, to_report)
            elif response_mode == 'draw':
                response_obj = funcDrawDrawResponse(
                    win, loc, patch_radius, to_report)
            else:
                raise NotImplementedError(f'Unknown response mode: {response_mode}')
            objs_display.append(response_obj)
            response_objects.append(response_obj)

            # give order color cue
            color_code = all_color_codes[color_rule_i][i]
            report_cue = SingleCueObject(
                win, loc, 99, patch_radius*0.6, color_code)
            objs_display.append(report_cue)

        # to add the confirm button
        continue_button = None
        if len(response_objects) > 0:
            continue_button = funcCreateButton(
                win, 'continue', pos=(0, 0),
                size=(button_width*1.3, button_height*1.3))
            objs_display.append(continue_button)

        # to detect whether a pressed has released
        has_released = True
      Each Frame:
        # if there are objects clicked
        left_button = mouseColorRuleResponse.getPressed()[0]
        mouse_position = mouseColorRuleResponse.getPos()
        mouse_time = t
        if left_button:
            if continue_button.contains(mouse_position):
                # first check if it's over the continue button
                no_pending = funcCheckNoPending(response_objects)
                if no_pending:
                    continueRoutine = False
            else:
                if response_mode == 'click':
                    # only register the first click
                    if has_released:
                        # this is a new press, register it
                        has_released = False
                        # otherwise, ignore it
                        for i in range(len(response_objects)):
                            # update each position with the click
                            resp_obj = response_objects[i]
                            resp_obj.register_click(mouse_position, mouse_time)
                elif response_mode == 'draw':
                    # register all mouse movements
                    has_released = False
                    for i in range(len(response_objects)):
                        # update each position with the click
                        resp_obj = response_objects[i]
                        has_redo = resp_obj.register_mouse(
                            mouse_position, mouse_time)

        else:
            # check if we should update has_released
            has_released = True
            if response_mode == 'draw':
                for i in range(len(response_objects)):
                    # update each position with the click
                    resp_obj = response_objects[i]
                    resp_obj.deregister_mouse(mouse_position, mouse_time)
      End Routine:
        # reset click recording
        has_released = True

        practice_responses = []

        # save unsaved
        for i in range(2):
            resp_obj = response_objects[i]
            if response_mode == 'draw':
                # save the stroke
                if resp_obj.has_unsaved_stroke:
                    resp_obj.save_stroke()
                # saving drawings (if there are unsaved)
                if resp_obj.has_unsaved_drawing:
                    resp_obj.save_drawing()

            # record the practice response for later use
            last_practice_response = resp_obj.compute_response()
            if (response_mode == 'draw') and (last_practice_response is not None):
                # for drawing: just copy everything from last drawing
                original_drawing = (
                    resp_obj.all_drawings_x[-1],
                    resp_obj.all_drawings_y[-1])
                last_practice_response = original_drawing

            practice_responses.append(last_practice_response)

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
        response_objects = []
        ####################
    MouseComponent mouseColorRuleResponse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine colorRuleFeedback
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    CodeComponent codeColorRuleFeedback
      Code Type = Both
      Begin Routine:
        objs_display = []

        resp_locs = [
            [all_report_xs[color_rule_i][0], all_report_ys[color_rule_i][0]],
            [all_report_xs[color_rule_i][1], all_report_ys[color_rule_i][1]],
        ]
        feeaback_objects = CreateWholePracticeFeedback(
                oris=all_practice_stims[color_rule_i],
                responses=practice_responses,
                resp_locs=resp_locs,
                colors=all_color_codes[color_rule_i],
                cue_codes=[99, 99],
                report_codes=[True, True],
                mode=response_mode)
        objs_display += feeaback_objects

        # add the continue button
        continue_button = funcCreateButton(
            win, 'continue', pos=(0.52,0.42),
            size=(0.25, 0.1))
        objs_display.append(continue_button)
      Each Frame:
        left_button = mouseColorRuleFeedback.getPressed()[0]
        mouse_position = mouseColorRuleFeedback.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      End Routine:
        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
    TextComponent textColorRuleFeedback
      color = black
      letterHeight = 0.06
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = Feedback
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    MouseComponent mouseColorRuleFeedback
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine prepareAllPractice
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    CodeComponent codePrepareAllPractice
      Code Type = Both
      Before Experiment:
        # helper functions for creating feedbacks
        def DrawStimsDiagram(oris, locs, cue_codes, colors, radius):
            objs = []
            for i in range(2):
                # draw the stimulus
                ori = oris[i]
                stim_loc = locs[i]
                stim_obj = funcDrawStim(win, ori, stim_loc, radius)
                objs.append(stim_obj)

                # the title
                stim_title = FeedbackText(
                    win, f'stimulus {i+1}',
                    [stim_loc[0], stim_loc[1]+radius*1.2], radius)
                objs.append(stim_title)

                # also show the color code
                color_code, cue_code = colors[i], cue_codes[i]
                color_cue = SingleCueObject(
                    win, stim_loc, cue_code, radius*0.6, color_code)
                objs.append(color_cue)

            # show the arrow
            stim_arrow = funcDrawArrow(win, radius, locs[0], locs[1])
            objs.append(stim_arrow)

            return objs


        def DrawResponseCanvasDiagram(responses, locs, to_report_codes, colors, radius, h, w, mode, is_gt):
            objs = []

            # create the canvas
            canvas_loc = [
                (locs[0][0]+locs[1][0])/2,
                (locs[0][1]+locs[1][1])/2]
            canvas = visual.Rect(
                win=win, width=w, height=h, pos=canvas_loc,
                fillColor='darkGray', lineColor='black')
            canvas.setAutoDraw(True)
            objs.append(canvas)

            # create the answer objects
            for i in range(2):
                # draw the response:
                resp = responses[i]
                loc = locs[i]
                to_report = to_report_codes[i]
                cue_color = colors[i]

                if to_report:
                    if mode == 'click':
                        resp_obj = ClickAnswerObject(
                            win, resp, loc, radius, 0.01)
                    elif mode == 'draw':
                        resp_obj= DrawAnswerObject(
                            win, resp, is_gt, loc, radius)
                    else:
                        raise ValueError(f'Unknown mode {mode}')
                    objs.append(resp_obj)

                    # add the color code
                    color_cue = SingleCueObject(
                        win, loc, 99, radius*0.6, cue_color)
                    objs.append(color_cue)
                else:
                    if mode == 'click':
                        resp_obj = createPatch(
                            win, pos=loc, radius=radius,
                            fill_color='gray', line_color='black')
                    elif mode == 'draw':
                        dark_gray = [-0.3, -0.3, -0.3]
                        resp_obj= createPatch(
                            win, pos=loc, radius=radius,
                            fill_color=dark_gray, line_color=dark_gray)
                    else:
                        raise ValueError(f'Unknown mode {mode}')
                    resp_obj.setAutoDraw(True)
                    objs.append(resp_obj)

            # return list of objects
            return objs

        def CreateWholePracticeFeedback(
                oris, responses, resp_locs,
                colors, cue_codes, report_codes, mode):

            objs_display = []

            # layout settings
            group_xs = [-0.3, 0.3]
            display_ys = [0.14, -0.3]
            display_xs = [-0.15, 0.15]
            stim_xs = [-0.2, 0.2]
            display_r = 0.13
            little_display_r = 0.08
            title_ys = [display_ys[0]+display_r+0.02, display_ys[1]+little_display_r*2.75]

            little_canvas_h = 4.5 * little_display_r
            little_canvas_w = 6 * little_display_r

            # create stimuli
            locs = [
                [stim_xs[0], display_ys[0]],
                [stim_xs[1], display_ys[0]],
            ]
            stim_objs = DrawStimsDiagram(
                oris, locs, [99, 99],
                colors, display_r)
            objs_display += stim_objs
            # draw the title for stimuli display
            all_stim_title = FeedbackText(
                win, f'Stimuli',
                [0, title_ys[0]+0.05], display_r*1.5)
            objs_display.append(all_stim_title)

            # create participant response review
            # convert resp loc to offset
            loc_offsets = []
            for i in range(2):
                x_offset = resp_locs[i][0] * little_canvas_w
                y_offset = resp_locs[i][1] * little_canvas_h
                loc_offsets.append([x_offset, y_offset])

            # create partcipants' response
            locs = [
                [loc_offsets[0][0]+group_xs[0], loc_offsets[0][1]+display_ys[1]],
                [loc_offsets[1][0]+group_xs[0], loc_offsets[1][1]+display_ys[1]],
            ]
            past_resp_objs = DrawResponseCanvasDiagram(
                responses, locs, report_codes,
                colors, little_display_r,
                little_canvas_h, little_canvas_w, mode, False)
            objs_display += past_resp_objs
            # and the title
            all_resp_title = FeedbackText(
                win, f'Your Response',
                [group_xs[0], title_ys[1]], display_r*1.2)
            objs_display.append(all_resp_title)

            # create correct answers
            locs = [
                [loc_offsets[0][0]+group_xs[1], loc_offsets[0][1]+display_ys[1]],
                [loc_offsets[1][0]+group_xs[1], loc_offsets[1][1]+display_ys[1]],
            ]
            ans_objs = DrawResponseCanvasDiagram(
                oris, locs, report_codes,
                colors, little_display_r,
                little_canvas_h, little_canvas_w, mode, True)
            objs_display += ans_objs
            # and the title
            all_ans_title = FeedbackText(
                win, f'Correct Answer',
                [group_xs[1], title_ys[1]], display_r*1.2)
            objs_display.append(all_ans_title)

            return objs_display
  Routine taskInstructionText
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    CodeComponent codeTextInstructionText
      Code Type = Both
      Before Experiment:
        text_practice_instruction_precue = "In this type of trials, " \
            + "you don't need to remember all stimuli shown. " \
            + "Instead, you only need to remember the ones marked with a filled star, " \
            + "and you can forget about those with an empty star. " \
            + "During the response phase, " \
            + "report only the stimuli you were instructed to remember."
        text_practice_instruction_postcue = "In this type of trial, " \
            + "you always need to remember all the stimuli presented. " \
            + "However, during the response phase, " \
            + "sometimes only one of the two stimuli will be asked about." \
            + "More specifically, you only need to report stimuli whose corresponding " \
            + "report regions are valid."

        text_practice_instructions = [
            text_practice_instruction_precue,
            text_practice_instruction_postcue,
        ]
      Begin Routine:
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
      Each Frame:
        left_button = mouseTaskInstruction.getPressed()[0]
        mouse_position = mouseTaskInstruction.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      End Routine:
        continue_button.setAutoDraw(False)
        continue_button = None
    TextComponent textTaskInstruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_practice_instructions[trial_type] + '\n You will perform this task in both drawing and clicking mode'
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    MouseComponent mouseTaskInstruction
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine taskInstructionDiagram
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    CodeComponent codeTaskInstrDiagram
      Code Type = Both
      Begin Experiment:
        task_diagram_text_to_display_list = [
                'Trials with a delay and an informatic cue',
                'Trials with a delay but no informatic cue'
        ]
      Begin Routine:
        # specify the response mode
        response_mode = response_modes_allowed[TaskInstrLoop.thisN]
        # create the title
        task_diagram_text_to_display = 'Now we will practice ' + response_mode + 'ing to report answer \n'
        task_diagram_text_to_display += 'for this type of trials.'
        # create the continue button
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
      Each Frame:
        left_button = mouseTaskInstrDiagram.getPressed()[0]
        mouse_position = mouseTaskInstrDiagram.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      End Routine:
        continue_button.setAutoDraw(False)
        continue_button = None
    TextComponent textTaskInstrDiagram
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_diagram_text_to_display
      wrapWidth = 1.3
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    MouseComponent mouseTaskInstrDiagram
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent imgTaskInstrDiagram
      image [set every repeat] = $'resources/trial_type_' + str(trial_type) + '_' + response_mode + '.png'
      pos = (0, 0.0)
      size = (1.12, 0.63)
      startVal [time (s)] = 0.0
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  Routine taskStart
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    CodeComponent codeTaskPhase
      Code Type = Auto->JS
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      Begin Routine:
        # specify the task id
        # note that order of task could have been shuffled
        trial_type = trial_type_list[TasktypeLoop.thisN]

        trial_phase_id_text = ['FIRST', 'SECOND'][TasktypeLoop.thisN]

        # specify the order or response modes (draw or click first?)
        mode_type_list = random.sample(response_modes_allowed, n_response_modes_allowed)

        # create the button
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])
      Each Frame:
        left_button = mouseTaskPhase.getPressed()[0]
        mouse_position = mouseTaskPhase.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      End Routine:
        continue_button.setAutoDraw(False)
        continue_button = None
    TextComponent textTaskPhase
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'We will now begin the ' + trial_phase_id_text + ' of two parts of the experiment. First, we will explain the task and prepare you with two practice blocks. After that, the experimenter will calibrate the eye tracker. The actual trials will then follow.'
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    MouseComponent mouseTaskPhase
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine prepareTaskInstrPractice
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    CodeComponent codePrepareTaskInstrPractice
      Code Type = Both
      Begin Routine:
        # start the instruction + practice
        has_finished_instruction = False
        max_instruction_practice_loop = 2

        # create a sampler for instruction
        instruction_sampler = StimSamplingScheduler(
            n_ori_regions, ['orthogonal'])
        instruction_sampler.initialize_stage()
  Routine startPracticeBlock
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    CodeComponent codeStartPraticeBlock
      Code Type = Both
      Begin Routine:
        # specify number of trials
        n_trials_to_practice = 4 if has_finished_instruction else 3

        # renew the sampler
        instruction_sampler.initialize_block()

        # initialize response regions
        report_xs_options = [
            [-0.25, 0.25],
            [0, 0],
            [0.25, -0.25],
            [0, 0],
        ]
        report_ys_options = [
            [0.03, 0.03],
            [0.3, -0.24],
            [0.03, 0.03],
            [-0.24, 0.3],
        ]

        # initialize timing
        delay_lengths = [1.5, 5.5]

        # make it slower for practice
        slow_down_factor = 1 if has_finished_instruction else 1.5
        practice_display_time = display_time * slow_down_factor
        practice_display_cue_onset_time = display_cue_onset_time * slow_down_factor

        # provide the button
        continue_button = funcCreateButton(
            win, 'continue',
            [0, -0.4], [0.25, 0.1])

        # create a little piece of prompt
        text_start_practice_block = ''
        if has_finished_instruction:
            text_start_practice_block = 'Now we will start a block of PRACTICE trials, ' \
                + 'but at the normal speed, just as what you will see in actual trials.'
        else:
            text_start_practice_block = 'Now we will try some PRACTICE trials, ' \
                + 'but slower than actual trials. ' \
                + 'Please check the feedback at the end of each trial carefully before moving on.'
      Each Frame:
        left_button = mouseStartPracticeBlock.getPressed()[0]
        mouse_position = mouseStartPracticeBlock.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      End Routine:
        continue_button.setAutoDraw(False)
        continue_button = None
    MouseComponent mouseStartPracticeBlock
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent textStartPracticeBlock
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_start_practice_block
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  Routine taskPracticeStim
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    CodeComponent codeTaskPracticeStim
      Code Type = Both
      Begin Routine:
        objs_display = []

        # now display the stimulus
        stim_id = taskPracticeStimLoop.thisN
        ori = cur_stims[stim_id]
        loc = [0, 0]
        stim_obj = funcDrawStim(win, ori, loc, patch_radius)
        objs_display.append(stim_obj)

        # to detect whether a pressed has released
        has_released = True

        # to mark if the cue has displayed
        has_cue_shown = False
      Each Frame:
        # display the cue when onset
        if (not has_cue_shown) and t >= practice_display_cue_onset_time:
            cue_loc = [0, 0]
            cue_color = cur_colors[stim_id]
            cue_code = cur_cue_codes[stim_id]
            report_cue = SingleCueObject(
                win, cue_loc, cue_code, patch_radius, cue_color)
            objs_display.append(report_cue)
            has_cue_shown = True

            # additionally, for instruction purpose
            # show the verbal cue
            if not has_finished_instruction:
                # if this is to report
                s_to_cue = False
                if trial_type == 1:
                    # post cue: remember everything
                    s_to_cue = True
                elif trial_type == 0:
                    # otherwise only remember the cued
                    s_to_cue = cue_code
                if s_to_cue:
                    additional_cue = TrainingCue(
                        win, 'remember this',
                        cue_loc, patch_radius)
                    objs_display.append(additional_cue)

        # end routine when time up
        if t > practice_display_time:
            continueRoutine = False
      End Routine:
        # reset click recording
        has_released = True

        # don't record response
        # thisExp.addData(f'mouseStim.x_{seq_display_loop.thisN+1}', display_mouse_xs)
        # thisExp.addData(f'mouseStim.y_{seq_display_loop.thisN+1}', display_mouse_ys)

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
    TextComponent textTaskPracticeStim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine prepareSinglePracticeTrial
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    CodeComponent codeSinglePracticeTrial
      Code Type = Both
      Begin Routine:
        practice_trial_id = taskPracticeTrialLoop.thisN

        # sample stimuli
        _, cur_stims = instruction_sampler.sample_for_trial(
            allow_same_region=False)

        # sample color code
        cur_colors = (1, 2) if random.random() < 0.5 else (2, 1)

        # determine cue code or report code
        cur_cue_codes = [False, False]
        cur_report_codes = [False, False]
        if trial_type == 0:
            cur_cue_codes[0] = (practice_trial_id % 3) != 1
            cur_cue_codes[1] = (practice_trial_id % 3) != 0
            cur_report_codes = cur_cue_codes[:]
        elif trial_type == 1:
            cur_cue_codes = [True, True]
            cur_report_codes[0] = (practice_trial_id % 3) != 1
            cur_report_codes[1] = (practice_trial_id % 3) != 0
        else:
            raise ValueError(f'Unknown trial type {trial_type}')

        # determine response region
        cur_resp_region_id = random.randint(0, len(report_xs_options)-1)
        cur_resp_regions = [
            [report_xs_options[cur_resp_region_id][0], report_ys_options[cur_resp_region_id][0]],
            [report_xs_options[cur_resp_region_id][1], report_ys_options[cur_resp_region_id][1]],
        ]

        # finally, create the fixation
        fixation = DefaultFixation(win)
      Each Frame:
        # end routine when time up
        if t > pre_trial_time:
            continueRoutine = False
      End Routine:
        fixation.setAutoDraw(False)
        fixation = None
    TextComponent textPracticePreTrial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine taskPracticeStimDelay
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    CodeComponent codeTaskPracticeStimDelay
      Code Type = Both
      Begin JS Routine:
        objs_display = [];
        has_noise_patch_displaying = true;
      Begin Routine:
        objs_display = []
        has_noise_patch_displaying = True
      Each Frame:
        # end routine when time up
        if t > delay_post_stim:
            continueRoutine = False

        # stop displaying all noise patches
        if has_noise_patch_displaying:
            if t > noise_patch_display_time:
                for i in range(len(objs_display)):
                    display_obj = objs_display[i]
                    display_obj.setAutoDraw(False)
                has_noise_patch_displaying = False

                # display the fixation
                objs_display = []
                fixation = DefaultFixation(win)
                objs_display.append(fixation)
      End JS Routine:
        // no recording
        // psychoJS.experiment.addData(`mousePostStim.x_${seq_display_loop.thisN+1}`, post_display_mouse_xs);
        // psychoJS.experiment.addData(`mousePostStim.y_${seq_display_loop.thisN+1}`, post_display_mouse_ys);

        // clear all objects
        for (var i = 0; i < objs_display.length; i++) {
            let display_obj = objs_display[i];
            display_obj.setAutoDraw(false);
        }

        objs_display = [];
      End Routine:
        # no recording
        # thisExp.addData(f'mousePostStim.x_{seq_display_loop.thisN+1}', post_display_mouse_xs)
        # thisExp.addData(f'mousePostStim.y_{seq_display_loop.thisN+1}', post_display_mouse_ys)

        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
    TextComponent textColorRuleDelay_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine taskPracticeResponse
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    CodeComponent codeTaskPracticeResponse
      Code Type = Both
      Begin Routine:
        objs_display = []
        response_objects = []
        for i in range(2):
            loc = cur_resp_regions[i]
            to_report = cur_report_codes[i] # default; always report it
            response_obj = None
            if response_mode == 'click':
                response_obj = funcDrawAdjustResponse(
                    win, loc, patch_radius, click_radius, to_report)
            elif response_mode == 'draw':
                response_obj = funcDrawDrawResponse(
                    win, loc, patch_radius, to_report)
            else:
                raise NotImplementedError(f'Unknown response mode: {response_mode}')
            objs_display.append(response_obj)
            response_objects.append(response_obj)

            # give order color cue
            if to_report:
                color_code = cur_colors[i]
                report_cue = SingleCueObject(
                    win, loc, to_report, patch_radius, color_code)
                objs_display.append(report_cue)

        # to add the confirm button
        continue_button = None
        if len(response_objects) > 0:
            continue_button = funcCreateButton(
                win, 'continue', pos=(0, 0),
                size=(button_width*1.3, button_height*1.3))
            objs_display.append(continue_button)

        # to detect whether a pressed has released
        has_released = True
      Each Frame:
        # if there are objects clicked
        left_button = mouseTaskPracticeResponse.getPressed()[0]
        mouse_position = mouseTaskPracticeResponse.getPos()
        mouse_time = t
        if left_button:
            if continue_button.contains(mouse_position):
                # first check if it's over the continue button
                no_pending = funcCheckNoPending(response_objects)
                if no_pending:
                    continueRoutine = False
            else:
                if response_mode == 'click':
                    # only register the first click
                    if has_released:
                        # this is a new press, register it
                        has_released = False
                        # otherwise, ignore it
                        for i in range(len(response_objects)):
                            # update each position with the click
                            resp_obj = response_objects[i]
                            resp_obj.register_click(mouse_position, mouse_time)
                elif response_mode == 'draw':
                    # register all mouse movements
                    has_released = False
                    for i in range(len(response_objects)):
                        # update each position with the click
                        resp_obj = response_objects[i]
                        has_redo = resp_obj.register_mouse(
                            mouse_position, mouse_time)

        else:
            # check if we should update has_released
            has_released = True
            if response_mode == 'draw':
                for i in range(len(response_objects)):
                    # update each position with the click
                    resp_obj = response_objects[i]
                    resp_obj.deregister_mouse(mouse_position, mouse_time)
      End Routine:
        # reset click recording
        has_released = True

        practice_responses = []

        # save unsaved
        for i in range(2):
            to_report = cur_report_codes[i]
            if to_report:
                resp_obj = response_objects[i]
                if response_mode == 'draw':
                    # save the stroke
                    if resp_obj.has_unsaved_stroke:
                        resp_obj.save_stroke()
                    # saving drawings (if there are unsaved)
                    if resp_obj.has_unsaved_drawing:
                        resp_obj.save_drawing()

                # record the practice response for later use
                last_practice_response = resp_obj.compute_response()
                if (response_mode == 'draw') and (last_practice_response is not None):
                    # for drawing: just copy everything from last drawing
                    original_drawing = (
                        resp_obj.all_drawings_x[-1],
                        resp_obj.all_drawings_y[-1])
                    last_practice_response = original_drawing
            else:
                last_practice_response = None
            practice_responses.append(last_practice_response)


        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
        response_objects = []
        ####################
    MouseComponent mouseTaskPracticeResponse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine taskPracticeTrialFeedback
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    CodeComponent codeTaskPracticeTrialFeedback
      Code Type = Both
      Begin Routine:
        objs_display = []
        feeaback_objects = CreateWholePracticeFeedback(
                oris=cur_stims,
                responses=practice_responses,
                resp_locs=cur_resp_regions,
                colors=cur_colors,
                cue_codes=cur_cue_codes,
                report_codes=cur_report_codes,
                mode=response_mode)
        objs_display += feeaback_objects

        # add the continue button
        continue_button = funcCreateButton(
            win, 'continue', pos=(0.52,0.42),
            size=(0.25, 0.1))
        objs_display.append(continue_button)
      Each Frame:
        left_button = mouseTaskPracticeTrialFeedback.getPressed()[0]
        mouse_position = mouseTaskPracticeTrialFeedback.getPos()
        if left_button and (t > 0.5) and continue_button.contains(mouse_position):
            continueRoutine = False
      End Routine:
        # clear all objects
        for i in range(len(objs_display)):
            display_obj = objs_display[i]
            display_obj.setAutoDraw(False)

        objs_display = []
    TextComponent textTaskPracticeTrialFeedback
      color = black
      letterHeight = 0.06
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = Feedback
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    MouseComponent mouseTaskPracticeTrialFeedback
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine summarizeTrialBlock
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    CodeComponent codeSummarizeTrialBlock
      Code Type = Both
      Begin Routine:
        if not has_finished_instruction:
            has_finished_instruction = True
  Routine drift_check
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    CodeComponent drift_check_code
      Code Type = Py
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      Begin Routine:
        if eyetracking == 1:
            # drift-check and re-do camera setup if ESCAPE is pressed
            try:
                error = el_tracker.doDriftCorrect(int(scn_width/2.0),
                                                  int(scn_height/2.0), 1, 1)
                # break following a success drift-check
            except:
                continue
            # put tracker in idle/offline mode before recording
            el_tracker.setOfflineMode()
  Routine backupSave
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    CodeComponent codeBackupSave
      Code Type = Both
      Begin Routine:
        BACKUP_PATH = os.path.join(BACKUP_FOLDER_PATH, f'{BACKUP_IDX+1}.csv')
        BACKUP_IDX = (BACKUP_IDX + 1) % N_BACKUPS
        thisExp.saveAsWideText(
            fileName=BACKUP_PATH,
            appendFile=False,
            fileCollisionMethod='overwrite')
  Routine connectEL
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    CodeComponent connectTracker
      Code Type = Py
      Before Experiment:
        import platform
        from PIL import Image  # for preparing the Host backdrop image
        from string import ascii_letters
        import time

        # import eyelink libs
        import pylink
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
      Begin Experiment:
        # this is adapted from the SR research's eyelink tutorial code
        #parameters to change
        calib_style = 13 #9 for head fixed, 13 for remote
        samprate = 1000 #250, 500, 1000, or 2000
        calib_tar_size = 24 #size for the calibration target

        """change this"""
        width_param = 53.0
        distance_param =70.0


        #create a folder to store all edf files, call this folder 'results'
        edf_folder = 'C:/Users/siy009/Documents/elRaw_sihanYueying'
        if not os.path.exists(edf_folder):
            os.makedirs(edf_folder)

        # We download EDF data file from the EyeLink Host PC to the local hard
        # drive at the end of each testing session, here we rename the EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = str(expInfo['participant']) + time_str

        # create a folder for the current testing session in the "results" folder
        session_folder = os.path.join(edf_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)


        #helper function for displaying text
        def clear_screen(win):
            """ clear up the PsychoPy window"""

            win.fillColor = genv.getBackgroundColor()
            win.flip()
        def show_msg(win, text, wait_for_keypress=True):
            """ Show task instructions on screen"""

            msg = visual.TextStim(win, text,
                                  color=genv.getForegroundColor(),
                                  wrapWidth=scn_width/2)
            clear_screen(win)
            msg.draw()
            win.flip()

            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                event.waitKeys(keyList = ['space','escape'],maxWait = 60)
                clear_screen(win)

        #function to terminate task and retrieve the EDF data file from the host PC and
        #download to the display pc
        def terminate_task():
            el_tracker = pylink.getEYELINK()

            if el_tracker.isConnected():

                # Put tracker in Offline mode
                el_tracker.setOfflineMode()

                # Clear the Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)

                # Close the edf data file on the Host
                el_tracker.closeDataFile()

                # Show a file transfer message on the screen
                msg = 'EDF data is transferring from EyeLink Host PC...'
                show_msg(win, msg, wait_for_keypress=False)

                # Download the EDF data file from the Host PC to a local data folder
                # parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                try:
                    el_tracker.receiveDataFile(edf_file, local_edf)
                except RuntimeError as error:
                    print('ERROR:', error)

                # Close the link to the tracker.
                el_tracker.close()

            # close the PsychoPy window
            win.close()

            # quit PsychoPy
            core.quit()
            sys.exit()

        def abort_trial():
            """Ends recording """

            el_tracker = pylink.getEYELINK()

            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()

            # clear the screen
            clear_screen(win)
            # Send a message to clear the Data Viewer screen
            bgcolor_RGB = (116, 116, 116)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

            # send a message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)
      Begin Routine:
        # Step 1: Connect to the EyeLink Host PC
        host_ip = "100.1.1.1"
        if eyetracking == 1:
            try:
                el_tracker = pylink.EyeLink(host_ip)
            except RuntimeError as error:
                print('ERROR:', error)
                core.quit()
                sys.exit()

            #if already opened edf file, dont do this again
            if TasktypeLoop.thisN == 0 :
                # Step 2: Open an EDF data file on the Host PC
                edf_file = str(expInfo['participant']) + ".EDF"
                try:
                    el_tracker.openDataFile(edf_file)
                except RuntimeError as err:
                    print('ERROR:', err)
                    # close the link if we have one open
                    if el_tracker.isConnected():
                        el_tracker.close()
                    core.quit()
                    sys.exit()

            # Step 3: Configure the tracker
            # Put the tracker in offline mode before we change tracking parameters
            el_tracker.setOfflineMode()
            # File and Link data control
            # what eye events to save in the EDF file, include everything by default
            file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
            file_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,HREF,RAW,PUPIL,AREA,HTARGET,STATUS,INPUT'
            # what eye events to make available over the link, include everything by default
            link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
            el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
            el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
            el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
            el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)
            #set calibration style
            el_tracker.sendCommand("calibration_type = HV%s" % str(calib_style))
            #set sampling rate
            el_tracker.sendCommand("sample_rate %s" % str(samprate))

            # Step 4: set up a graphics environment for calibration
            # get the native screen resolution used by PsychoPy
            scn_width, scn_height = win.size
            # resolution fix for Mac retina displays
            if 'Darwin' in platform.system():
                if use_retina:
                    scn_width = int(scn_width/2.0)
                    scn_height = int(scn_height/2.0)
            # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
            el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendCommand(el_coords)
            # Write a DISPLAY_COORDS message to the EDF file
            # Data Viewer needs this piece of info for proper visualization
            dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendMessage(dv_coords)

            if TasktypeLoop.thisN == 0:### added to handle 2 calibs
                # Configure a graphics environment (genv) for tracker calibration
                genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
                # Set background and foreground colors for the calibration target
                # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
                foreground_color = (-1, -1, -1)
                background_color = win.color
                genv.setCalibrationColors(foreground_color, background_color)
                genv.setTargetSize(calib_tar_size)
                # Request Pylink to use the PsychoPy window we opened above for calibration
                pylink.openGraphicsEx(genv)
            task_msg = 'Press <space>, then <enter> to start calibration'
            show_msg(win, task_msg)
            print('line69')

            try:
                el_tracker.doTrackerSetup()
            except RuntimeError as err:
                print('ERROR:', err)
                el_tracker.exitCalibration()

        else:
            continueRoutine = False
      End Routine:
        #dont record yet
        if eyetracking == 1:
            el_tracker.setOfflineMode()
        win.mouseVisible = True
  Routine breakTime
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    TextComponent textBreakTime
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now we will pause to take a longer break.
        Please inform the experimenter first.
    KeyboardComponent keyBreakTime
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine terminateExp
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    CodeComponent closeEl
      Code Type = Auto->JS
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      Begin Routine:
        if eyetracking == 1:

            # Step 7: disconnect, download the EDF file, then terminate the task
            terminate_task()
Flow
  Routine prepareComponents
  Routine prepareQuiz
  Routine prepareExperiment
  Routine prepareTrialConfig
  LoopInitiator DEBUG loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine practiceFreeDrawing
    Routine fullInstruction
    Routine startModeInstr
    LoopInitiator response_instruction_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = n_response_modes_allowed
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      Routine responseInstruction
      Routine prepareModePractice
      LoopInitiator practiceOneStim loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = n_one_stim_practice
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        Routine displayOneStim
        Routine feedbackOneStim
      LoopTerminator practiceOneStim
    LoopTerminator response_instruction_loop
    Routine prepareAllPractice
    Routine startColorRulePractice
    Routine overviewColorRule
    LoopInitiator practiceColorRuleLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = n_response_modes_allowed
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      Routine prepareColorRulePractice
      LoopInitiator ColorRulePracticeTrials loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = n_color_rule_practice 
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        LoopInitiator colorRuleStimDisplayLoop loopType="TrialHandler"
          isTrials = False
          loopType = sequential
          nReps = 2
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          Routine colorRuleStim
          Routine colorRuleDelay
        LoopTerminator colorRuleStimDisplayLoop
        Routine colorRuleResponse
        Routine colorRuleFeedback
      LoopTerminator ColorRulePracticeTrials
    LoopTerminator practiceColorRuleLoop
  LoopTerminator DEBUG
  LoopInitiator TasktypeLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = max(1, n_trial_types_allowed)
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    Routine taskStart
    Routine taskInstructionText
    LoopInitiator TaskInstrLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = max(0, n_response_modes_allowed)
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      Routine taskInstructionDiagram
      Routine prepareTaskInstrPractice
      LoopInitiator taskPracticeBlockLoop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = max_instruction_practice_loop
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        Routine startPracticeBlock
        LoopInitiator taskPracticeTrialLoop loopType="TrialHandler"
          isTrials = False
          loopType = sequential
          nReps = n_trials_to_practice
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          Routine prepareSinglePracticeTrial
          LoopInitiator taskPracticeStimLoop loopType="TrialHandler"
            isTrials = False
            loopType = sequential
            nReps = 2
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            Routine taskPracticeStim
            Routine taskPracticeStimDelay
          LoopTerminator taskPracticeStimLoop
          Routine taskPracticeResponse
          Routine taskPracticeTrialFeedback
        LoopTerminator taskPracticeTrialLoop
        Routine summarizeTrialBlock
      LoopTerminator taskPracticeBlockLoop
    LoopTerminator TaskInstrLoop
    Routine connectEL
    LoopInitiator ActualTaskLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = max(0, n_response_modes_allowed)
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      Routine prepareTaskPhase
      LoopInitiator sub_sample_stage_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = n_sampling_strategies_allowed
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        Routine prepareSubSampleStage
        LoopInitiator block_stage loopType="TrialHandler"
          isTrials = False
          loopType = sequential
          nReps = n_blocks_each_subtype
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          Routine prepare_block
          Routine drift_check
          LoopInitiator block loopType="TrialHandler"
            loopType = sequential
            nReps = n_trials_each_block
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            Routine prepareSingleTrial
            Routine pre_trial
            LoopInitiator seq_display_loop loopType="TrialHandler"
              isTrials = False
              loopType = sequential
              nReps = 2
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              Routine display_stimuli
              Routine delayAfterStim
            LoopTerminator seq_display_loop
            Routine delay
            Routine response
            Routine post_trial
            Routine backupSave
          LoopTerminator block
          Routine block_feedback
        LoopTerminator block_stage
      LoopTerminator sub_sample_stage_loop
    LoopTerminator ActualTaskLoop
    LoopInitiator breakTimeLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = TasktypeLoop.nTotal > (TasktypeLoop.thisN+1)
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      Routine breakTime
    LoopTerminator breakTimeLoop
  LoopTerminator TasktypeLoop
  Routine terminateExp
